PsychoPy2experiment version="3.0.0b11"
Settings
  Completed URL = completedURL
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = body
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Routines
  Routine perspective
    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        import numpy as np

        a = np.zeros(shape = [4, 4], dtype = int)

        s_order = np.array([10, 20, 30, 40], dtype = int)

        l_order = np.array([1,2,3,4], dtype = int)


        np.random.shuffle(s_order)
        np.random.shuffle(l_order)

        a[0] += s_order[0]
        a[1] += s_order[1]
        a[2] += s_order[2]
        a[3] += s_order[3]

        a[:,0] += l_order[0]
        a[:,1] += l_order[1]
        a[:, 2] += l_order[2]
        a[:, 3] += l_order[3]

        this_order = np.array([a[0,0], a[1, 1], a[2,0], a[3, 1], a[0, 2], a[1, 3], a[2,2], a[3,3], a[0,1], a[1,0], a[2,1], a[3,0], a[0,3], a[1,2], a[2,3], a[3,2]])

        #create a dictionary for all the stories and their values

        storyDict = {11: {'name':'Restaurant Breakup', 'Social': 'Couples Therapist', 'Location':'Restaurant Critic'},
                     12: {'name':'Airport Breakup', 'Social': 'Couples Therapist', 'Location':'Airport Customer Experience Manager'},
                     13: {'name':'Grocery Shopping- Break up', 'Social':'Couples Therapist', 'Location': 'Grocery Store Customer Experience Manager'},
                     14: {'name':'Attending a Lecture-Breakup', 'Social':'Couples Therapist', 'Location': 'Dean of Academic Studies'},
                     21: {'name':'Restaurant Proposal', 'Social': 'Wedding Planner', 'Location': ' Restaurant Critic'},
                     22: {'name':'Airport Proposal', 'Social': 'Wedding Planner', 'Location':'Airport Customer Experience Manager'},
                     23: {'name':'Grocery Shopping- Proposal', 'Social': 'Wedding Planner', 'Location':'Grocery Store Customer Experience Manager'},
                     24: {'name':'Attending a Lecture-Proposal', 'Social': 'Wedding Planner', 'Location': ' Dean of Academic Studies'},
                     31: {'name':'Restaurant Business Deal', 'Social':'Business Reporter', 'Location':'Restaurant Critic'},
                     32: {'name':'Airport Business Deal', 'Social':'Business Reporter', 'Location':'Airport Customer Experience Manager'},
                     33: {'name':'Grocery Shopping- Business Deal', 'Social':'Business Reporter', 'Location':'Grocery Store Customer Experience Manager'},
                     34: {'name':'Attending a Lecture-Business Deal', 'Social':'Business Reporter', 'Location':'Dean of Academic Studies'},
                     41: {'name':'Restaurant Meet Cute', 'Social': 'Matchmaker', 'Location':'Restaurant Critic'},
                     42: {'name':'Airport Meet Cute', 'Social': 'Matchmaker', 'Location':'Airport Customer Experience Manager'},
                     43: {'name':'Grocery Shopping- Meet Cute', 'Social':'Matchmaker', 'Location': 'Grocery Store Customer Experience Manager'},
                     44: {'name':'Attending a Lecture-Meet Cute', 'Social':'Matchmaker', 'Location': 'Dean of Academic Studies'}}



        thisExp.addData('order', this_order)
      Begin Routine:
        #determine the order of the perspectives
        if resp.keys == 'l':
            order1 = np.array(['Location', 'Location', 'Social', 'Social', 'Social', 'Social', 'Location', 'Location', 'Location', 'Location', 'Social', 'Social', 'Social', 'Social', 'Location', 'Location'])
            this_perspective = storyDict.get(this_order[count], {}).get(order1[count])
            if order1[count] == 'Social':
                display_pic = 'leonardo.jpg'
            else:
                display_pic = 'cloisters.jpg'
        elif resp.keys == 's':
            order2 = np.array(['Social', 'Social', 'Social', 'Location', 'Location','Location', 'Location', 'Social', 'Social', 'Social', 'Social', 'Location', 'Location', 'Location', 'Location', 'Social'])
            this_perspective = storyDict.get(this_order[count], {}).get(order2[count])
            if order2[count] == 'Social':
                display_pic = 'leonardo.jpg'
            else:
                display_pic = 'cloisters.jpg'
    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $this_perspective
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    ImageComponent image
      image [set every repeat] = $display_pic
      pos = (0, -.5)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Routine:
        this_story = storyDict.get(this_order[count], {}).get('name')
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0
      text [set every repeat] = $this_story
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine which_experiment
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        which experiment?

        (for experimenter)
    KeyboardComponent resp
      allowedKeys = 'l','s','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine test
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = $this_text
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Flow
  Routine which_experiment
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = count.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('count', 1)]),
      OrderedDict([('count', 2)]),
      OrderedDict([('count', 3)]),
      OrderedDict([('count', 4)]),
      OrderedDict([('count', 5)]),
      OrderedDict([('count', 6)]),
      OrderedDict([('count', 7)]),
      OrderedDict([('count', 8)]),
      OrderedDict([('count', 9)]),
      OrderedDict([('count', 10)]),
      OrderedDict([('count', 11)]),
      OrderedDict([('count', 12)]),
      OrderedDict([('count', 13)]),
      OrderedDict([('count', 14)]),
      OrderedDict([('count', 15)]),
      OrderedDict([('count', 16)])]
    Routine perspective
    Routine trial
  LoopTerminator trials
