PsychoPy2experiment version="3.0.0b11"
Settings
  Completed URL = completedURL
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = demo1
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = hello
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine y_2
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        the following routine
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial
  Routine y_2
