PsychoPy2experiment version="3.2.1"
Settings
  Completed URL = completedURL
  Data filename = u'data/%s_%s' % (expInfo['participant'], expName)
  Experiment info = {'participant': 'test', 'sA': '0', 'sB': '1', 'lA': '0', 'lB': '1', 'story_listening': '1', 'play_stories': '0', 'behavioral': '0'}
  Full-screen window = False
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  expName = fmri_ebs
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Routines
  Routine perspective
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        event.clearEvents()
      Each Frame:
        for key in event.getKeys():
            if key in ['q']:
                trials.finished = 1
                continueRoutine = False
    TextComponent text_4
      letterHeight = 0.15
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $this_perspective
      wrapWidth = 1.75
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    ImageComponent image
      image [set every repeat] = $display_pic
      pos = (0, .25)
      size = (0.85, 0.75)
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = 0.1
      pos = (0, -.7)
      startVal [time (s)] = 0.0
      text = (press space to continue)
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    KeyboardComponent key_resp_22
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
    KeyboardComponent story_presses
      allowedKeys = '1','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent code_14
      Code Type = Py
      Begin Routine:
        event.clearEvents()
        stim = visual.ImageStim(win, image=this_story_pic)
      Each Frame:
        stim.draw()

        for key in event.getKeys():
            if key in ['t']:
                trials_2.finished = 1
                continueRoutine = False
    TextComponent text_34
      letterHeight = 0.05
      pos = (.85, -.6)
      startVal [time (s)] = 0.0
      text = Press '9' if you think that sentence was the beginning of a new 'part' of the story.
      wrapWidth = .3
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    TextComponent text_35
      letterHeight = 0.05
      pos = (-.85, -.6)
      startVal [time (s)] = 0.0
      text = Press '1' if you think that sentence was in the same 'part' of the story as the previous sentence. 
      wrapWidth = .3
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
  Routine ask_to_assume
    CodeComponent code_15
      Code Type = Py
      Each Frame:
        for key in event.getKeys():
            if key in ['q']:
                trials.finished = 1
                continueRoutine = False
    TextComponent text_33
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Please assume the perspective of:
      wrapWidth = 2
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end_of_task
    TextComponent text_36
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = end of task
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    CodeComponent code_16
      Code Type = Py
      Each Frame:
        for key in event.getKeys():
            if key in ['escape']:
                core.quit()
  Routine intro_test
    TextComponent text_37
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Please indicate the order in which the questions appeared:
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine storycount
    CodeComponent code_18
      Code Type = Py
      Begin Experiment:
        story_count = 0
      Begin Routine:
        story_count += 1
        print(story_list_block1[count])
        print(action_list_block1[count])
        #set the perspective
        #get the story file and the story pic
        this_story_file = storyDict.get(story_list_block1[count], {}).get('storyFile')
        this_story_pic = storyDict.get(story_list_block1[count], {}).get('pic')
        print(this_story_pic)

        #select the perspective if the action matrix is '1' or '2'
        if action_list_block1[count] == 1 or action_list_block1[count] == 2:
            this_perspective = storyDict.get(story_list_block1[count], {}).get(action_list_block1[count])
            print(this_perspective)
            if this_perspective == 'Couples Therapist':
                display_pic = 'jobphotos/couples.jpg'
                question1 = 'For how long has the initiator of the breakup been thinking about breaking up with his/her partner?'
                question2 ='What is the initial reason stated by the initiator for why he/she is breaking up?'
                question3 ='Does the person who is being broken up with want to break up, and what’s the reason stated by them for this?'
                question4 = 'Who wants what items back as a result of the breakup?'
                question5 = 'What is the initial reason stated by the initiator for why he/she wanted to meet?'
                question6 = 'Who wants how many letters burned as a result of the breakup?'
            if this_perspective == 'Restaurant Critic':
                display_pic = 'jobphotos/restaurant_critic.jpg'
                question1 = 'How is the restaurant decorated?'
                question2 ='What are the menus like?'
                question3 = 'What does each client order?'
                question4 = 'How do the clients like the food?'
                question5 = 'How is the restaurant supplied?'
                question6 = 'How do the clients like the chairs?'
            if this_perspective == 'Airport Customer Experience Manager':
                display_pic = 'jobphotos/acem.jpg'
                question1 = 'When the clients arrive at the airport, how much time do they have until their flight departs?'
                question2 ='What is the reason for the hold-up at security?'
                question3 ='Toward which gate are the clients walking?'
                question4 ='What section and seat does each client sit in on the plane?'
                question5 = 'Toward which security line are the clients walking?'
                question6 = 'What section and seat are roped off on the plane?'
            if this_perspective == 'Grocery Store Customer Experience Manager':
                display_pic = 'jobphotos/gscem.jpg'
                question1 = 'What is the grocery store like upon entering?'
                question2 ='What items do the clients pick out to buy?'
                question3 ='How many checkout lanes are open, and which one do the clients step into?'
                question4 = 'How much are the groceries, and what method of payment do the clients use?'
                question5 = 'What is the grocery store like when the clients leave?'
                question6 = 'How many checkout lanes are closed, and which one do the clients step into?'
            if this_perspective == 'Dean of Academic Studies':
                display_pic ='jobphotos/dean.jpg'
                question1 = 'What is the lecture hall like?'
                question2 ='What class are the students in, and what is the day’s lecture about?'
                question3 ='What is something taught in lecture?'
                question4 = 'What is the next assessment/assignment for the class, and when is it scheduled/due?'
                question5 = 'What class are the students in, and what was yesterday’s lecture about?'
                question6 = 'What is the lecture hall’s max capacity?'
            if this_perspective == 'Wedding Planner':
                display_pic = 'jobphotos/weddingplanner.jpg'
                question1 = 'For how long has the couple been dating?'
                question2 ='How many diamonds are on the ring, and what is the diamond color?'
                question3 ='In/on what item is the ring presented?'
                question4 = 'Who does the new fiancee text first?'
                question5 = 'For how long has the couple known the other was going to propose?'
                question6 = 'Who does the new fiancee hug first?'
            if this_perspective == 'Business Reporter':
                display_pic = 'jobphotos/business_reporter.jpg'
                question1 = 'What is each business person’s job title?'
                question2 = 'How much money is at stake in the initial offer made?'
                question3 = 'What is the name of the other industry competitor? '
                question4 =  'With what gesture do the business partners secure the deal?'
                question5 = 'What is each business person’s salary?'
                question6 =  'How much money is at stake in the final offer made?'
            if this_perspective == 'Matchmaker':
                display_pic = 'jobphotos/matchmaker.jpg'
                question1 = 'What object is the initiator of the interaction holding when he/she first notices the other person?'
                question2 ='What is the initial question that begins the conversation between the couple?'
                question3 ='When will be the next time the couple meets and for what occasion?'
                question4 = 'What time is it when the couple parts?'
                question5 = 'What is the initial question that ends the conversation between the couple?'
                question6 = 'What object is the initiator of the interaction holding when he/she leaves the other person?'
    TextComponent text_38
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = ($story_count)
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_39
      letterHeight = 0.1
      pos = (0.03, 0)
      startVal [time (s)] = 0.0
      text = Story     out of 6
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  Routine RECALL_BREAK
    TextComponent text_45
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Part 3
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_19
      Code Type = Py
      Begin Routine:
        story_time = timer.getTime()
        thisExp.addData('story time', story_time)
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
  Routine p_again
    CodeComponent code_25
      Code Type = Py
    TextComponent text_49
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Here is the perspective one more time:
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    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine story_begin
    TextComponent text_50
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = When you are ready, press the space bar to begin listening to the story. 
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    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine play_audio_story
    CodeComponent code_24
      Code Type = Py
      Begin Routine:
        #thisExp.addData('clip_StartTime', getRelTime())
        start_time = globalClock.getTime()
        m=mom.media_new(audio)
        p.set_media(m)
        p.play()
        stim = visual.ImageStim(win, image=this_story_pic)
        stim.draw()
        while p.is_playing() or (globalClock.getTime()-start_time < 2):
           stim.draw()
           win.flip()

        p.stop()

        continueRoutine=False
      Each Frame:
        if event.getKeys(['q']):
            continueRoutine=False
  Routine end_story
    TextComponent text
      letterHeight = 0.1
      pos = (0.1, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = ($story_count)
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    TextComponent text_52
      letterHeight = 0.1
      pos = (-.1, 0)
      startVal [time (s)] = 0.0
      text = End of story
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    KeyboardComponent key_resp_16
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_26
      Code Type = Py
      Each Frame:
        for key in event.getKeys():
            if key in ['t']:
                trials_14.finished = 1
                continueRoutine = False
      End Routine:
        #thisExp.saveAsWideText(filename+'_safety.csv', appendFile=True)
  Routine info
    CodeComponent code_28
      Code Type = Py
      Begin Routine:
        if action_list_block1[count] == 1:
            nreps_whole = 1
            nreps_persp = 1
        if action_list_block1[count] == 2:
            nreps_whole = 1
            nreps_persp = 1
        if action_list_block1[count] == 3:
            nreps_whole = 0
        if action_list_block1[count] == 4:
            nreps_whole = 1
            nreps_persp = 0
  Routine info_2
    CodeComponent code_30
      Code Type = Py
      Begin Routine:
        if action_list_block2[count] == 1:
            nreps_whole = 1
            nreps_persp = 1
        if action_list_block2[count] == 2:
            nreps_whole = 1
            nreps_persp = 1
        if action_list_block2[count] == 3:
            nreps_whole = 0
        if action_list_block2[count] == 4:
            nreps_whole = 1
            nreps_persp = 0
  Routine storycount_2
    CodeComponent code_31
      Code Type = Py
      Begin Routine:
        story_count += 1
        print(story_list_block2[count])
        print(action_list_block2[count])
        #set the perspective
        #get the story file and the story pic
        this_story_file = storyDict.get(story_list_block2[count], {}).get('storyFile')
        this_story_pic = storyDict.get(story_list_block2[count], {}).get('pic')

        #select the perspective if the action matrix is '1' or '2'
        if action_list_block2[count] == 1 or action_list_block2[count] == 2:
            this_perspective = storyDict.get(story_list_block2[count], {}).get(action_list_block2[count])
            print(this_perspective)
            if this_perspective == 'Couples Therapist':
                display_pic = 'jobphotos/couples.jpg'
                question1 = 'For how long has the initiator of the breakup been thinking about breaking up with his/her partner?'
                question2 ='What is the initial reason stated by the initiator for why he/she is breaking up?'
                question3 ='Does the person who is being broken up with want to break up, and what’s the reason stated by them for this?'
                question4 = 'Who wants what items back as a result of the breakup?'
                question5 = 'Does the person being broken up with expect that this is coming?'
                question6 = 'Who witnesses the breakup?'
            if this_perspective == 'Restaurant Critic':
                display_pic = 'jobphotos/restaurant_critic.jpg'
                question1 = 'How is the restaurant decorated?'
                question2 ='What are the menus like?'
                question3 = 'What does each client order?'
                question4 = 'How do the clients like the food?'
                question5 = 'What meal is being served?'
                question6 = 'How old is the waiter?'
            if this_perspective == 'Airport Customer Experience Manager':
                display_pic = 'jobphotos/acem.jpg'
                question1 = 'When the clients arrive at the airport, how much time do they have until their flight departs?'
                question2 ='What is the reason for the hold-up at security?'
                question3 ='Toward which gate are the clients walking?'
                question4 ='What section and seat does each client sit in on the plane?'
                question5 = 'Are the security guards friendly or rude?'
                question6 = 'Are the airport restrooms clean?'
            if this_perspective == 'Grocery Store Customer Experience Manager':
                display_pic = 'jobphotos/gscem.jpg'
                question1 = 'What is the grocery store like upon entering?'
                question2 ='What items do the clients pick out to buy?'
                question3 ='How many checkout lanes are open, and which one do the clients step into?'
                question4 = 'How much are the groceries, and what method of payment do the clients use?'
                question5 = 'How long does it take for the cashier to scan all of the customers’ groceries?'
                question6 = 'What type of grocery bags do the clients use?'
            if this_perspective == 'Dean of Academic Studies':
                display_pic ='jobphotos/dean.jpg'
                question1 = 'What is the lecture hall like?'
                question2 ='What class are the students in, and what is the day’s lecture about?'
                question3 ='What is something taught in lecture?'
                question4 = 'What is the next assessment/assignment for the class, and when is it scheduled/due?'
                question5 = 'Are the students paying attention?'
                question6 = 'Are the desks comfortable?'
            if this_perspective == 'Wedding Planner':
                display_pic = 'jobphotos/weddingplanner.jpg'
                question1 = 'For how long has the couple been dating?'
                question2 ='How many diamonds are on the ring, and what is the diamond color?'
                question3 ='In/on what item is the ring presented?'
                question4 = 'Who does the new fiancee text first?'
                question5 = 'Is anyone taking pictures of the proposal?'
                question6 = 'How long does the proposal take?'
            if this_perspective == 'Business Reporter':
                display_pic = 'jobphotos/business_reporter.jpg'
                question1 = 'What is each business person’s job title?'
                question2 = 'How much money is at stake in the initial offer made?'
                question3 = 'What is the name of the other industry competitor? '
                question4 =  'With what gesture do the business partners secure the deal?'
                question5 = 'Is the deal fair?'
                question6 =  'How long does it take to make the deal?'
            if this_perspective == 'Matchmaker':
                display_pic = 'jobphotos/matchmaker.jpg'
                question1 = 'What object is the initiator of the interaction holding when he/she first notices the other person?'
                question2 ='What is the initial question that begins the conversation between the couple?'
                question3 ='When will be the next time the couple meets and for what occasion?'
                question4 = 'What time is it when the couple parts?'
                question5 = 'Is the couple going to get married?'
                question6 = 'Who shows more interest?'
    TextComponent text_55
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = ($story_count)
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    TextComponent text_56
      letterHeight = 0.1
      pos = (0.03, 0)
      startVal [time (s)] = 0.0
      text = Story     out of 6
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ask_to_assume_2
    CodeComponent code_33
      Code Type = Py
      Each Frame:
        for key in event.getKeys():
            if key in ['q']:
                trials_10.finished = 1
                continueRoutine = False
    TextComponent text_57
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Please assume the perspective of:
      wrapWidth = 2
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    KeyboardComponent key_resp_17
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine perspective_2
    CodeComponent code_34
      Code Type = Py
      Begin Routine:
        event.clearEvents()
      Each Frame:
        for key in event.getKeys():
            if key in ['q']:
                trials_11.finished = 1
                continueRoutine = False
    TextComponent text_60
      letterHeight = 0.15
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $this_perspective
      wrapWidth = 1.75
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    ImageComponent image_2
      image [set every repeat] = $display_pic
      pos = (0, .25)
      size = (0.85, 0.75)
      startVal [time (s)] = 0.0
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    TextComponent text_58
      letterHeight = 0.1
      pos = (0, -.7)
      startVal [time (s)] = 0.0
      text = (press space to continue)
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    KeyboardComponent key_resp_23
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro_test_2
    TextComponent text_62
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Please indicate the order in which the questions appeared:
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    KeyboardComponent key_resp_18
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine perspective_test
    CodeComponent set_text
      Code Type = Py
      Begin Routine:
        from psychopy import visual, core, event

        event.clearEvents()
        Q = np.array([question1, question2, question3, question4, question5, question6])
        correct = np.array([1,2,3,4,0,0], dtype=int)
        randperm = np.random.permutation(6)
        Q = Q[randperm]
        correct = correct[randperm]

        text1 = "1: " + Q[0]
        text2 = "2: " + Q[1]
        text3 = "3: " + Q[2]
        text4 = "4: " + Q[3]
        text5 = "5: " + Q[4]
        text6 = "6: " + Q[5]

        this_image = 'icon/bar1.png'



        check = visual.ImageStim(win, 'icon/checkmark.png')
        redx = visual.ImageStim(win, 'icon/redx.png')

        thumbsup = visual.ImageStim(win, 'icon/thumbsup.png')



        checkCount = 0
        test1 = 0
        test2 = 0
        test3 = 0
        test4 = 0
        test5 = 0
        test6 = 0
    TextComponent question1_3
      letterHeight = 0.08
      pos = (0, .70)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text1
      wrapWidth = 2
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    TextComponent question2_3
      letterHeight = 0.08
      pos = (0, .45)
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text [set every repeat]:
        $text2
    TextComponent question3_3
      letterHeight = 0.08
      pos = (0, .16)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text3
      wrapWidth = 2
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    TextComponent question4_3
      letterHeight = 0.08
      pos = (0, -.12)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text4
      wrapWidth = 2
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    TextComponent question5_3
      letterHeight = 0.08
      pos = (0, -.35)
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text [set every repeat]:
        $text5
    TextComponent question6_3
      letterHeight = 0.08
      pos = (0, -.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text6
      wrapWidth = 2
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    CodeComponent framecheck
      Code Type = Py
      Each Frame:
        if this_image == 'icon/bar5.jpg':
            thumbsup.draw()
            win.flip()
            core.wait(1.5)
            trials_7.finished= True
            continueRoutine = False
        #key press 1
        if event.getKeys(['1']):
            if correct[0] == (checkCount + 1):
                if test1 == 0:
                    test1 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #keypress 2
        if event.getKeys(['2']):
            if correct[1] == (checkCount + 1):
                if test2 == 0:
                    test2 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #key press 3
        if event.getKeys(['3']):
            if correct[2] == (checkCount + 1):
                if test3 == 0:
                    test3 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #keypress 4
        if event.getKeys(['4']):
            if correct[3] == (checkCount + 1):
                if test4 == 0:
                    test4 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #key press 5
        if event.getKeys(['5']):
            if correct[4] == (checkCount + 1):
                if test5 == 0:
                    test5 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #keypress 6
        if event.getKeys(['6']):
            if correct[5] == (checkCount + 1):
                if test6 == 0:
                    test6 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False


        if event.getKeys(['q']):
            trials_7.finished = True
            continueRoutine=False
        if checkCount == 4:
            this_image = 'icon/bar5.jpg'

        if checkCount == 1:
            this_image = 'icon/bar2.png'
        if checkCount == 2:
            this_image = 'icon/bar3.jpg'
        if checkCount == 3:
            this_image = 'icon/bar4.png'
    ImageComponent image_16
      image [set every frame] = $this_image
      pos = (0, -.85)
      size = (0.25, 0.125)
      startVal [time (s)] = 0.0
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  Routine perspective_test_4
    CodeComponent set_text_2
      Code Type = Py
      Begin Routine:
        from psychopy import visual, core, event

        event.clearEvents()
        Q = np.array([question1, question2, question3, question4, question5, question6])
        correct = np.array([1,2,3,4,0,0], dtype=int)
        randperm = np.random.permutation(6)
        Q = Q[randperm]
        correct = correct[randperm]

        text1 = "1: " + Q[0]
        text2 = "2: " + Q[1]
        text3 = "3: " + Q[2]
        text4 = "4: " + Q[3]
        text5 = "5: " + Q[4]
        text6 = "6: " + Q[5]

        this_image = 'icon/bar1.png'



        check = visual.ImageStim(win, 'icon/checkmark.png')
        redx = visual.ImageStim(win, 'icon/redx.png')

        thumbsup = visual.ImageStim(win, 'icon/thumbsup.png')



        checkCount = 0
        test1 = 0
        test2 = 0
        test3 = 0
        test4 = 0
        test5 = 0
        test6 = 0
    TextComponent question1_2
      letterHeight = 0.08
      pos = (0, .70)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text1
      wrapWidth = 2
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    TextComponent question2_2
      letterHeight = 0.08
      pos = (0, .45)
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text [set every repeat]:
        $text2
    TextComponent question3_2
      letterHeight = 0.08
      pos = (0, .16)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text3
      wrapWidth = 2
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    TextComponent question4_2
      letterHeight = 0.08
      pos = (0, -.12)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text4
      wrapWidth = 2
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    TextComponent question5_2
      letterHeight = 0.08
      pos = (0, -.35)
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text [set every repeat]:
        $text5
    TextComponent question6_2
      letterHeight = 0.08
      pos = (0, -.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text6
      wrapWidth = 2
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    CodeComponent framecheck_2
      Code Type = Py
      Each Frame:
        if this_image == 'icon/bar5.jpg':
            thumbsup.draw()
            win.flip()
            core.wait(1.5)
            trials_11.finished= True
            continueRoutine = False
        #key press 1
        if event.getKeys(['1']):
            if correct[0] == (checkCount + 1):
                if test1 == 0:
                    test1 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #keypress 2
        if event.getKeys(['2']):
            if correct[1] == (checkCount + 1):
                if test2 == 0:
                    test2 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #key press 3
        if event.getKeys(['3']):
            if correct[2] == (checkCount + 1):
                if test3 == 0:
                    test3 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #keypress 4
        if event.getKeys(['4']):
            if correct[3] == (checkCount + 1):
                if test4 == 0:
                    test4 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #key press 5
        if event.getKeys(['5']):
            if correct[4] == (checkCount + 1):
                if test5 == 0:
                    test5 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #keypress 6
        if event.getKeys(['6']):
            if correct[5] == (checkCount + 1):
                if test6 == 0:
                    test6 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False


        if event.getKeys(['q']):
            trials_11.finished = True
            continueRoutine=False
        if checkCount == 4:
            this_image = 'icon/bar5.jpg'

        if checkCount == 1:
            this_image = 'icon/bar2.png'
        if checkCount == 2:
            this_image = 'icon/bar3.jpg'
        if checkCount == 3:
            this_image = 'icon/bar4.png'
    ImageComponent image_15
      image [set every frame] = $this_image
      pos = (0, -.85)
      size = (0.25, 0.125)
      startVal [time (s)] = 0.0
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  Routine p_again_2
    TextComponent text_59
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Here is the perspective one more time:
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    KeyboardComponent key_resp_19
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine perspective_3
    CodeComponent code_37
      Code Type = Py
      Begin Routine:
        event.clearEvents()
      Each Frame:
        for key in event.getKeys():
            if key in ['q']:
                trials.finished = 1
                continueRoutine = False
    TextComponent text_61
      letterHeight = 0.15
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $this_perspective
      wrapWidth = 1.75
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    ImageComponent image_17
      image [set every repeat] = $display_pic
      pos = (0, .25)
      size = (0.85, 0.75)
      startVal [time (s)] = 0.0
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    TextComponent text_63
      letterHeight = 0.1
      pos = (0, -.7)
      startVal [time (s)] = 0.0
      text = (press space to continue)
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    KeyboardComponent key_resp_24
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine story_begin_2
    TextComponent text_64
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = When you are ready, press the space bar to begin listening to the story. 
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    KeyboardComponent key_resp_20
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine play_audio_story_2
    CodeComponent code_39
      Code Type = Py
      Begin Routine:
        #thisExp.addData('clip_StartTime', getRelTime())
        start_time = globalClock.getTime()
        m=mom.media_new(audio)
        p.set_media(m)
        p.play()
        stim = visual.ImageStim(win, image=this_story_pic)
        stim.draw()
        while p.is_playing() or (globalClock.getTime()-start_time < 2):
           stim.draw()
           win.flip()

        p.stop()

        continueRoutine=False
      Each Frame:
        if event.getKeys(['q']):
            continueRoutine=False
  Routine trial_2
    KeyboardComponent story_presses_2
      allowedKeys = '1','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent code_40
      Code Type = Py
      Begin Routine:
        event.clearEvents()
        stim = visual.ImageStim(win, image=this_story_pic)
      Each Frame:
        stim.draw()

        for key in event.getKeys():
            if key in ['t']:
                trials_12.finished = 1
                continueRoutine = False
    TextComponent text_65
      letterHeight = 0.05
      pos = (.85, -.6)
      startVal [time (s)] = 0.0
      text = Press '9' if you think that sentence was the beginning of a new 'part' of the story.
      wrapWidth = .3
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    TextComponent text_66
      letterHeight = 0.05
      pos = (-.85, -.6)
      startVal [time (s)] = 0.0
      text = Press '1' if you think that sentence was in the same 'part' of the story as the previous sentence. 
      wrapWidth = .3
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  Routine end_story_2
    TextComponent text_67
      letterHeight = 0.1
      pos = (0.1, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = ($story_count)
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    TextComponent text_68
      letterHeight = 0.1
      pos = (-.1, 0)
      startVal [time (s)] = 0.0
      text = End of story
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    KeyboardComponent key_resp_21
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_41
      Code Type = Py
      Each Frame:
        for key in event.getKeys():
            if key in ['t']:
                trials_14.finished = 1
                continueRoutine = False
      End Routine:
        #thisExp.saveAsWideText(filename+'_safety.csv', appendFile=True)
  Routine recall_instructions_behavioral
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructText
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    TextComponent text_24
      letterHeight = 0.1
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = (press space to continue)
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  Routine Trigger
    TextComponent textTrigger
      durationEstim = 5.0
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = waiting for the scanner
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    KeyboardComponent getTrigger
      allowedKeys = '5'
      durationEstim = 5.0
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent recordTrigger
      Code Type = Py
      End Routine:
        triggerTime = globalClock.getTime()
        thisExp.addData('triggerTime', triggerTime)
        def getRelTime(start = triggerTime):
            return globalClock.getTime() - start
  Routine Startup
    CodeComponent code_29
      Code Type = Py
      Begin Experiment:
        import numpy as np
        import random


        #make basic matrix of all stories
        story_matrix = np.zeros(shape = [4, 4], dtype = int)

        s_order = np.array([10, 20, 30, 40], dtype = int)

        l_order = np.array([1,2,3,4], dtype = int)

        story_matrix[0] += s_order[0]
        story_matrix[1] += s_order[1]
        story_matrix[2] += s_order[2]
        story_matrix[3] += s_order[3]

        story_matrix[:,0] += l_order[0]
        story_matrix[:,1] += l_order[1]
        story_matrix[:, 2] += l_order[2]
        story_matrix[:, 3] += l_order[3]

        #construct the action matrix based on the inputted social and location perspectives
        action_matrix = np.zeros(shape = [4, 4], dtype = int)
        these_social_ps = [int(expInfo['sA']), int(expInfo['sB'])]
        these_location_ps = [int(expInfo['lA']), int(expInfo['lB'])]

        for i in range(2):
            action_matrix[these_social_ps[i],:] += 1
            action_matrix[:,these_location_ps[i]] += 2

        action_matrix[action_matrix == 0] = 4

        #construct the block molds
        block_mold1 = np.array([[0, 1, 0, 1], [1,0,1,0],[0,1,0,1], [1,0,1,0]])
        block_mold2 = np.array([[1,0,1,0],[0,1,0,1], [1,0,1,0],[0, 1, 0, 1]])
        #randomly select a mold for the first half of the presented stories
        flip = random.randint(0, 1)
        if flip == 0:
            action_matrix_block1 = np.multiply(action_matrix, block_mold1)
            action_matrix_block2 = np.multiply(action_matrix, block_mold2)
            story_matrix_block1 = np.multiply(story_matrix, block_mold1)
            story_matrix_block2 = np.multiply(story_matrix, block_mold2)
        else:
            action_matrix_block1 = np.multiply(action_matrix, block_mold2)
            action_matrix_block2 = np.multiply(action_matrix, block_mold1)
            story_matrix_block1 = np.multiply(story_matrix, block_mold2)
            story_matrix_block2 = np.multiply(story_matrix, block_mold1)

        #treat the matrices so that they are in list form shuffled ready for experiment
        #turn matrices into lists and remove zeros
        action_list_block1 = list(action_matrix_block1.flatten())
        action_list_block1 = np.asarray([x for x in action_list_block1 if x != 0])
        action_list_block2 = list(action_matrix_block2.flatten())
        action_list_block2 = np.asarray([x for x in action_list_block2 if x != 0])
        story_list_block1 = list(story_matrix_block1.flatten())
        story_list_block1 = np.asarray([x for x in story_list_block1 if x != 0])
        story_list_block2 = list(story_matrix_block2.flatten())
        story_list_block2 = np.asarray([x for x in story_list_block2 if x != 0])

        #rand perm the lists, same block same randperm
        randperm1 = np.random.permutation(8)
        randperm2 = np.random.permutation(8)

        action_list_block1 = action_list_block1[randperm1]
        story_list_block1 = story_list_block1[randperm1]
        action_list_block2 = action_list_block2[randperm2]
        story_list_block2 = story_list_block2[randperm2]

        all_action = np.concatenate((action_list_block1, action_list_block2), axis = 0)
        all_story = np.concatenate((story_list_block1, story_list_block2), axis = 0)
        print('action', all_action)
        print('story', all_story)

        #create a dictionary for all the stories and their values
        storyDict = {11: {'name':'Restaurant Breakup', 1: 'Couples Therapist', 2:'Restaurant Critic', 'pic':'storypics/11_storypic.jpg', 'storyFile': 'audio_excel_sheets/11_audio.xlsx'},
                     12: {'name':'Airport Breakup', 1: 'Couples Therapist', 2:'Airport Customer Experience Manager', 'pic':'storypics/12_storypic.jpg', 'storyFile': 'audio_excel_sheets/12_audio.xlsx'},
                     13: {'name':'Grocery Shopping- Break up', 1:'Couples Therapist', 2: 'Grocery Store Customer Experience Manager', 'pic':'storypics/13_storypic.jpg', 'storyFile': 'audio_excel_sheets/13_audio.xlsx'},
                     14: {'name':'Attending a Lecture-Breakup', 1:'Couples Therapist', 2: 'Dean of Academic Studies', 'pic':'storypics/14_storypic.jpg', 'storyFile': 'audio_excel_sheets/14_audio.xlsx'},
                     21: {'name':'Restaurant Proposal', 1: 'Wedding Planner', 2: 'Restaurant Critic', 'pic':'storypics/21_storypic.jpg', 'storyFile': 'audio_excel_sheets/21_audio.xlsx'},
                     22: {'name':'Airport Proposal', 1: 'Wedding Planner', 2:'Airport Customer Experience Manager', 'pic':'storypics/22_storypic.jpg', 'storyFile': 'audio_excel_sheets/22_audio.xlsx'},
                     23: {'name':'Grocery Shopping- Proposal', 1: 'Wedding Planner', 2:'Grocery Store Customer Experience Manager', 'pic':'storypics/23_storypic.jpg', 'storyFile': 'audio_excel_sheets/23_audio.xlsx'},
                     24: {'name':'Attending a Lecture-Proposal', 1: 'Wedding Planner', 2: 'Dean of Academic Studies', 'pic':'storypics/24_storypic.jpg', 'storyFile': 'audio_excel_sheets/24_audio.xlsx'},
                     31: {'name':'Restaurant Business Deal', 1:'Business Reporter', 2:'Restaurant Critic', 'pic':'storypics/31_storypic.jpg', 'storyFile': 'audio_excel_sheets/31_audio.xlsx'},
                     32: {'name':'Airport Business Deal', 1:'Business Reporter', 2:'Airport Customer Experience Manager', 'pic':'storypics/32_storypic.jpg', 'storyFile': 'audio_excel_sheets/32_audio.xlsx'},
                     33: {'name':'Grocery Shopping- Business Deal', 1:'Business Reporter', 2:'Grocery Store Customer Experience Manager', 'pic':'storypics/33_storypic.jpg', 'storyFile': 'audio_excel_sheets/33_audio.xlsx'},
                     34: {'name':'Attending a Lecture-Business Deal', 1:'Business Reporter', 2:'Dean of Academic Studies', 'pic':'storypics/34_storypic.jpg', 'storyFile': 'audio_excel_sheets/34_audio.xlsx'},
                     41: {'name':'Restaurant Meet Cute', 1: 'Matchmaker', 2:'Restaurant Critic', 'pic':'storypics/41_storypic.jpg', 'storyFile': 'audio_excel_sheets/41_audio.xlsx'},
                     42: {'name':'Airport Meet Cute', 1: 'Matchmaker', 2:'Airport Customer Experience Manager', 'pic':'storypics/42_storypic.jpg', 'storyFile': 'audio_excel_sheets/42_audio.xlsx'},
                     43: {'name':'Grocery Shopping- Meet Cute', 1:'Matchmaker', 2: 'Grocery Store Customer Experience Manager', 'pic':'storypics/43_storypic.jpg', 'storyFile': 'audio_excel_sheets/43_audio.xlsx'},
                     44: {'name':'Attending a Lecture-Meet Cute', 1:'Matchmaker', 2: 'Dean of Academic Studies', 'pic':'storypics/44_storypic.jpg', 'storyFile': 'audio_excel_sheets/44_audio.xlsx'}}


        thisExp.addData('story_list_block1', story_list_block1)
        thisExp.addData('action_list_block1', action_list_block1)
        thisExp.addData('story_list_block2', story_list_block2)
        thisExp.addData('action_list_block2', action_list_block2)

        print(story_list_block1)
        print(action_list_block1)

        #VLC stuff
        timer = core.Clock()
        from psychopy import core, visual

        import vlc
        mom=vlc.Instance()
        p=mom.media_player_new()
        #p.set_fullscreen(True)
  Routine Block1_SL
    TextComponent text_53
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = Block 1
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    CodeComponent code_49
      Code Type = Py
  Routine Block2_SL
    TextComponent text_54
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Block 2
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    CodeComponent code_32
      Code Type = Py
      Begin Routine:
        story_count = 0
        print(story_list_block2)
        print(action_list_block2)
  Routine Block1_SR
    TextComponent text_70
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Block 1 of Story Recall
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    CodeComponent code_27
      Code Type = Py
      Begin Routine:
        count_recall = 0
  Routine recall_recording1
    CodeComponent code_43
      Code Type = Py
      Begin Routine:
        thisExp.addData('recall_StartTime', getRelTime())
        this_recall_pic = storyDict.get(story_list_block1[count], {}).get('pic')
        event.clearEvents()
      End Routine:
        thisExp.addData('recall_EndTime', getRelTime())
    ImageComponent image_18
      image [set every repeat] = $this_recall_pic
      size = (1, 1)
      startVal [time (s)] = 0.0
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    TextComponent text_69
      letterHeight = 0.1
      pos = (0, -.7)
      startVal [time (s)] = 0.0
      text = Please say everything you remember about this story (press a button on the button box when you have finished):
      wrapWidth = 1.5
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    MicrophoneComponent recall_audio
      channel = 0
      startVal [time (s)] = 0.0
      stereo = False
      stopVal [duration (s)] = 600
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    KeyboardComponent key_resp_25
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine recall_type1
    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        event.clearEvents()
        cursorCounter=0
        cursorVariable='|'
        captured_string=''
        subject_response_finished=False
        shift_flag = False
        text_10.alignHoriz ='left'
        text_10.alignVert = 'top'
        text_10.wrapWidth = 1.8
        text_10.height = .05

        this_recall_pic = storyDict.get(story_list_block1[count], {}).get('pic')
      Each Frame:
        if subject_response_finished:
            final_response=captured_string
            continueRoutine=False
        for key in event.getKeys():
            if key in ['tab']:
                trials_4.finished = 1
                continueRoutine = False
            if key in ['escape']:
                core.quit()
            elif key in ['delete','backspace']:
                captured_string = captured_string[:-1]
            elif key in ['return']:
                thisExp.addData('recall', captured_string)
                subject_response_finished=True
            elif key in ['space']:
                captured_string = captured_string+' '
            elif key in ['period']:
                captured_string = captured_string+'.'
            elif key in ['dollar']:
                captured_string = captured_string + '$'
            elif key in ['exclamation']:
                captured_string = captured_string + '!'
            elif key in ['lshift', 'rshift']:
                shift_flag = True
            elif key in ['comma']:
                captured_string = captured_string+','
            elif key in ['apostrophe']:
                captured_string = captured_string+"'"
            elif key in ['slash']:
                captured_string = captured_string+'/'
            elif key in ['semicolon']:
                captured_string = captured_string + ';'
            elif key in ['option']:
                captured_string = captured_string
            elif key in ['lshift','rshift']:
                shift_flag = True
                captured_string = captured_string + ' '
            elif key in ['minus']:
                captured_string = captured_string+'-'
            elif key in ['up','down','left','right','return']:
                pass
            else:
                captured_string = captured_string+key
            # this next line formats the output. you can remove or modify as necessary
            captured_string=captured_string.capitalize()
    TextComponent text_9
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Type everything you recall here (press return to submit your response):
      wrapWidth = 1.5
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    TextComponent text_10
      letterHeight = 0.1
      pos = [-.9, -0.15]
      startVal [time (s)] = 0.0
      text [set every frame] = $captured_string
      wrapWidth = 1
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    ImageComponent image_4
      image [set every repeat] = $this_recall_pic
      pos = (0, .5)
      size = (.75, .75)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      pos = (0, -.125)
      shape = line
      size = (1.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent bottom_line
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      pos = (0, -.975)
      shape = line
      size = (1.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent right_line_2
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      ori = 90
      pos = (.925, -.55)
      shape = line
      size = (.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent left_line
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      ori = 90
      pos = (-.925, -.55)
      shape = line
      size = (.85, 1)
      startVal [time (s)] = 0.0
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    CodeComponent code_22
      Code Type = Py
      Begin Routine:
        countdownClock = core.CountdownTimer(300) # 300 s = 5 minutes  countdownStarted = True
        timeText = '5:00'
      Each Frame:
        timeRemaining = countdownClock.getTime()
        if timeRemaining <= 0.0:
            continueRoutine = False
        else:
            minutes = int(timeRemaining/60.0) # the integer number of minutes
            seconds = int(timeRemaining - (minutes * 60.0))
            if seconds < 10:
                timeText = str(minutes) + ':0' + str(seconds) # create a string of characters representing the time
            else:
                timeText = str(minutes) + ':' + str(seconds) # create a string of characters representing the time
    TextComponent text_48
      letterHeight = 0.1
      pos = (-.7, .7)
      startVal [time (s)] = 0.0
      text [set every frame] = $timeText
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  Routine Block2_SR
    CodeComponent code_42
      Code Type = Py
      Begin Routine:
        count_recall = 0
    TextComponent text_71
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Block 2 of Story Recall
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  Routine info_recall1
    CodeComponent code_36
      Code Type = Py
      Begin Routine:
        if int(expInfo['behavioral']) == 1:
            nreps_audiorecord = 0
            if action_list_block1[count] == 1:
                nreps_type = 1
            if action_list_block1[count] == 2:
                nreps_type = 1
            if action_list_block1[count] == 3:
                nreps_type = 0
            if action_list_block1[count] == 4:
                nreps_type = 1

        if int(expInfo['behavioral']) == 0:
            nreps_type = 0
            if action_list_block1[count] == 1:
                nreps_audiorecord = 1
            if action_list_block1[count] == 2:
                nreps_audiorecord = 1
            if action_list_block1[count] == 3:
                nreps_audiorecord = 0
            if action_list_block1[count] == 4:
                nreps_audiorecord = 1
  Routine info_recall2
    CodeComponent code_44
      Code Type = Py
      Begin Routine:
        if int(expInfo['behavioral']) == 1:
            nreps_audiorecord = 0
            if action_list_block2[count] == 1:
                nreps_type = 1
            if action_list_block2[count] == 2:
                nreps_type = 1
            if action_list_block2[count] == 3:
                nreps_type = 0
            if action_list_block2[count] == 4:
                nreps_type = 1

        if int(expInfo['behavioral']) == 0:
            nreps_type = 0
            if action_list_block2[count] == 1:
                nreps_audiorecord = 1
            if action_list_block2[count] == 2:
                nreps_audiorecord = 1
            if action_list_block2[count] == 3:
                nreps_audiorecord = 0
            if action_list_block2[count] == 4:
                nreps_audiorecord = 1
  Routine intro_recall
    CodeComponent code_38
      Code Type = Py
      Begin Routine:
        count_recall += 1
    TextComponent text_41
      letterHeight = 0.1
      pos = (-.02, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $count_recall
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    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_42
      letterHeight = 0.1
      pos = (0.02, 0)
      startVal [time (s)] = 0.0
      text = Recall     out of 6
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    TextComponent text_51
      letterHeight = 0.1
      pos = (0, -.7)
      startVal [time (s)] = 0.0
      text = (press the space bar to continue)
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  Routine recall_type2
    CodeComponent code_45
      Code Type = Py
      Begin Routine:
        event.clearEvents()
        cursorCounter=0
        cursorVariable='|'
        captured_string=''
        subject_response_finished=False
        shift_flag = False
        text_10.alignHoriz ='left'
        text_10.alignVert = 'top'
        text_10.wrapWidth = 1.8
        text_10.height = .05

        this_recall_pic = storyDict.get(story_list_block2[count], {}).get('pic')
      Each Frame:
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    TextComponent text_72
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Type everything you recall here (press return to submit your response):
      wrapWidth = 1.5
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    TextComponent text_73
      letterHeight = 0.1
      pos = [-.9, -0.15]
      startVal [time (s)] = 0.0
      text [set every frame] = $captured_string
      wrapWidth = 1
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    ImageComponent image_19
      image [set every repeat] = $this_recall_pic
      pos = (0, .5)
      size = (.75, .75)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_11
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      pos = (0, -.125)
      shape = line
      size = (1.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent bottom_line_11
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      pos = (0, -.975)
      shape = line
      size = (1.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent right_line_11
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      ori = 90
      pos = (.925, -.55)
      shape = line
      size = (.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent left_line_11
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      ori = 90
      pos = (-.925, -.55)
      shape = line
      size = (.85, 1)
      startVal [time (s)] = 0.0
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    CodeComponent code_46
      Code Type = Py
      Begin Routine:
        countdownClock = core.CountdownTimer(300) # 300 s = 5 minutes  countdownStarted = True
        timeText = '5:00'
      Each Frame:
        timeRemaining = countdownClock.getTime()
        if timeRemaining <= 0.0:
            continueRoutine = False
        else:
            minutes = int(timeRemaining/60.0) # the integer number of minutes
            seconds = int(timeRemaining - (minutes * 60.0))
            if seconds < 10:
                timeText = str(minutes) + ':0' + str(seconds) # create a string of characters representing the time
            else:
                timeText = str(minutes) + ':' + str(seconds) # create a string of characters representing the time
    TextComponent text_74
      letterHeight = 0.1
      pos = (-.7, .7)
      startVal [time (s)] = 0.0
      text [set every frame] = $timeText
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  Routine recall_recording2
    CodeComponent code_47
      Code Type = Py
      Begin Routine:
        thisExp.addData('recall_StartTime', getRelTime())
        this_recall_pic = storyDict.get(story_list_block2[count], {}).get('pic')
        event.clearEvents()
      End Routine:
        thisExp.addData('recall_EndTime', getRelTime())
    ImageComponent image_20
      image [set every repeat] = $this_recall_pic
      size = (1, 1)
      startVal [time (s)] = 0.0
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    TextComponent text_75
      letterHeight = 0.1
      pos = (0, -.7)
      startVal [time (s)] = 0.0
      text = Please say everything you remember about this story (press a button on the button box when you have finished):
      wrapWidth = 1.5
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    MicrophoneComponent recall_audio_2
      channel = 0
      startVal [time (s)] = 0.0
      stereo = False
      stopVal [duration (s)] = 600
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    KeyboardComponent key_resp_26
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine show_storyimage1
    KeyboardComponent key_resp_27
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_21
      image [set every repeat] = $this_story_pic
      size = (1, 1)
      startVal [time (s)] = 0.0
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  Routine show_storyimage2
    KeyboardComponent key_resp_28
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_22
      image [set every repeat] = $this_story_pic
      size = (1, 1)
      startVal [time (s)] = 0.0
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  Routine save_recall_data
    CodeComponent code_48
      Code Type = Py
      Begin Routine:
        thisExp.saveAsWideText(filename+'_safety.csv', appendFile=True)
  Routine test_add_data
    CodeComponent code_50
      Code Type = Py
      Begin Routine:
        thisExp.addData('testing', 89888)
Flow
  Routine Startup
  Routine test_add_data
  LoopInitiator trials_14 loopType="TrialHandler"
    loopType = random
    nReps = int(expInfo['story_listening'])
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    Routine Block1_SL
    Routine Trigger
    LoopInitiator Block1 loopType="TrialHandler"
      conditionsFile = count_8.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('count', 0)]),
        OrderedDict([('count', 1)]),
        OrderedDict([('count', 2)]),
        OrderedDict([('count', 3)]),
        OrderedDict([('count', 4)]),
        OrderedDict([('count', 5)]),
        OrderedDict([('count', 6)]),
        OrderedDict([('count', 7)])]
      Routine info
      LoopInitiator trials_5 loopType="TrialHandler"
        loopType = random
        nReps = nreps_whole
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        Routine storycount
        LoopInitiator trials loopType="TrialHandler"
          loopType = sequential
          nReps = nreps_persp
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          Routine ask_to_assume
          LoopInitiator trials_7 loopType="TrialHandler"
            loopType = sequential
            nReps = 7
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            Routine perspective
            Routine intro_test
            Routine perspective_test
          LoopTerminator trials_7
          Routine p_again
          Routine perspective
        LoopTerminator trials
        Routine story_begin
        LoopInitiator trials_2 loopType="TrialHandler"
          conditionsFile = $this_story_file
          loopType = sequential
          nReps = int(expInfo['behavioral'])
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          LoopInitiator trials_21 loopType="TrialHandler"
            loopType = random
            nReps = int(expInfo['play_stories'])
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            Routine play_audio_story
          LoopTerminator trials_21
          Routine trial
        LoopTerminator trials_2
        LoopInitiator trials_22 loopType="TrialHandler"
          loopType = sequential
          nReps = int(expInfo['play_stories'])
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          LoopInitiator trials_16 loopType="TrialHandler"
            conditionsFile = $this_story_file
            loopType = sequential
            nReps = 1 - int(expInfo['behavioral'])
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            Routine play_audio_story
          LoopTerminator trials_16
        LoopTerminator trials_22
        LoopInitiator trials_23 loopType="TrialHandler"
          loopType = random
          nReps = 1 - int(expInfo['play_stories'])
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          Routine show_storyimage1
        LoopTerminator trials_23
        Routine end_story
      LoopTerminator trials_5
    LoopTerminator Block1
    Routine Block2_SL
    Routine Trigger
    LoopInitiator trials_6 loopType="TrialHandler"
      conditionsFile = count_8.xlsx
      loopType = sequential
      nReps = 1
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      Routine info_2
      LoopInitiator trials_9 loopType="TrialHandler"
        loopType = sequential
        nReps = nreps_whole
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        Routine storycount_2
        LoopInitiator trials_10 loopType="TrialHandler"
          loopType = sequential
          nReps = nreps_persp
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          Routine ask_to_assume_2
          LoopInitiator trials_11 loopType="TrialHandler"
            loopType = sequential
            nReps = 7
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            Routine perspective_2
            Routine intro_test_2
            Routine perspective_test_4
          LoopTerminator trials_11
          Routine p_again_2
          Routine perspective_3
        LoopTerminator trials_10
        Routine story_begin_2
        LoopInitiator trials_12 loopType="TrialHandler"
          conditionsFile = $this_story_file
          loopType = sequential
          nReps = int(expInfo['behavioral'])
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          LoopInitiator trials_24 loopType="TrialHandler"
            loopType = random
            nReps = int(expInfo['play_stories'])
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            Routine play_audio_story_2
          LoopTerminator trials_24
          Routine trial_2
        LoopTerminator trials_12
        LoopInitiator trials_25 loopType="TrialHandler"
          loopType = random
          nReps = int(expInfo['play_stories'])
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          LoopInitiator trials_15 loopType="TrialHandler"
            conditionsFile = $this_story_file
            loopType = sequential
            nReps = 1 - int(expInfo['behavioral'])
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            Routine play_audio_story_2
          LoopTerminator trials_15
        LoopTerminator trials_25
        LoopInitiator trials_26 loopType="TrialHandler"
          loopType = sequential
          nReps = 1 - int(expInfo['play_stories'])
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          Routine show_storyimage2
        LoopTerminator trials_26
        Routine end_story_2
      LoopTerminator trials_9
    LoopTerminator trials_6
  LoopTerminator trials_14
  Routine RECALL_BREAK
  LoopInitiator behav_recall_instructions loopType="TrialHandler"
    loopType = sequential
    nReps = int(expInfo['behavioral'])
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    LoopInitiator trials_3 loopType="TrialHandler"
      conditionsFile = recall_instructions.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('instructText', 'The next part of the experiment is to recall each story to the best of your ability.')]),
        OrderedDict([('instructText', 'You will be presented with the story title, names, the images, and a blank text box for each story.')]),
        OrderedDict([('instructText', 'Write as much as you can remember about each story. Try to include everything, even if it seems trivial.')]),
        OrderedDict([('instructText', 'When you are finished recalling one story, to move onto the next one hit ‘tab’. ')]),
        OrderedDict([('instructText', 'There is no time limit for your responses. ')])]
      Routine recall_instructions_behavioral
    LoopTerminator trials_3
  LoopTerminator behav_recall_instructions
  Routine Block1_SR
  Routine Trigger
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = count_8.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('count', 0)]),
      OrderedDict([('count', 1)]),
      OrderedDict([('count', 2)]),
      OrderedDict([('count', 3)]),
      OrderedDict([('count', 4)]),
      OrderedDict([('count', 5)]),
      OrderedDict([('count', 6)]),
      OrderedDict([('count', 7)])]
    Routine info_recall1
    LoopInitiator trials_13 loopType="TrialHandler"
      loopType = sequential
      nReps = nreps_type
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      Routine intro_recall
      Routine recall_type1
    LoopTerminator trials_13
    LoopInitiator trials_17 loopType="TrialHandler"
      loopType = sequential
      nReps = nreps_audiorecord
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      Routine intro_recall
      Routine recall_recording1
    LoopTerminator trials_17
    Routine save_recall_data
  LoopTerminator trials_4
  Routine Block2_SR
  Routine Trigger
  LoopInitiator trials_20 loopType="TrialHandler"
    conditionsFile = count_8.xlsx
    loopType = sequential
    nReps = 1
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    Routine info_recall2
    LoopInitiator trials_18 loopType="TrialHandler"
      loopType = sequential
      nReps = nreps_type
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      Routine intro_recall
      Routine recall_type2
    LoopTerminator trials_18
    LoopInitiator trials_19 loopType="TrialHandler"
      loopType = sequential
      nReps = nreps_audiorecord
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      Routine intro_recall
      Routine recall_recording2
    LoopTerminator trials_19
    Routine save_recall_data
  LoopTerminator trials_20
  LoopInitiator trials_8 loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine end_of_task
  LoopTerminator trials_8
