PsychoPy2experiment version="3.2.4"
Settings
  Completed URL = completedURL
  Data filename = u'data/%s_bk%s_%s' % (expInfo['participant'],expInfo['block'], expName)
  Experiment info = {'participant': '022420', 'sA': '0', 'sB': '1', 'lA': '0', 'lB': '2', 'block_struct': '0', 'block': '1', 'behavioral': '0', 'random_seed': '4'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1680, 1050]
  expName = recall_fmri
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Routines
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
  Routine end_of_task
    TextComponent text_36
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = end of block
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    CodeComponent code_16
      Code Type = Py
      Each Frame:
        for key in event.getKeys():
            if key in ['escape']:
                core.quit()
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  Routine recall_instructions_behavioral
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructText
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    TextComponent text_24
      letterHeight = 0.1
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = (press space to continue)
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  Routine Trigger
    TextComponent textTrigger
      durationEstim = 5.0
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = waiting for the scanner
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    KeyboardComponent getTrigger
      allowedKeys = 'equal'
      durationEstim = 5.0
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent recordTrigger
      Code Type = Py
      End Routine:
        triggerTime = globalClock.getTime()
        thisExp.addData('triggerTime', triggerTime)
        def getRelTime(start = triggerTime):
            return globalClock.getTime() - start
    TextComponent text_77
      letterHeight = 0.1
      pos = (0, .5)
      startVal [time (s)] = 0.0
      text = Block   of Story Recall
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    TextComponent text_78
      letterHeight = 0.1
      pos = (-.13, .5)
      startVal [time (s)] = 0.0
      text = ($int(expInfo['block']))
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  Routine Startup
    CodeComponent code_29
      Code Type = Py
      Begin Experiment:
        import numpy as np
        import random

        #count recall
        count_recall = 0


        #basic matrix of all stories
        story_matrix = np.zeros(shape = [4, 4], dtype = int)

        s_order = np.array([10, 20, 30, 40], dtype = int)

        l_order = np.array([1,2,3,4], dtype = int)

        story_matrix[0] += s_order[0]
        story_matrix[1] += s_order[1]
        story_matrix[2] += s_order[2]
        story_matrix[3] += s_order[3]

        story_matrix[:,0] += l_order[0]
        story_matrix[:,1] += l_order[1]
        story_matrix[:, 2] += l_order[2]
        story_matrix[:, 3] += l_order[3]

        #constructing the action matrix based on the inputted social and location perspectives
        action_matrix = np.zeros(shape = [4, 4], dtype = int)
        these_social_ps = [int(expInfo['sA']), int(expInfo['sB'])]
        these_location_ps = [int(expInfo['lA']), int(expInfo['lB'])]

        for i in range(2):
            action_matrix[these_social_ps[i],:] += 1
            action_matrix[:,these_location_ps[i]] += 2

        action_matrix[action_matrix == 0] = 4

        #block molds
        block_mold1 = np.array([[0, 1, 0, 1], [1,0,1,0],[0,1,0,1], [1,0,1,0]])
        block_mold2 = np.array([[1,0,1,0],[0,1,0,1], [1,0,1,0],[0, 1, 0, 1]])

        #selecting a mold for the first half of the presented stories

        if int(expInfo['block_struct']) == 0:
            action_matrix_block1 = np.multiply(action_matrix, block_mold1)
            action_matrix_block2 = np.multiply(action_matrix, block_mold2)
            story_matrix_block1 = np.multiply(story_matrix, block_mold1)
            story_matrix_block2 = np.multiply(story_matrix, block_mold2)
        else:
            action_matrix_block1 = np.multiply(action_matrix, block_mold2)
            action_matrix_block2 = np.multiply(action_matrix, block_mold1)
            story_matrix_block1 = np.multiply(story_matrix, block_mold2)
            story_matrix_block2 = np.multiply(story_matrix, block_mold1)

        #shuffling the story and action lists
        randperm1 = np.random.RandomState(seed=int(expInfo['random_seed'])).permutation(8)
        randperm2 = np.random.RandomState(seed= (int(expInfo['random_seed']) + 1)).permutation(8)

        if int(expInfo['block']) == 1:
            #turning matrices into lists and removing zeros
            action_list_block1 = list(action_matrix_block1.flatten())
            action_list_block1 = np.asarray([x for x in action_list_block1 if x != 0])
            story_list_block1 = list(story_matrix_block1.flatten())
            story_list_block1 = np.asarray([x for x in story_list_block1 if x != 0])
            #shuffling
            action_list_block1 = action_list_block1[randperm1]
            story_list_block1 = story_list_block1[randperm1]
            #saving to data sheet
            thisExp.addData('story_list_block1', story_list_block1)
            thisExp.addData('action_list_block1', action_list_block1)
            #printing
            print(story_list_block1)
        else:
            #turning matrices into lists and removing zeros
            action_list_block2 = list(action_matrix_block2.flatten())
            action_list_block2 = np.asarray([x for x in action_list_block2 if x != 0])
            story_list_block2 = list(story_matrix_block2.flatten())
            story_list_block2 = np.asarray([x for x in story_list_block2 if x != 0])
            #shuffling
            action_list_block2 = action_list_block2[randperm2]
            story_list_block2 = story_list_block2[randperm2]
            #saving to data sheet
            thisExp.addData('story_list_block2', story_list_block2)
            thisExp.addData('action_list_block2', action_list_block2)
            #printing
            print(story_list_block2)


        #dictionary for all the stories and their values
        storyDict = {11: {'name':'Restaurant Breakup', 1: 'Couples Therapist', 2:'Restaurant Critic', 'pic':'storypics/11_storypic.jpg', 'storyFile': 'audio_excel_sheets/11_audio.xlsx'},
                     12: {'name':'Airport Breakup', 1: 'Couples Therapist', 2:'Airport Customer Experience Manager', 'pic':'storypics/12_storypic.jpg', 'storyFile': 'audio_excel_sheets/12_audio.xlsx'},
                     13: {'name':'Grocery Shopping- Break up', 1:'Couples Therapist', 2: 'Grocery Store Customer Experience Manager', 'pic':'storypics/13_storypic.jpg', 'storyFile': 'audio_excel_sheets/13_audio.xlsx'},
                     14: {'name':'Attending a Lecture-Breakup', 1:'Couples Therapist', 2: 'Dean of Academic Studies', 'pic':'storypics/14_storypic.jpg', 'storyFile': 'audio_excel_sheets/14_audio.xlsx'},
                     21: {'name':'Restaurant Proposal', 1: 'Wedding Planner', 2: 'Restaurant Critic', 'pic':'storypics/21_storypic.jpg', 'storyFile': 'audio_excel_sheets/21_audio.xlsx'},
                     22: {'name':'Airport Proposal', 1: 'Wedding Planner', 2:'Airport Customer Experience Manager', 'pic':'storypics/22_storypic.jpg', 'storyFile': 'audio_excel_sheets/22_audio.xlsx'},
                     23: {'name':'Grocery Shopping- Proposal', 1: 'Wedding Planner', 2:'Grocery Store Customer Experience Manager', 'pic':'storypics/23_storypic.jpg', 'storyFile': 'audio_excel_sheets/23_audio.xlsx'},
                     24: {'name':'Attending a Lecture-Proposal', 1: 'Wedding Planner', 2: 'Dean of Academic Studies', 'pic':'storypics/24_storypic.jpg', 'storyFile': 'audio_excel_sheets/24_audio.xlsx'},
                     31: {'name':'Restaurant Business Deal', 1:'Business Reporter', 2:'Restaurant Critic', 'pic':'storypics/31_storypic.jpg', 'storyFile': 'audio_excel_sheets/31_audio.xlsx'},
                     32: {'name':'Airport Business Deal', 1:'Business Reporter', 2:'Airport Customer Experience Manager', 'pic':'storypics/32_storypic.jpg', 'storyFile': 'audio_excel_sheets/32_audio.xlsx'},
                     33: {'name':'Grocery Shopping- Business Deal', 1:'Business Reporter', 2:'Grocery Store Customer Experience Manager', 'pic':'storypics/33_storypic.jpg', 'storyFile': 'audio_excel_sheets/33_audio.xlsx'},
                     34: {'name':'Attending a Lecture-Business Deal', 1:'Business Reporter', 2:'Dean of Academic Studies', 'pic':'storypics/34_storypic.jpg', 'storyFile': 'audio_excel_sheets/34_audio.xlsx'},
                     41: {'name':'Restaurant Meet Cute', 1: 'Matchmaker', 2:'Restaurant Critic', 'pic':'storypics/41_storypic.jpg', 'storyFile': 'audio_excel_sheets/41_audio.xlsx'},
                     42: {'name':'Airport Meet Cute', 1: 'Matchmaker', 2:'Airport Customer Experience Manager', 'pic':'storypics/42_storypic.jpg', 'storyFile': 'audio_excel_sheets/42_audio.xlsx'},
                     43: {'name':'Grocery Shopping- Meet Cute', 1:'Matchmaker', 2: 'Grocery Store Customer Experience Manager', 'pic':'storypics/43_storypic.jpg', 'storyFile': 'audio_excel_sheets/43_audio.xlsx'},
                     44: {'name':'Attending a Lecture-Meet Cute', 1:'Matchmaker', 2: 'Dean of Academic Studies', 'pic':'storypics/44_storypic.jpg', 'storyFile': 'audio_excel_sheets/44_audio.xlsx'}}

        #VLC
        timer = core.Clock()
        from psychopy import core, visual

        import vlc
        mom=vlc.Instance()
        p=mom.media_player_new()
        #p.set_fullscreen(True)

        #selecting block to present
        if int(expInfo['block']) == 1:
            block1_play = 1
            block2_play = 0
        elif int(expInfo['block']) == 2:
            block1_play = 0
            block2_play = 1
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  Routine recall_recording1
    CodeComponent code_43
      Code Type = Py
      Begin Routine:
        thisExp.addData('recall_StartTime', getRelTime())
        this_recall_pic = storyDict.get(story_list_block1[count], {}).get('pic')
        event.clearEvents()
      End Routine:
        thisExp.addData('recall_EndTime', getRelTime())
    ImageComponent image_18
      image [set every repeat] = $this_recall_pic
      size = (1, 1)
      startVal [time (s)] = 0.0
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    TextComponent text_69
      letterHeight = 0.1
      pos = (0, -.7)
      startVal [time (s)] = 0.0
      text = Please say everything you remember about this story 
      wrapWidth = 1.5
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    MicrophoneComponent recall_audio
      channel = 0
      startVal [time (s)] = 0.0
      stereo = False
      stopVal [duration (s)] = 600
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    KeyboardComponent key_resp_25
      allowedKeys = '1', '2', '3', '4', '5', '6','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_80
      letterHeight = 0.08
      pos = (0, -.9)
      startVal [time (s)] = 0.0
      text = (press any button when you have finished):
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  Routine recall_type1
    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        event.clearEvents()
        thisExp.addData('recall_StartTime', getRelTime())
        cursorCounter=0
        cursorVariable='|'
        captured_string=''
        subject_response_finished=False
        shift_flag = False
        text_10.alignHoriz ='left'
        text_10.alignVert = 'top'
        text_10.wrapWidth = 1.8
        text_10.height = .05

        this_recall_pic = storyDict.get(story_list_block1[count], {}).get('pic')
      Each Frame:
        if subject_response_finished:
            final_response=captured_string
            continueRoutine=False
        for key in event.getKeys():
            if key in ['tab']:
                trials_4.finished = 1
                continueRoutine = False
            if key in ['escape']:
                core.quit()
            elif key in ['delete','backspace']:
                captured_string = captured_string[:-1]
            elif key in ['return']:
                thisExp.addData('recall', captured_string)
                subject_response_finished=True
            elif key in ['space']:
                captured_string = captured_string+' '
            elif key in ['period']:
                captured_string = captured_string+'.'
            elif key in ['dollar']:
                captured_string = captured_string + '$'
            elif key in ['exclamation']:
                captured_string = captured_string + '!'
            elif key in ['lshift', 'rshift']:
                shift_flag = True
            elif key in ['comma']:
                captured_string = captured_string+','
            elif key in ['apostrophe']:
                captured_string = captured_string+"'"
            elif key in ['slash']:
                captured_string = captured_string+'/'
            elif key in ['semicolon']:
                captured_string = captured_string + ';'
            elif key in ['option']:
                captured_string = captured_string
            elif key in ['lshift','rshift']:
                shift_flag = True
                captured_string = captured_string + ' '
            elif key in ['minus']:
                captured_string = captured_string+'-'
            elif key in ['up','down','left','right','return']:
                pass
            else:
                captured_string = captured_string+key
            # this next line formats the output. you can remove or modify as necessary
            captured_string=captured_string.capitalize()
      End Routine:
        thisExp.addData('recall_EndTime', getRelTime())
    TextComponent text_9
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Type everything you recall here (press return to submit your response):
      wrapWidth = 1.5
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    TextComponent text_10
      letterHeight = 0.1
      pos = [-.9, -0.15]
      startVal [time (s)] = 0.0
      text [set every frame] = $captured_string
      wrapWidth = 1
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    ImageComponent image_4
      image [set every repeat] = $this_recall_pic
      pos = (0, .5)
      size = (.75, .75)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      pos = (0, -.125)
      shape = line
      size = (1.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent bottom_line
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      pos = (0, -.975)
      shape = line
      size = (1.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent right_line_2
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      ori = 90
      pos = (.925, -.55)
      shape = line
      size = (.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent left_line
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      ori = 90
      pos = (-.925, -.55)
      shape = line
      size = (.85, 1)
      startVal [time (s)] = 0.0
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    CodeComponent code_22
      Code Type = Py
      Begin Routine:
        countdownClock = core.CountdownTimer(300) # 300 s = 5 minutes  countdownStarted = True
        timeText = '5:00'
      Each Frame:
        timeRemaining = countdownClock.getTime()
        if timeRemaining <= 0.0:
            continueRoutine = False
        else:
            minutes = int(timeRemaining/60.0) # the integer number of minutes
            seconds = int(timeRemaining - (minutes * 60.0))
            if seconds < 10:
                timeText = str(minutes) + ':0' + str(seconds) # create a string of characters representing the time
            else:
                timeText = str(minutes) + ':' + str(seconds) # create a string of characters representing the time
    TextComponent text_48
      letterHeight = 0.1
      pos = (-.7, .7)
      startVal [time (s)] = 0.0
      text [set every frame] = $timeText
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
  Routine info_recall1
    CodeComponent code_36
      Code Type = Py
      Begin Routine:
        if int(expInfo['behavioral']) == 1:
            nreps_audiorecord = 0
            if action_list_block1[count] == 1:
                nreps_type = 1
            if action_list_block1[count] == 2:
                nreps_type = 1
            if action_list_block1[count] == 3:
                nreps_type = 0
            if action_list_block1[count] == 4:
                nreps_type = 1

        if int(expInfo['behavioral']) == 0:
            nreps_type = 0
            if action_list_block1[count] == 1:
                nreps_audiorecord = 1
            if action_list_block1[count] == 2:
                nreps_audiorecord = 1
            if action_list_block1[count] == 3:
                nreps_audiorecord = 0
            if action_list_block1[count] == 4:
                nreps_audiorecord = 1
  Routine info_recall2
    CodeComponent code_44
      Code Type = Py
      Begin Routine:
        if int(expInfo['behavioral']) == 1:
            nreps_audiorecord = 0
            if action_list_block2[count] == 1:
                nreps_type = 1
            if action_list_block2[count] == 2:
                nreps_type = 1
            if action_list_block2[count] == 3:
                nreps_type = 0
            if action_list_block2[count] == 4:
                nreps_type = 1

        if int(expInfo['behavioral']) == 0:
            nreps_type = 0
            if action_list_block2[count] == 1:
                nreps_audiorecord = 1
            if action_list_block2[count] == 2:
                nreps_audiorecord = 1
            if action_list_block2[count] == 3:
                nreps_audiorecord = 0
            if action_list_block2[count] == 4:
                nreps_audiorecord = 1
  Routine intro_recall
    CodeComponent code_38
      Code Type = Py
      Begin Routine:
        count_recall += 1
    TextComponent text_41
      letterHeight = 0.1
      pos = (-.02, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $count_recall
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    KeyboardComponent key_resp_26
      allowedKeys = '1', '2', '3', '4', '5', '6', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_42
      letterHeight = 0.1
      pos = (-0.05, 0)
      startVal [time (s)] = 0.0
      text = Recall    of 6
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    TextComponent text_51
      letterHeight = 0.1
      pos = (0, -.7)
      startVal [time (s)] = 0.0
      text = (press any button to continue)
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  Routine recall_type2
    CodeComponent code_45
      Code Type = Py
      Begin Routine:
        event.clearEvents()
        thisExp.addData('recall_StartTime', getRelTime())
        cursorCounter=0
        cursorVariable='|'
        captured_string=''
        subject_response_finished=False
        shift_flag = False
        text_10.alignHoriz ='left'
        text_10.alignVert = 'top'
        text_10.wrapWidth = 1.8
        text_10.height = .05

        this_recall_pic = storyDict.get(story_list_block2[count], {}).get('pic')
      Each Frame:
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      End Routine:
        thisExp.addData('recall_EndTime', getRelTime())
    TextComponent text_72
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Type everything you recall here (press return to submit your response):
      wrapWidth = 1.5
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    TextComponent text_73
      letterHeight = 0.1
      pos = [-.9, -0.15]
      startVal [time (s)] = 0.0
      text [set every frame] = $captured_string
      wrapWidth = 1
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    ImageComponent image_19
      image [set every repeat] = $this_recall_pic
      pos = (0, .5)
      size = (.75, .75)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_11
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      pos = (0, -.125)
      shape = line
      size = (1.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent bottom_line_11
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      pos = (0, -.975)
      shape = line
      size = (1.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent right_line_11
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      ori = 90
      pos = (.925, -.55)
      shape = line
      size = (.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent left_line_11
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      ori = 90
      pos = (-.925, -.55)
      shape = line
      size = (.85, 1)
      startVal [time (s)] = 0.0
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    CodeComponent code_46
      Code Type = Py
      Begin Routine:
        countdownClock = core.CountdownTimer(300) # 300 s = 5 minutes  countdownStarted = True
        timeText = '5:00'
      Each Frame:
        timeRemaining = countdownClock.getTime()
        if timeRemaining <= 0.0:
            continueRoutine = False
        else:
            minutes = int(timeRemaining/60.0) # the integer number of minutes
            seconds = int(timeRemaining - (minutes * 60.0))
            if seconds < 10:
                timeText = str(minutes) + ':0' + str(seconds) # create a string of characters representing the time
            else:
                timeText = str(minutes) + ':' + str(seconds) # create a string of characters representing the time
    TextComponent text_74
      letterHeight = 0.1
      pos = (-.7, .7)
      startVal [time (s)] = 0.0
      text [set every frame] = $timeText
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  Routine recall_recording2
    CodeComponent code_47
      Code Type = Py
      Begin Routine:
        thisExp.addData('recall_StartTime', getRelTime())
        this_recall_pic = storyDict.get(story_list_block2[count], {}).get('pic')
        event.clearEvents()
      End Routine:
        thisExp.addData('recall_EndTime', getRelTime())
    ImageComponent image_20
      image [set every repeat] = $this_recall_pic
      size = (1, 1)
      startVal [time (s)] = 0.0
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    TextComponent text_75
      letterHeight = 0.1
      pos = (0, -.7)
      startVal [time (s)] = 0.0
      text = Please say everything you remember about this story 
      wrapWidth = 1.5
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    MicrophoneComponent recall_audio_2
      channel = 0
      startVal [time (s)] = 0.0
      stereo = False
      stopVal [duration (s)] = 600
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    KeyboardComponent key_resp_27
      allowedKeys = '1', '2', '3', '4', '5', '6','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_79
      letterHeight = .08
      pos = (0, -.9)
      startVal [time (s)] = 0.0
      text = (press any button when you have finished):
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  Routine save_recall_data
    CodeComponent code_48
      Code Type = Py
      Begin Routine:
        thisExp.saveAsWideText(filename+'_safety.csv', appendFile=True)
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  Routine recall_instructions
    TextComponent text_76
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Recall Instructions
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    KeyboardComponent key_resp_30
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine routine_6sec_wait
    ImageComponent image_23
      image = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    CodeComponent code_51
      Code Type = Py
      Begin Routine:
        thisExp.addData('waitStart', getRelTime())
      End Routine:
        thisExp.addData('waitEnd', getRelTime())
Flow
  Routine Startup
  Routine recall_instructions
  LoopInitiator behav_recall_instructions loopType="TrialHandler"
    loopType = sequential
    nReps = int(expInfo['behavioral'])
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    LoopInitiator trials_3 loopType="TrialHandler"
      conditionsFile = recall_instructions.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('instructText', 'The next part of the experiment is to recall each story to the best of your ability.')]),
        OrderedDict([('instructText', 'You will be presented with the story title, names, the images, and a blank text box for each story.')]),
        OrderedDict([('instructText', 'Write as much as you can remember about each story. Try to include everything, even if it seems trivial.')]),
        OrderedDict([('instructText', 'When you are finished recalling one story, to move onto the next one hit ‘tab’. ')]),
        OrderedDict([('instructText', 'There is no time limit for your responses. ')])]
      Routine recall_instructions_behavioral
    LoopTerminator trials_3
  LoopTerminator behav_recall_instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = block1_play
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    Routine Trigger
    Routine routine_6sec_wait
    LoopInitiator trials_4 loopType="TrialHandler"
      conditionsFile = count_8.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('count', 0)]),
        OrderedDict([('count', 1)]),
        OrderedDict([('count', 2)]),
        OrderedDict([('count', 3)]),
        OrderedDict([('count', 4)]),
        OrderedDict([('count', 5)]),
        OrderedDict([('count', 6)]),
        OrderedDict([('count', 7)])]
      Routine info_recall1
      LoopInitiator trials_13 loopType="TrialHandler"
        loopType = sequential
        nReps = nreps_type
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        Routine intro_recall
        Routine recall_type1
      LoopTerminator trials_13
      LoopInitiator trials_17 loopType="TrialHandler"
        loopType = sequential
        nReps = nreps_audiorecord
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        Routine intro_recall
        Routine recall_recording1
      LoopTerminator trials_17
      Routine save_recall_data
      Routine routine_6sec_wait
    LoopTerminator trials_4
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = sequential
    nReps = block2_play
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    Routine Trigger
    Routine routine_6sec_wait
    LoopInitiator trials_20 loopType="TrialHandler"
      conditionsFile = count_8.xlsx
      loopType = sequential
      nReps = 1
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      Routine info_recall2
      LoopInitiator trials_18 loopType="TrialHandler"
        loopType = sequential
        nReps = nreps_type
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        Routine intro_recall
        Routine recall_type2
      LoopTerminator trials_18
      LoopInitiator trials_19 loopType="TrialHandler"
        loopType = sequential
        nReps = nreps_audiorecord
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        Routine intro_recall
        Routine recall_recording2
      LoopTerminator trials_19
      Routine save_recall_data
      Routine routine_6sec_wait
    LoopTerminator trials_20
  LoopTerminator trials_2
  LoopInitiator trials_8 loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine end_of_task
  LoopTerminator trials_8
