PsychoPy2experiment version="3.0.0b11"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = pre-test_fmri
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Routines
  Routine trial
    ImageComponent image
      image = joan.png
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trigger
    TextComponent textTrigger
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = waiting for the scanner
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    KeyboardComponent getTrigger
      allowedKeys = 'equal'
      durationEstim = 5.0
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent recordTrigger
      Code Type = Py
  Routine ravioli
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        import vlc
        mom=vlc.Instance()
        p=mom.media_player_new()
      Begin Routine:
        start_time = globalClock.getTime()
        m=mom.media_new('ravioli.ogg')
        p.set_media(m)
        p.play()
        stim = visual.ImageStim(win, image='beach.png')
        stim.draw()
        while p.is_playing() or (globalClock.getTime()-start_time < 2):
           stim.draw()
           win.flip()
        p.stop()

        continueRoutine=False
  Routine audio_recording
    ImageComponent image_2
      image = plane.png
      size = (2, 1.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MicrophoneComponent mic_1
      startVal [time (s)] = 0.0
      stereo = False
      stopVal [duration (s)] = 120
Flow
  Routine Trigger
  Routine trial
  Routine ravioli
  Routine audio_recording
