PsychoPy2experiment version="3.2.4"
Settings
  Completed URL = completedURL
  Data filename = u'data/%s_%s' % (expInfo['participant'], expName)
  Experiment info = {'participant': '022420', 'sA': '0', 'sB': '1', 'lA': '0', 'lB': '2', 'block_struct': '0', 'random_seed': '4'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1680, 1050]
  expName = short_answer
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Routines
  Routine perspective
    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        import numpy as np

        a = np.zeros(shape = [4, 4], dtype = int)

        s_order = np.array([10, 20, 30, 40], dtype = int)

        l_order = np.array([1,2,3,4], dtype = int)


        np.random.shuffle(s_order)
        np.random.shuffle(l_order)

        a[0] += s_order[0]
        a[1] += s_order[1]
        a[2] += s_order[2]
        a[3] += s_order[3]

        a[:,0] += l_order[0]
        a[:,1] += l_order[1]
        a[:, 2] += l_order[2]
        a[:, 3] += l_order[3]

        run1 = np.array([a[0,0], a[1,1], a[2,0], a[3,1], a[0,2], a[1,3], a[2,2], a[3,3]])
        run2 = np.array([a[0,1], a[1,0], a[2,1], a[3,0], a[0,3], a[1,2], a[2,3], a[3,2]])
        order_run1 = np.array(['Location', 'Location', 'Social', 'Social', 'Social', 'Social', 'Location', 'Location'])
        order_run2 = np.array(['Location', 'Location', 'Social', 'Social', 'Social', 'Social', 'Location', 'Location'])

        randperm1 = np.random.permutation(8)
        randperm2 = np.random.permutation(8)

        run1 = run1[randperm1]
        run2 = run2[randperm2]
        order_run1 = order_run1[randperm1]
        order_run2 = order_run2[randperm2]
        #create a dictionary for all the stories and their values
        storyDict = {11: {'name':'Restaurant Breakup', 'Social': 'Couples Therapist', 'Location':'Restaurant Critic', 'pic':'storypics/11_storypic.jpg', 'storyFile': 'audio_excel_sheets/11_audio.xlsx'},
                     12: {'name':'Airport Breakup', 'Social': 'Couples Therapist', 'Location':'Airport Customer Experience Manager', 'pic':'storypics/12_storypic.jpg', 'storyFile': 'audio_excel_sheets/12_audio.xlsx'},
                     13: {'name':'Grocery Shopping- Break up', 'Social':'Couples Therapist', 'Location': 'Grocery Store Customer Experience Manager', 'pic':'storypics/13_storypic.jpg', 'storyFile': 'audio_excel_sheets/13_audio.xlsx'},
                     14: {'name':'Attending a Lecture-Breakup', 'Social':'Couples Therapist', 'Location': 'Dean of Academic Studies', 'pic':'storypics/14_storypic.jpg', 'storyFile': 'audio_excel_sheets/14_audio.xlsx'},
                     21: {'name':'Restaurant Proposal', 'Social': 'Wedding Planner', 'Location': 'Restaurant Critic', 'pic':'storypics/21_storypic.jpg', 'storyFile': 'audio_excel_sheets/21_audio.xlsx'},
                     22: {'name':'Airport Proposal', 'Social': 'Wedding Planner', 'Location':'Airport Customer Experience Manager', 'pic':'storypics/22_storypic.jpg', 'storyFile': 'audio_excel_sheets/22_audio.xlsx'},
                     23: {'name':'Grocery Shopping- Proposal', 'Social': 'Wedding Planner', 'Location':'Grocery Store Customer Experience Manager', 'pic':'storypics/23_storypic.jpg', 'storyFile': 'audio_excel_sheets/23_audio.xlsx'},
                     24: {'name':'Attending a Lecture-Proposal', 'Social': 'Wedding Planner', 'Location': 'Dean of Academic Studies', 'pic':'storypics/24_storypic.jpg', 'storyFile': 'audio_excel_sheets/24_audio.xlsx'},
                     31: {'name':'Restaurant Business Deal', 'Social':'Business Reporter', 'Location':'Restaurant Critic', 'pic':'storypics/31_storypic.jpg', 'storyFile': 'audio_excel_sheets/31_audio.xlsx'},
                     32: {'name':'Airport Business Deal', 'Social':'Business Reporter', 'Location':'Airport Customer Experience Manager', 'pic':'storypics/32_storypic.jpg', 'storyFile': 'audio_excel_sheets/32_audio.xlsx'},
                     33: {'name':'Grocery Shopping- Business Deal', 'Social':'Business Reporter', 'Location':'Grocery Store Customer Experience Manager', 'pic':'storypics/33_storypic.jpg', 'storyFile': 'audio_excel_sheets/33_audio.xlsx'},
                     34: {'name':'Attending a Lecture-Business Deal', 'Social':'Business Reporter', 'Location':'Dean of Academic Studies', 'pic':'storypics/34_storypic.jpg', 'storyFile': 'audio_excel_sheets/34_audio.xlsx'},
                     41: {'name':'Restaurant Meet Cute', 'Social': 'Matchmaker', 'Location':'Restaurant Critic', 'pic':'storypics/41_storypic.jpg', 'storyFile': 'audio_excel_sheets/41_audio.xlsx'},
                     42: {'name':'Airport Meet Cute', 'Social': 'Matchmaker', 'Location':'Airport Customer Experience Manager', 'pic':'storypics/42_storypic.jpg', 'storyFile': 'audio_excel_sheets/42_audio.xlsx'},
                     43: {'name':'Grocery Shopping- Meet Cute', 'Social':'Matchmaker', 'Location': 'Grocery Store Customer Experience Manager', 'pic':'storypics/43_storypic.jpg', 'storyFile': 'audio_excel_sheets/43_audio.xlsx'},
                     44: {'name':'Attending a Lecture-Meet Cute', 'Social':'Matchmaker', 'Location': 'Dean of Academic Studies', 'pic':'storypics/44_storypic.jpg', 'storyFile': 'audio_excel_sheets/44_audio.xlsx'}}


        order_stories = np.concatenate((run1, run2), axis =None)
        order_perspectives = np.concatenate((order_run1, order_run2), axis = None)

        #create complementary perspectives list for non-primed questions
        other_perspectives = []

        for i in range(0,16):
            if order_perspectives[i] == 'Social':
                other_pespectives = other_perspectives.append('Location')
            else:
                other_pespectives = other_perspectives.append('Social')

        thisExp.addData('order of stories', order_stories)
        thisExp.addData('order of perspectives', order_perspectives)
        thisExp.addData('participant 2 order - stories', run2)
        thisExp.addData('participant 2 order  - schemas types', order_run2)
      Begin Routine:
        event.clearEvents()
        #set the perspective
        this_perspective = storyDict.get(order_stories[count], {}).get(order_perspectives[count])
        if this_perspective == 'Couples Therapist':
            display_pic = 'jobphotos/couples.jpg'
            question1 = 'For how long has the initiator of the breakup been thinking about breaking up with his/her partner?'
            question2 ='What is the initial reason stated by the initiator for why he/she is breaking up?'
            question3 ='Does the person who is being broken up with want to break up, and what’s the reason stated by them for this?'
            question4 = 'Who wants what items back as a result of the breakup?'
            question5 = 'Does the person being broken up with expect that this is coming?'
            question6 = 'Who witnesses the breakup?'
        if this_perspective == 'Restaurant Critic':
            display_pic = 'jobphotos/restaurant_critic.jpg'
            question1 = 'How is the restaurant decorated?'
            question2 ='What are the menus like?'
            question3 = 'What does each client order?'
            question4 = 'How do the clients like the food?'
            question5 = 'What meal is being served?'
            question6 = 'How old is the waiter?'
        if this_perspective == 'Airport Customer Experience Manager':
            display_pic = 'jobphotos/acem.jpg'
            question1 = 'When the clients arrive at the airport, how much time do they have until their flight departs?'
            question2 ='What is the reason for the hold-up at security?'
            question3 ='Toward which gate are the clients walking?'
            question4 ='What section and seat does each client sit in on the plane?'
            question5 = 'Are the security guards friendly or rude?'
            question6 = 'Are the airport restrooms clean?'
        if this_perspective == 'Grocery Store Customer Experience Manager':
            display_pic = 'jobphotos/gscem.jpg'
            question1 = 'What is the grocery store like upon entering?'
            question2 ='What items do the clients pick out to buy?'
            question3 ='How many checkout lanes are open, and which one do the clients step into?'
            question4 = 'How much are the groceries, and what method of payment do the clients use?'
            question5 = 'How long does it take for the cashier to scan all of the customers’ groceries?'
            question6 = 'What type of grocery bags do the clients use?'
        if this_perspective == 'Dean of Academic Studies':
            display_pic ='jobphotos/dean.jpg'
            question1 = 'What is the lecture hall like?'
            question2 ='What class are the students in, and what is the day’s lecture about?'
            question3 ='What is something taught in lecture?'
            question4 = 'What is the next assessment/assignment for the class, and when is it scheduled/due?'
            question5 = 'Are the students paying attention?'
            question6 = 'Are the desks comfortable?'
        if this_perspective == 'Wedding Planner':
            display_pic = 'jobphotos/weddingplanner.jpg'
            question1 = 'For how long has the couple been dating?'
            question2 ='How many diamonds are on the ring, and what is the diamond color?'
            question3 ='In/on what item is the ring presented?'
            question4 = 'Who does the new fiancee text first?'
            question5 = 'Is anyone taking pictures of the proposal?'
            question6 = 'How long does the proposal take?'
        if this_perspective == 'Business Reporter':
            display_pic = 'jobphotos/business_reporter.jpg'
            question1 = 'What is each business person’s job title?'
            question2 = 'How much money is at stake in the initial offer made?'
            question3 = 'What is the name of the other industry competitor? '
            question4 =  'With what gesture do the business partners secure the deal?'
            question5 = 'Is the deal fair?'
            question6 =  'How long does it take to make the deal?'
        if this_perspective == 'Matchmaker':
            display_pic = 'jobphotos/matchmaker.jpg'
            question1 = 'What object is the initiator of the interaction holding when he/she first notices the other person?'
            question2 ='What is the initial question that begins the conversation between the couple?'
            question3 ='When will be the next time the couple meets and for what occasion?'
            question4 = 'What time is it when the couple parts?'
            question5 = 'Is the couple going to get married?'
            question6 = 'Who shows more interest?'

        #set the story file and picture

        this_story_file = storyDict.get(order_stories[count], {}).get('storyFile')
        this_story_pic = storyDict.get(order_stories[count], {}).get('pic')
      Each Frame:
        for key in event.getKeys():
            if key in ['space']:
                continueRoutine = False
            if key in ['q']:
                trials.finished = 1
                continueRoutine = False
    TextComponent text_4
      letterHeight = 0.15
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $this_perspective
      wrapWidth = 1.75
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    ImageComponent image
      image [set every repeat] = $display_pic
      pos = (0, .25)
      size = (0.85, 0.75)
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = 0.1
      pos = (0, -.7)
      startVal [time (s)] = 0.0
      text = (press space to continue)
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  Routine trial
    KeyboardComponent story_presses
      allowedKeys = '1','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent code_14
      Code Type = Py
      Begin Routine:
        event.clearEvents()
        stim = visual.ImageStim(win, image=this_story_pic)
      Each Frame:
        stim.draw()

        for key in event.getKeys():
            if key in ['t']:
                trials_2.finished = 1
                continueRoutine = False
    TextComponent text_34
      letterHeight = 0.05
      pos = (.85, -.6)
      startVal [time (s)] = 0.0
      text = Press '9' if you think that sentence was the beginning of a new 'part' of the story.
      wrapWidth = .3
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    TextComponent text_35
      letterHeight = 0.05
      pos = (-.85, -.6)
      startVal [time (s)] = 0.0
      text = Press '1' if you think that sentence was in the same 'part' of the story as the previous sentence. 
      wrapWidth = .3
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  Routine which_experiment
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        which experiment?

        (for experimenter)
    KeyboardComponent resp
      allowedKeys = 'l','s','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine test
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = $this_text
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  Routine recall_instructions
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructText
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    TextComponent text_24
      letterHeight = 0.1
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = (press space to continue)
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  Routine recall
  Routine recall2
    CodeComponent code
      Code Type = Py
      Begin Routine:
        cursorCounter=0
        cursorVariable='|'
        captured_string=''
        subject_response_finished=False
        shift_flag = False
        text_8.alignHoriz ='right'
        text_8.alignVert = 'top'
        text_8.wrapWidth = 2
        text_8.height = .05

        this_recall_pic = this_story_pic = storyDict.get(order_stories[count], {}).get('pic')
      Each Frame:
        if subject_response_finished:
            final_response=captured_string
            continueRoutine=False
        for key in event.getKeys():
            if key in ['escape']:
                core.quit()
            elif key in ['delete','backspace']:
                captured_string = captured_string[:-1]
            elif key in ['tab']:
                subject_response_finished=True
            elif key in ['space']:
                captured_string = captured_string+' '
            elif key in ['period']:
                captured_string = captured_string+'.'
            elif key in ['comma']:
                captured_string = captured_string+','
            elif key in ['apostrophe']:
                captured_string = captured_string+"'"
            elif key in ['slash']:
                captured_string = captured_string+'/'
            elif key in ['semicolon']:
                captured_string = captured_string + ';'
            elif key in ['option']:
                captured_string = captured_string
            elif key in ['minus']:
                captured_string = captured_string+'-'
            elif key in ['lshift','rshift','up','down','left','right','return']:
                pass
            else:
                captured_string = captured_string+key
            # this next line formats the output. you can remove or modify as necessary
            captured_string=captured_string.capitalize()
    TextComponent text_7
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Type everything you recall here (press tab for more space and return to submit your response):
      wrapWidth = 1.5
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    TextComponent text_8
      letterHeight = 0.1
      pos = [1, -0.15]
      startVal [time (s)] = 0.0
      text [set every frame] = $captured_string
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    ImageComponent image_3
      image [set every repeat] = $this_recall_pic
      pos = (0, .5)
      size = (.75, .75)
      startVal [time (s)] = 0.0
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  Routine recall_3
    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        event.clearEvents()
        cursorCounter=0
        cursorVariable='|'
        captured_string=''
        subject_response_finished=False
        shift_flag = False
        text_10.alignHoriz ='left'
        text_10.alignVert = 'top'
        text_10.wrapWidth = 1.8
        text_10.height = .05

        this_recall_pic = storyDict.get(order_stories[count], {}).get('pic')
      Each Frame:
        if subject_response_finished:
            final_response=captured_string
            continueRoutine=False
        for key in event.getKeys():
            if key in ['tab']:
                trials_4.finished = 1
                continueRoutine = False
            if key in ['escape']:
                core.quit()
            elif key in ['delete','backspace']:
                captured_string = captured_string[:-1]
            elif key in ['return']:
                thisExp.addData('recall', captured_string)
                subject_response_finished=True
            elif key in ['space']:
                captured_string = captured_string+' '
            elif key in ['period']:
                captured_string = captured_string+'.'
            elif key in ['dollar']:
                captured_string = captured_string + '$'
            elif key in ['exclamation']:
                captured_string = captured_string + '!'
            elif key in ['lshift', 'rshift']:
                shift_flag = True
            elif key in ['comma']:
                captured_string = captured_string+','
            elif key in ['apostrophe']:
                captured_string = captured_string+"'"
            elif key in ['slash']:
                captured_string = captured_string+'/'
            elif key in ['semicolon']:
                captured_string = captured_string + ';'
            elif key in ['option']:
                captured_string = captured_string
            elif key in ['lshift','rshift']:
                shift_flag = True
                captured_string = captured_string + ' '
            elif key in ['minus']:
                captured_string = captured_string+'-'
            elif key in ['up','down','left','right','return']:
                pass
            else:
                captured_string = captured_string+key
            # this next line formats the output. you can remove or modify as necessary
            captured_string=captured_string.capitalize()
    TextComponent text_9
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Type everything you recall here (press return to submit your response):
      wrapWidth = 1.5
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    TextComponent text_10
      letterHeight = 0.1
      pos = [-.9, -0.15]
      startVal [time (s)] = 0.0
      text [set every frame] = $captured_string
      wrapWidth = 1
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    ImageComponent image_4
      image [set every repeat] = $this_recall_pic
      pos = (0, .5)
      size = (.75, .75)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      pos = (0, -.125)
      shape = line
      size = (1.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent bottom_line
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      pos = (0, -.975)
      shape = line
      size = (1.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent right_line_2
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      ori = 90
      pos = (.925, -.55)
      shape = line
      size = (.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent left_line
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      ori = 90
      pos = (-.925, -.55)
      shape = line
      size = (.85, 1)
      startVal [time (s)] = 0.0
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    CodeComponent code_22
      Code Type = Py
      Begin Routine:
        countdownClock = core.CountdownTimer(300) # 300 s = 5 minutes  countdownStarted = True
        timeText = '5:00'
      Each Frame:
        timeRemaining = countdownClock.getTime()
        if timeRemaining <= 0.0:
            continueRoutine = False
        else:
            minutes = int(timeRemaining/60.0) # the integer number of minutes
            seconds = int(timeRemaining - (minutes * 60.0))
            if seconds < 10:
                timeText = str(minutes) + ':0' + str(seconds) # create a string of characters representing the time
            else:
                timeText = str(minutes) + ':' + str(seconds) # create a string of characters representing the time
    TextComponent text_48
      letterHeight = 0.1
      pos = (-.7, .7)
      startVal [time (s)] = 0.0
      text [set every frame] = $timeText
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  Routine questions_instructions2
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_13
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructText
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    TextComponent text_23
      letterHeight = 0.1
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = (press space to continue)
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  Routine questions_instructions_2
    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        cursorCounter=0
        cursorVariable='|'
        captured_string=''
        subject_response_finished=False
        shift_flag = False
        text_2.alignHoriz ='left'
        text_2.alignVert = 'top'
        text_2.wrapWidth = 1.8
        text_2.height = .05
      Each Frame:
        if subject_response_finished:
            final_response=captured_string
            continueRoutine=False
        for key in event.getKeys():
            if key in ['escape']:
                core.quit()
            elif key in ['delete','backspace']:
                captured_string = captured_string[:-1]
            elif key in ['return']:
                subject_response_finished=True
            elif key in ['space']:
                captured_string = captured_string+' '
            elif key in ['period']:
                captured_string = captured_string+'.'
            elif key in ['comma']:
                captured_string = captured_string+','
            elif key in ['apostrophe']:
                captured_string = captured_string+"'"
            elif key in ['slash']:
                captured_string = captured_string+'/'
            elif key in ['semicolon']:
                captured_string = captured_string + ';'
            elif key in ['option']:
                captured_string = captured_string
            elif key in ['minus']:
                captured_string = captured_string+'-'
            elif key in ['lshift','rshift','up','down','left','right','return']:
                pass
            else:
                captured_string = captured_string+key
            # this next line formats the output. you can remove or modify as necessary
            captured_string=captured_string.capitalize()
    TextComponent text_11
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Type everything you recall here (press return to submit your response):
      wrapWidth = 1.5
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    TextComponent text_12
      letterHeight = 0.1
      pos = [-.9, -0.15]
      startVal [time (s)] = 0.0
      text [set every frame] = $captured_string
      wrapWidth = 1
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    ImageComponent image_5
      image = faces.jpg
      pos = (0, .5)
      size = (.75, .75)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_2
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      pos = (0, -.125)
      shape = line
      size = (1.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent bottom_line_2
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      pos = (0, -.975)
      shape = line
      size = (1.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent right_line
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      ori = 90
      pos = (.925, -.55)
      shape = line
      size = (.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent left_line_2
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      ori = 90
      pos = (-.925, -.55)
      shape = line
      size = (.85, 1)
      startVal [time (s)] = 0.0
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  Routine question1
    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        event.clearEvents()
        cursorCounter=0
        cursorVariable='|'
        captured_string=''
        subject_response_finished=False
        shift_flag = False
        text_15.alignHoriz ='left'
        text_15.alignVert = 'top'
        text_15.wrapWidth = 1.8
        text_15.height = .05

        #flip coin
        values = [1,2]
        random.shuffle(values)

        #questions from one schema
        this_perspective = storyDict.get(all_stories[count], {}).get(values[0])
        print(this_perspective)
        #questions from other schema
        other_perspective = storyDict.get(all_stories[count], {}).get(values[1])
        print(other_perspective)
        if this_perspective == 'Couples Therapist':
            pic1 = 'jobphotos/couples.jpg'
            question1 = 'For how long has the initiator of the breakup been thinking about breaking up with his/her partner?'
            question2 ='What is the initial reason stated by the initiator for why he/she is breaking up?'
            question3 ='Does the person who is being broken up with want to break up, and what’s the reason stated by them for this?'
            question4 = 'Who wants what items back as a result of the breakup?'
        if this_perspective == 'Restaurant Critic':
            pic1 = 'jobphotos/restaurant_critic.jpg'
            question1 = 'How is the restaurant decorated?'
            question2 ='What are the menus like?'
            question3 = 'What does each client order?'
            question4 = 'How do the clients like the food?'
        if this_perspective == 'Airport Customer Experience Manager':
            pic1 = 'jobphotos/acem.jpg'
            question1 = 'When the clients arrive at the airport, how much time do they have until their flight departs?'
            question2 ='What is the reason for the hold-up at security?'
            question3 ='Toward which gate are the clients walking?'
            question4 ='What section and seat does each client sit in on the plane?'
        if this_perspective == 'Grocery Store Customer Experience Manager':
            pic1 = 'jobphotos/gscem.jpg'
            question1 = 'What is the grocery store like upon entering?'
            question2 ='What items do the clients pick out to buy?'
            question3 ='How many checkout lanes are open, and which one do the clients step into?'
            question4 = 'How much are the groceries, and what method of payment do the clients use?'
        if this_perspective == 'Dean of Academic Studies':
            pic1 ='jobphotos/dean.jpg'
            question1 = 'What is the lecture hall like?'
            question2 ='What class are the students in, and what is the day’s lecture about?'
            question3 ='What is something taught in lecture?'
            question4 = 'What is the next assessment/assignment for the class, and when is it scheduled/due?'
        if this_perspective == 'Wedding Planner':
            pic1 = 'jobphotos/weddingplanner.jpg'
            question1 = 'For how long has the couple been dating?'
            question2 ='How many diamonds are on the ring, and what is the diamond color?'
            question3 ='In/on what item is the ring presented?'
            question4 = 'Who does the new fiancee text first?'
        if this_perspective == 'Business Reporter':
            pic1 = 'jobphotos/business_reporter.jpg'
            question1 = 'What is each business person’s job title?'
            question2 = 'How much money is at stake in the initial offer made?'
            question3 = 'What is the name of the other industry competitor? '
            question4 =  'With what gesture do the business partners secure the deal?'
        if this_perspective == 'Matchmaker':
            pic1 = 'jobphotos/matchmaker.jpg'
            question1 = 'What object is the initiator of the interaction holding when he/she first notices the other person?'
            question2 ='What is the initial question that begins the conversation between the couple?'
            question3 ='When will be the next time the couple meets and for what occasion?'
            question4 = 'What time is it when the couple parts?'

        if other_perspective == 'Couples Therapist':
            pic2 = 'jobphotos/couples.jpg'
            question5 = 'For how long has the initiator of the breakup been thinking about breaking up with his/her partner?'
            question6 ='What is the initial reason stated by the initiator for why he/she is breaking up?'
            question7 ='Does the person who is being broken up with want to break up, and what’s the reason stated by them for this?'
            question8 = 'Who wants what items back as a result of the breakup?'
        if other_perspective == 'Restaurant Critic':
            pic2 = 'jobphotos/restaurant_critic.jpg'
            question5 = 'How is the restaurant decorated?'
            question6 ='What are the menus like?'
            question7 = 'What does each client order?'
            question8 = 'How do the clients like the food?'
        if other_perspective == 'Airport Customer Experience Manager':
            pic2 = 'jobphotos/acem.jpg'
            question5 = 'When the clients arrive at the airport, how much time do they have until their flight departs?'
            question6 ='What is the reason for the hold-up at security?'
            question7 ='Toward which gate are the clients walking?'
            question8 ='What section and seat does each client sit in on the plane?'
        if other_perspective == 'Grocery Store Customer Experience Manager':
            pic2 = 'jobphotos/gscem.jpg'
            question5 = 'What is the grocery store like upon entering?'
            question6 ='What items do the clients pick out to buy?'
            question7 ='How many checkout lanes are open, and which one do the clients step into?'
            question8 = 'How much are the groceries, and what method of payment do the clients use?'
        if other_perspective == 'Dean of Academic Studies':
            pic2 ='jobphotos/dean.jpg'
            question5 = 'What is the lecture hall like?'
            question6 ='What class are the students in, and what is the day’s lecture about?'
            question7 ='What is something taught in lecture?'
            question8 = 'What is the next assessment/assignment for the class, and when is it scheduled/due?'
        if other_perspective == 'Wedding Planner':
            pic2 = 'jobphotos/weddingplanner.jpg'
            question5 = 'For how long has the couple been dating?'
            question6 ='How many diamonds are on the ring, and what is the diamond color?'
            question7 ='In/on what item is the ring presented?'
            question8 = 'Who does the new fiancee text first?'
        if other_perspective == 'Business Reporter':
            pic2 = 'jobphotos/business_reporter.jpg'
            question5 = 'What is each business person’s job title?'
            question6 = 'How much money is at stake in the initial offer made?'
            question7 = 'What is the name of the other industry competitor? '
            question8 =  'With what gesture do the business partners secure the deal?'
        if other_perspective == 'Matchmaker':
            pic2 = 'jobphotos/matchmaker.jpg'
            question5 = 'What object is the initiator of the interaction holding when he/she first notices the other person?'
            question6 ='What is the initial question that begins the conversation between the couple?'
            question7 ='When will be the next time the couple meets and for what occasion?'
            question8 = 'What time is it when the couple parts?'
      Each Frame:
        if subject_response_finished:
            final_response=captured_string
            continueRoutine=False
        for key in event.getKeys():
            if key in ['escape']:
                core.quit()
            elif key in ['delete','backspace']:
                captured_string = captured_string[:-1]
            elif key in ['return']:
                thisExp.addData('recall', captured_string)
                subject_response_finished=True
            elif key in ['space']:
                captured_string = captured_string+' '
            elif key in ['period']:
                captured_string = captured_string+'.'
            elif key in ['comma']:
                captured_string = captured_string+','
            elif key in ['apostrophe']:
                captured_string = captured_string+"'"
            elif key in ['slash']:
                captured_string = captured_string+'/'
            elif key in ['dollar']:
                captured_string = captured_string + '$'
            elif key in ['exclamation']:
                captured_string = captured_string + '!'
            elif key in ['semicolon']:
                captured_string = captured_string + ';'
            elif key in ['option']:
                captured_string = captured_string
            elif key in ['minus']:
                captured_string = captured_string+'-'
            elif key in ['lshift','rshift','up','down','left','right','return']:
                pass
            else:
                captured_string = captured_string+key
            # this next line formats the output. you can remove or modify as necessary
            captured_string=captured_string.capitalize()
      End Routine:
        thisExp.addData('question1_answer', captured_string)
        thisExp.addData('order of question', values)
    TextComponent text_14
      letterHeight = 0.1
      pos = [0, -.2]
      startVal [time (s)] = 0.0
      text [set every repeat] = $question1
      wrapWidth = 1.5
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    TextComponent text_15
      letterHeight = 0.1
      pos = [-.9, -0.55]
      startVal [time (s)] = 0.0
      text [set every frame] = $captured_string
      wrapWidth = 1
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    ImageComponent image_6
      image [set every repeat] = $this_recall_pic
      pos = (0, .5)
      size = (.75, .75)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_3
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      pos = (0, -.525)
      shape = line
      size = (1.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent bottom_line_3
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      pos = (0, -.7)
      shape = line
      size = (1.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent right_line_3
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      ori = 90
      pos = (.925, -.6125)
      shape = line
      size = (.175, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent left_line_3
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      ori = 90
      pos = (-.925, -.6125)
      shape = line
      size = (.175, 1)
      startVal [time (s)] = 0.0
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  Routine question2
    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        cursorCounter=0
        cursorVariable='|'
        captured_string=''
        subject_response_finished=False
        shift_flag = False
        text_17.alignHoriz ='left'
        text_17.alignVert = 'top'
        text_17.wrapWidth = 1.8
        text_17.height = .05
      Each Frame:
        if subject_response_finished:
            final_response=captured_string
            continueRoutine=False
        for key in event.getKeys():
            if key in ['escape']:
                core.quit()
            elif key in ['delete','backspace']:
                captured_string = captured_string[:-1]
            elif key in ['return']:
                thisExp.addData('recall', captured_string)
                subject_response_finished=True
            elif key in ['space']:
                captured_string = captured_string+' '
            elif key in ['period']:
                captured_string = captured_string+'.'
            elif key in ['dollar']:
                captured_string = captured_string + '$'
            elif key in ['exclamation']:
                captured_string = captured_string + '!'
            elif key in ['comma']:
                captured_string = captured_string+','
            elif key in ['apostrophe']:
                captured_string = captured_string+"'"
            elif key in ['slash']:
                captured_string = captured_string+'/'
            elif key in ['semicolon']:
                captured_string = captured_string + ';'
            elif key in ['option']:
                captured_string = captured_string
            elif key in ['minus']:
                captured_string = captured_string+'-'
            elif key in ['lshift','rshift','up','down','left','right','return']:
                pass
            else:
                captured_string = captured_string+key
            # this next line formats the output. you can remove or modify as necessary
            captured_string=captured_string.capitalize()
      End Routine:
        thisExp.addData('question2_answer', captured_string)
    TextComponent text_16
      letterHeight = 0.1
      pos = [0, -.2]
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text [set every repeat]:
        $question2
    TextComponent text_17
      letterHeight = 0.1
      pos = [-.9, -0.55]
      startVal [time (s)] = 0.0
      text [set every frame] = $captured_string
      wrapWidth = 1
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    ImageComponent image_7
      image [set every repeat] = $this_recall_pic
      pos = (0, .5)
      size = (.75, .75)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_4
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      pos = (0, -.525)
      shape = line
      size = (1.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent bottom_line_4
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      pos = (0, -.7)
      shape = line
      size = (1.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent right_line_4
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      ori = 90
      pos = (.925, -.6125)
      shape = line
      size = (.175, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent left_line_4
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      ori = 90
      pos = (-.925, -.6125)
      shape = line
      size = (.175, 1)
      startVal [time (s)] = 0.0
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  Routine question3
    CodeComponent code_7
      Code Type = Py
      Begin Routine:
        cursorCounter=0
        cursorVariable='|'
        captured_string=''
        subject_response_finished=False
        shift_flag = False
        text_19.alignHoriz ='left'
        text_19.alignVert = 'top'
        text_19.wrapWidth = 1.8
        text_19.height = .05
      Each Frame:
        if subject_response_finished:
            final_response=captured_string
            continueRoutine=False
        for key in event.getKeys():
            if key in ['escape']:
                core.quit()
            elif key in ['delete','backspace']:
                captured_string = captured_string[:-1]
            elif key in ['return']:
                thisExp.addData('recall', captured_string)
                subject_response_finished=True
            elif key in ['space']:
                captured_string = captured_string+' '
            elif key in ['period']:
                captured_string = captured_string+'.'
            elif key in ['comma']:
                captured_string = captured_string+','
            elif key in ['apostrophe']:
                captured_string = captured_string+"'"
            elif key in ['slash']:
                captured_string = captured_string+'/'
            elif key in ['semicolon']:
                captured_string = captured_string + ';'
            elif key in ['option']:
                captured_string = captured_string
            elif key in ['dollar']:
                captured_string = captured_string + '$'
            elif key in ['exclamation']:
                captured_string = captured_string + '!'
            elif key in ['minus']:
                captured_string = captured_string+'-'
            elif key in ['lshift','rshift','up','down','left','right','return']:
                pass
            else:
                captured_string = captured_string+key
            # this next line formats the output. you can remove or modify as necessary
            captured_string=captured_string.capitalize()
      End Routine:
        thisExp.addData('question3_answer', captured_string)
    TextComponent text_18
      letterHeight = 0.1
      pos = [0, -.2]
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text [set every repeat]:
        $question3
    TextComponent text_19
      letterHeight = 0.1
      pos = [-.9, -0.55]
      startVal [time (s)] = 0.0
      text [set every frame] = $captured_string
      wrapWidth = 1
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    ImageComponent image_8
      image [set every repeat] = $this_recall_pic
      pos = (0, .5)
      size = (.75, .75)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_5
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      pos = (0, -.525)
      shape = line
      size = (1.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent bottom_line_5
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      pos = (0, -.7)
      shape = line
      size = (1.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent right_line_5
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      ori = 90
      pos = (.925, -.6125)
      shape = line
      size = (.175, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent left_line_5
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      ori = 90
      pos = (-.925, -.6125)
      shape = line
      size = (.175, 1)
      startVal [time (s)] = 0.0
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  Routine question4
    CodeComponent code_8
      Code Type = Py
      Begin Routine:
        cursorCounter=0
        cursorVariable='|'
        captured_string=''
        subject_response_finished=False
        shift_flag = False
        text_21.alignHoriz ='left'
        text_21.alignVert = 'top'
        text_21.wrapWidth = 1.8
        text_21.height = .05
      Each Frame:
        if subject_response_finished:
            final_response=captured_string
            continueRoutine=False
        for key in event.getKeys():
            if key in ['escape']:
                core.quit()
            elif key in ['delete','backspace']:
                captured_string = captured_string[:-1]
            elif key in ['return']:
                thisExp.addData('recall', captured_string)
                subject_response_finished=True
            elif key in ['space']:
                captured_string = captured_string+' '
            elif key in ['dollar']:
                captured_string = captured_string + '$'
            elif key in ['exclamation']:
                captured_string = captured_string + '!'
            elif key in ['period']:
                captured_string = captured_string+'.'
            elif key in ['comma']:
                captured_string = captured_string+','
            elif key in ['apostrophe']:
                captured_string = captured_string+"'"
            elif key in ['slash']:
                captured_string = captured_string+'/'
            elif key in ['semicolon']:
                captured_string = captured_string + ';'
            elif key in ['option']:
                captured_string = captured_string
            elif key in ['minus']:
                captured_string = captured_string+'-'
            elif key in ['lshift','rshift','up','down','left','right','return']:
                pass
            else:
                captured_string = captured_string+key
            # this next line formats the output. you can remove or modify as necessary
            captured_string=captured_string.capitalize()
      End Routine:
        thisExp.addData('question4_answer', captured_string)
    TextComponent text_20
      letterHeight = 0.1
      pos = [0, -.2]
      startVal [time (s)] = 0.0
      text [set every repeat] = $question4
      wrapWidth = 1.5
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    TextComponent text_21
      letterHeight = 0.1
      pos = [-.9, -0.55]
      startVal [time (s)] = 0.0
      text [set every frame] = $captured_string
      wrapWidth = 1
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    ImageComponent image_9
      image [set every repeat] = $this_recall_pic
      pos = (0, .5)
      size = (.75, .75)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_6
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      pos = (0, -.525)
      shape = line
      size = (1.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent bottom_line_6
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      pos = (0, -.7)
      shape = line
      size = (1.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent right_line_6
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      ori = 90
      pos = (.925, -.6125)
      shape = line
      size = (.175, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent left_line_6
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      ori = 90
      pos = (-.925, -.6125)
      shape = line
      size = (.175, 1)
      startVal [time (s)] = 0.0
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  Routine story_image
    CodeComponent code_9
      Code Type = Py
      Begin Routine:
        this_recall_pic = storyDict.get(all_stories[count], {}).get('pic')
    ImageComponent image_10
      image [set every repeat] = $this_recall_pic
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_22
      letterHeight = 0.1
      pos = (0, -.5)
      startVal [time (s)] = 0.0
      text = (press space to continue)
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  Routine question5
    CodeComponent code_10
      Code Type = Py
      Begin Routine:
        cursorCounter=0
        cursorVariable='|'
        captured_string=''
        subject_response_finished=False
        shift_flag = False
        text_26.alignHoriz ='left'
        text_26.alignVert = 'top'
        text_26.wrapWidth = 1.8
        text_26.height = .05
      Each Frame:
        if subject_response_finished:
            final_response=captured_string
            continueRoutine=False
        for key in event.getKeys():
            if key in ['escape']:
                core.quit()
            elif key in ['delete','backspace']:
                captured_string = captured_string[:-1]
            elif key in ['return']:
                thisExp.addData('recall', captured_string)
                subject_response_finished=True
            elif key in ['space']:
                captured_string = captured_string+' '
            elif key in ['dollar']:
                captured_string = captured_string + '$'
            elif key in ['exclamation']:
                captured_string = captured_string + '!'
            elif key in ['period']:
                captured_string = captured_string+'.'
            elif key in ['comma']:
                captured_string = captured_string+','
            elif key in ['apostrophe']:
                captured_string = captured_string+"'"
            elif key in ['slash']:
                captured_string = captured_string+'/'
            elif key in ['semicolon']:
                captured_string = captured_string + ';'
            elif key in ['option']:
                captured_string = captured_string
            elif key in ['minus']:
                captured_string = captured_string+'-'
            elif key in ['lshift','rshift','up','down','left','right','return']:
                pass
            else:
                captured_string = captured_string+key
            # this next line formats the output. you can remove or modify as necessary
            captured_string=captured_string.capitalize()
      End Routine:
        thisExp.addData('question5_answer', captured_string)
    TextComponent text_25
      letterHeight = 0.1
      pos = [0, -.2]
      startVal [time (s)] = 0.0
      text [set every repeat] = $question5
      wrapWidth = 1.5
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    TextComponent text_26
      letterHeight = 0.1
      pos = [-.9, -0.55]
      startVal [time (s)] = 0.0
      text [set every frame] = $captured_string
      wrapWidth = 1
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    ImageComponent image_11
      image [set every repeat] = $this_recall_pic
      pos = (0, .5)
      size = (.75, .75)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_7
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      pos = (0, -.525)
      shape = line
      size = (1.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent bottom_line_7
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      pos = (0, -.7)
      shape = line
      size = (1.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent right_line_7
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      ori = 90
      pos = (.925, -.6125)
      shape = line
      size = (.175, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent left_line_7
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      ori = 90
      pos = (-.925, -.6125)
      shape = line
      size = (.175, 1)
      startVal [time (s)] = 0.0
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  Routine question6
    CodeComponent code_11
      Code Type = Py
      Begin Routine:
        cursorCounter=0
        cursorVariable='|'
        captured_string=''
        subject_response_finished=False
        shift_flag = False
        text_28.alignHoriz ='left'
        text_28.alignVert = 'top'
        text_28.wrapWidth = 1.8
        text_28.height = .05
      Each Frame:
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      End Routine:
        thisExp.addData('question6_answer', captured_string)
    TextComponent text_27
      letterHeight = 0.1
      pos = [0, -.2]
      startVal [time (s)] = 0.0
      text [set every repeat] = $question6
      wrapWidth = 1.5
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    TextComponent text_28
      letterHeight = 0.1
      pos = [-.9, -0.55]
      startVal [time (s)] = 0.0
      text [set every frame] = $captured_string
      wrapWidth = 1
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    ImageComponent image_12
      image [set every repeat] = $this_recall_pic
      pos = (0, .5)
      size = (.75, .75)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_8
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      pos = (0, -.525)
      shape = line
      size = (1.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent bottom_line_8
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      pos = (0, -.7)
      shape = line
      size = (1.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent right_line_8
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      ori = 90
      pos = (.925, -.6125)
      shape = line
      size = (.175, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent left_line_8
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      ori = 90
      pos = (-.925, -.6125)
      shape = line
      size = (.175, 1)
      startVal [time (s)] = 0.0
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  Routine question7
    CodeComponent code_12
      Code Type = Py
      Begin Routine:
        cursorCounter=0
        cursorVariable='|'
        captured_string=''
        subject_response_finished=False
        shift_flag = False
        text_30.alignHoriz ='left'
        text_30.alignVert = 'top'
        text_30.wrapWidth = 1.8
        text_30.height = .05
      Each Frame:
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      End Routine:
        thisExp.addData('question7_answer', captured_string)
    TextComponent text_29
      letterHeight = 0.1
      pos = [0, -.2]
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text [set every repeat]:
        $question7
    TextComponent text_30
      letterHeight = 0.1
      pos = [-.9, -0.55]
      startVal [time (s)] = 0.0
      text [set every frame] = $captured_string
      wrapWidth = 1
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    ImageComponent image_13
      image [set every repeat] = $this_recall_pic
      pos = (0, .5)
      size = (.75, .75)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_9
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      pos = (0, -.525)
      shape = line
      size = (1.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent bottom_line_9
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      pos = (0, -.7)
      shape = line
      size = (1.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent right_line_9
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      ori = 90
      pos = (.925, -.6125)
      shape = line
      size = (.175, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent left_line_9
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      ori = 90
      pos = (-.925, -.6125)
      shape = line
      size = (.175, 1)
      startVal [time (s)] = 0.0
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  Routine question8
    CodeComponent code_13
      Code Type = Py
      Begin Routine:
        cursorCounter=0
        cursorVariable='|'
        captured_string=''
        subject_response_finished=False
        shift_flag = False
        text_32.alignHoriz ='left'
        text_32.alignVert = 'top'
        text_32.wrapWidth = 1.8
        text_32.height = .05
      Each Frame:
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      End Routine:
        thisExp.addData('question8_answer', captured_string)
    TextComponent text_31
      letterHeight = 0.1
      pos = [0, -.2]
      startVal [time (s)] = 0.0
      text [set every repeat] = $question8
      wrapWidth = 1.5
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    TextComponent text_32
      letterHeight = 0.1
      pos = [-.9, -0.55]
      startVal [time (s)] = 0.0
      text [set every frame] = $captured_string
      wrapWidth = 1
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    ImageComponent image_14
      image [set every repeat] = $this_recall_pic
      pos = (0, .5)
      size = (.75, .75)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_10
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      pos = (0, -.525)
      shape = line
      size = (1.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent bottom_line_10
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      pos = (0, -.7)
      shape = line
      size = (1.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent right_line_10
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      ori = 90
      pos = (.925, -.6125)
      shape = line
      size = (.175, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent left_line_10
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      ori = 90
      pos = (-.925, -.6125)
      shape = line
      size = (.175, 1)
      startVal [time (s)] = 0.0
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  Routine ask_to_assume
    TextComponent text_33
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Please assume the perspective of:
      wrapWidth = 2
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_15
      Code Type = Py
      Each Frame:
        for key in event.getKeys():
            if key in ['q']:
                trials.finished = 1
                continueRoutine = False
  Routine end_of_task
    TextComponent text_36
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = End of task
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    CodeComponent code_16
      Code Type = Py
      Each Frame:
        for key in event.getKeys():
            if key in ['escape']:
                core.quit()
  Routine intro_test
    TextComponent text_37
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Please indicate the order in which the questions appeared:
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine perspective_test
    CodeComponent set_text_2
      Code Type = Py
      Begin Routine:
        from psychopy import visual, core, event

        event.clearEvents()
        Q = np.array([question1, question2, question3, question4, question5, question6])
        correct = np.array([1,2,3,4,0,0], dtype=int)
        randperm = np.random.permutation(6)
        Q = Q[randperm]
        correct = correct[randperm]

        text1 = "1: " + Q[0]
        text2 = "2: " + Q[1]
        text3 = "3: " + Q[2]
        text4 = "4: " + Q[3]
        text5 = "5: " + Q[4]
        text6 = "6: " + Q[5]

        this_image = 'icon/bar1.png'



        check = visual.ImageStim(win, 'icon/checkmark.png')
        redx = visual.ImageStim(win, 'icon/redx.png')

        thumbsup = visual.ImageStim(win, 'icon/thumbsup.png')



        checkCount = 0
        test1 = 0
        test2 = 0
        test3 = 0
        test4 = 0
        test5 = 0
        test6 = 0
    TextComponent question1_2
      letterHeight = 0.08
      pos = (0, .70)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text1
      wrapWidth = 2
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    TextComponent question2_2
      letterHeight = 0.08
      pos = (0, .45)
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text [set every repeat]:
        $text2
    TextComponent question3_2
      letterHeight = 0.08
      pos = (0, .16)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text3
      wrapWidth = 2
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    TextComponent question4_2
      letterHeight = 0.08
      pos = (0, -.12)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text4
      wrapWidth = 2
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    TextComponent question5_2
      letterHeight = 0.08
      pos = (0, -.35)
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text [set every repeat]:
        $text5
    TextComponent question6_2
      letterHeight = 0.08
      pos = (0, -.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text6
      wrapWidth = 2
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    CodeComponent framecheck_2
      Code Type = Py
      Each Frame:
        if this_image == 'icon/bar5.jpg':
            thumbsup.draw()
            win.flip()
            core.wait(1.5)
            trials_7.finished= True
            continueRoutine = False
        #key press 1
        if event.getKeys(['1']):
            if correct[0] == (checkCount + 1):
                if test1 == 0:
                    test1 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #keypress 2
        if event.getKeys(['2']):
            if correct[1] == (checkCount + 1):
                if test2 == 0:
                    test2 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #key press 3
        if event.getKeys(['3']):
            if correct[2] == (checkCount + 1):
                if test3 == 0:
                    test3 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #keypress 4
        if event.getKeys(['4']):
            if correct[3] == (checkCount + 1):
                if test4 == 0:
                    test4 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #key press 5
        if event.getKeys(['5']):
            if correct[4] == (checkCount + 1):
                if test5 == 0:
                    test5 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #keypress 6
        if event.getKeys(['6']):
            if correct[5] == (checkCount + 1):
                if test6 == 0:
                    test6 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False


        if event.getKeys(['q']):
            trials_7.finished = True
            continueRoutine=False
        if checkCount == 4:
            this_image = 'icon/bar5.jpg'

        if checkCount == 1:
            this_image = 'icon/bar2.png'
        if checkCount == 2:
            this_image = 'icon/bar3.jpg'
        if checkCount == 3:
            this_image = 'icon/bar4.png'
    ImageComponent image_15
      image [set every frame] = $this_image
      pos = (0, -.85)
      size = (0.25, 0.125)
      startVal [time (s)] = 0.0
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  Routine storycount
    TextComponent text_38
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = ($count + 1)
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_39
      letterHeight = 0.1
      pos = (0.03, 0)
      startVal [time (s)] = 0.0
      text = Story     out of 8
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    CodeComponent code_18
      Code Type = Py
      Begin Experiment:
        timer = core.Clock()
        from psychopy import core, visual

        import vlc
        mom=vlc.Instance()
        p=mom.media_player_new()
        #p.set_fullscreen(True)
      Begin Routine:
        event.clearEvents()
        count_image = 0
  Routine recallcount
    TextComponent text_40
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = end of task
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    KeyboardComponent key_resp_9
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_17
      Code Type = Py
      Each Frame:
        while True:     keys = event.getKeys()     if keys:         # q quits the experiment         if keys[0] == 'q':             core.quit()
  Routine recallcount_2
    TextComponent text_41
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = ($count + 1)
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    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_42
      letterHeight = 0.1
      pos = (0.02, 0)
      startVal [time (s)] = 0.0
      text = Recall     out of 8
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    TextComponent text_51
      letterHeight = 0.1
      pos = (0, -.7)
      startVal [time (s)] = 0.0
      text = (press the space bar to continue)
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  Routine questioncount
    CodeComponent code_26
      Code Type = Py
      Begin Routine:
        set_count += 1
    TextComponent text_43
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = ($set_count)
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    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_44
      letterHeight = 0.1
      pos = (-0.06, 0)
      startVal [time (s)] = 0.0
      text = Question Set     out of 12
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    TextComponent text_53
      letterHeight = 0.1
      pos = (0, -.5)
      startVal [time (s)] = 0.0
      text = (press space to continue)
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  Routine RECALL_BREAK
    TextComponent text_45
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Part 3
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_19
      Code Type = Py
      Begin Routine:
        story_time = timer.getTime()
        thisExp.addData('story time', story_time)
  Routine questions_task
    TextComponent text_46
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Part 4
    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_20
      Code Type = Py
      Begin Routine:
        recall_time = timer.getTime()
        thisExp.addData('recall time', recall_time)
  Routine end_of_questions
    TextComponent text_47
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        END OF QUESTIONS
    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_21
      Code Type = Py
      Begin Routine:
        questions_time = timer.getTime()
        thisExp.addData('questions time', questions_time)
  Routine p_again
    TextComponent text_49
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Here is the perspective one more time:
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    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine story_begin
    TextComponent text_50
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = When you are ready, press the space bar to begin listening to the story. 
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    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine only_story_image
    CodeComponent code_23
      Code Type = Py
      Begin Routine:
        this_pic = $this_story_pic
        if count_image == 0:
            Stim = visual.ImageStim(
            win, image= this_pic)
            Stim.draw()
            win.flip()
            core.wait(5.0)
            count_image =1
  Routine play_audio_story
    CodeComponent code_24
      Code Type = Py
      Begin Routine:
        start_time = globalClock.getTime()
        m=mom.media_new(audio)
        p.set_media(m)
        p.play()
        stim = visual.ImageStim(win, image=this_story_pic)
        stim.draw()
        while p.is_playing() or (globalClock.getTime()-start_time < 2):
           stim.draw()
           win.flip()

        p.stop()

        continueRoutine=False
      Each Frame:
        if event.getKeys(['q']):
            continueRoutine=False
  Routine end_story
    TextComponent text
      letterHeight = 0.1
      pos = (0.1, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = ($count + 1)
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    TextComponent text_52
      letterHeight = 0.1
      pos = (-.1, 0)
      startVal [time (s)] = 0.0
      text = End of story
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    KeyboardComponent key_resp_16
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine startup
    CodeComponent code_25
      Code Type = Py
      Begin Experiment:
        import numpy as np
        import random

        timer = core.Clock()

        #iterating through the question sets
        set_count = 0

        #basic matrix of all stories
        story_matrix = np.zeros(shape = [4, 4], dtype = int)

        s_order = np.array([10, 20, 30, 40], dtype = int)

        l_order = np.array([1,2,3,4], dtype = int)

        story_matrix[0] += s_order[0]
        story_matrix[1] += s_order[1]
        story_matrix[2] += s_order[2]
        story_matrix[3] += s_order[3]

        story_matrix[:,0] += l_order[0]
        story_matrix[:,1] += l_order[1]
        story_matrix[:, 2] += l_order[2]
        story_matrix[:, 3] += l_order[3]

        #constructing the action matrix based on the inputted social and location perspectives
        action_matrix = np.zeros(shape = [4, 4], dtype = int)
        these_social_ps = [int(expInfo['sA']), int(expInfo['sB'])]
        these_location_ps = [int(expInfo['lA']), int(expInfo['lB'])]

        for i in range(2):
            action_matrix[these_social_ps[i],:] += 1
            action_matrix[:,these_location_ps[i]] += 2

        action_matrix[action_matrix == 0] = 4

        #block molds
        block_mold1 = np.array([[0, 1, 0, 1], [1,0,1,0],[0,1,0,1], [1,0,1,0]])
        block_mold2 = np.array([[1,0,1,0],[0,1,0,1], [1,0,1,0],[0, 1, 0, 1]])

        #selecting a mold for the first half of the presented stories

        if int(expInfo['block_struct']) == 0:
            action_matrix_block1 = np.multiply(action_matrix, block_mold1)
            action_matrix_block2 = np.multiply(action_matrix, block_mold2)
            story_matrix_block1 = np.multiply(story_matrix, block_mold1)
            story_matrix_block2 = np.multiply(story_matrix, block_mold2)
        else:
            action_matrix_block1 = np.multiply(action_matrix, block_mold2)
            action_matrix_block2 = np.multiply(action_matrix, block_mold1)
            story_matrix_block1 = np.multiply(story_matrix, block_mold2)
            story_matrix_block2 = np.multiply(story_matrix, block_mold1)

        #shuffling the story and action lists
        randperm1 = np.random.RandomState(seed=int(expInfo['random_seed'])).permutation(8)
        randperm2 = np.random.RandomState(seed= (int(expInfo['random_seed']) + 1)).permutation(8)

        #block1
        #turning matrices into lists and removing zeros
        action_list_block1 = list(action_matrix_block1.flatten())
        action_list_block1 = np.asarray([x for x in action_list_block1 if x != 0])
        story_list_block1 = list(story_matrix_block1.flatten())
        story_list_block1 = np.asarray([x for x in story_list_block1 if x != 0])
        #shuffling
        action_list_block1 = action_list_block1[randperm1]
        story_list_block1 = story_list_block1[randperm1]
        #saving data
        thisExp.addData('story_list_block1', story_list_block1)
        thisExp.addData('action_list_block1', action_list_block1)
        #printing
        print(story_list_block1)

        #block2
        #turning matrices into lists and removing zeros
        action_list_block2 = list(action_matrix_block2.flatten())
        action_list_block2 = np.asarray([x for x in action_list_block2 if x != 0])
        story_list_block2 = list(story_matrix_block2.flatten())
        story_list_block2 = np.asarray([x for x in story_list_block2 if x != 0])
        #shuffling
        action_list_block2 = action_list_block2[randperm2]
        story_list_block2 = story_list_block2[randperm2]
        #saving data
        thisExp.addData('story_list_block2', story_list_block2)
        thisExp.addData('action_list_block2', action_list_block2)
        #printing
        print(story_list_block2)

        #concatenating the story and action lists
        all_stories = np.concatenate((story_list_block1,story_list_block2), axis = None)
        all_actions = np.concatenate((action_list_block1,action_list_block2), axis = None)

        print(all_stories)
        print(all_actions)



        #dictionary for all the stories and their values
        storyDict = {11: {'name':'Restaurant Breakup', 1: 'Couples Therapist', 2:'Restaurant Critic', 'pic':'storypics/11_storypic.jpg', 'storyFile': 'audio_excel_sheets/11_audio.xlsx'},
                     12: {'name':'Airport Breakup', 1: 'Couples Therapist', 2:'Airport Customer Experience Manager', 'pic':'storypics/12_storypic.jpg', 'storyFile': 'audio_excel_sheets/12_audio.xlsx'},
                     13: {'name':'Grocery Shopping- Break up', 1:'Couples Therapist', 2: 'Grocery Store Customer Experience Manager', 'pic':'storypics/13_storypic.jpg', 'storyFile': 'audio_excel_sheets/13_audio.xlsx'},
                     14: {'name':'Attending a Lecture-Breakup', 1:'Couples Therapist', 2: 'Dean of Academic Studies', 'pic':'storypics/14_storypic.jpg', 'storyFile': 'audio_excel_sheets/14_audio.xlsx'},
                     21: {'name':'Restaurant Proposal', 1: 'Wedding Planner', 2: 'Restaurant Critic', 'pic':'storypics/21_storypic.jpg', 'storyFile': 'audio_excel_sheets/21_audio.xlsx'},
                     22: {'name':'Airport Proposal', 1: 'Wedding Planner', 2:'Airport Customer Experience Manager', 'pic':'storypics/22_storypic.jpg', 'storyFile': 'audio_excel_sheets/22_audio.xlsx'},
                     23: {'name':'Grocery Shopping- Proposal', 1: 'Wedding Planner', 2:'Grocery Store Customer Experience Manager', 'pic':'storypics/23_storypic.jpg', 'storyFile': 'audio_excel_sheets/23_audio.xlsx'},
                     24: {'name':'Attending a Lecture-Proposal', 1: 'Wedding Planner', 2: 'Dean of Academic Studies', 'pic':'storypics/24_storypic.jpg', 'storyFile': 'audio_excel_sheets/24_audio.xlsx'},
                     31: {'name':'Restaurant Business Deal', 1:'Business Reporter', 2:'Restaurant Critic', 'pic':'storypics/31_storypic.jpg', 'storyFile': 'audio_excel_sheets/31_audio.xlsx'},
                     32: {'name':'Airport Business Deal', 1:'Business Reporter', 2:'Airport Customer Experience Manager', 'pic':'storypics/32_storypic.jpg', 'storyFile': 'audio_excel_sheets/32_audio.xlsx'},
                     33: {'name':'Grocery Shopping- Business Deal', 1:'Business Reporter', 2:'Grocery Store Customer Experience Manager', 'pic':'storypics/33_storypic.jpg', 'storyFile': 'audio_excel_sheets/33_audio.xlsx'},
                     34: {'name':'Attending a Lecture-Business Deal', 1:'Business Reporter', 2:'Dean of Academic Studies', 'pic':'storypics/34_storypic.jpg', 'storyFile': 'audio_excel_sheets/34_audio.xlsx'},
                     41: {'name':'Restaurant Meet Cute', 1: 'Matchmaker', 2:'Restaurant Critic', 'pic':'storypics/41_storypic.jpg', 'storyFile': 'audio_excel_sheets/41_audio.xlsx'},
                     42: {'name':'Airport Meet Cute', 1: 'Matchmaker', 2:'Airport Customer Experience Manager', 'pic':'storypics/42_storypic.jpg', 'storyFile': 'audio_excel_sheets/42_audio.xlsx'},
                     43: {'name':'Grocery Shopping- Meet Cute', 1:'Matchmaker', 2: 'Grocery Store Customer Experience Manager', 'pic':'storypics/43_storypic.jpg', 'storyFile': 'audio_excel_sheets/43_audio.xlsx'},
                     44: {'name':'Attending a Lecture-Meet Cute', 1:'Matchmaker', 2: 'Dean of Academic Studies', 'pic':'storypics/44_storypic.jpg', 'storyFile': 'audio_excel_sheets/44_audio.xlsx'}}
  Routine check_played_story
    CodeComponent code_27
      Code Type = Py
      Begin Routine:
        if all_actions[count] == 3:
            played_story = 0
        else:
            played_story = 1
Flow
  Routine startup
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = question_instructions.xlsx
    loopType = sequential
    nReps = 1
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    Routine questions_instructions2
  LoopTerminator trials_5
  LoopInitiator trials_6 loopType="TrialHandler"
    conditionsFile = count.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('count', 0)]),
      OrderedDict([('count', 1)]),
      OrderedDict([('count', 2)]),
      OrderedDict([('count', 3)]),
      OrderedDict([('count', 4)]),
      OrderedDict([('count', 5)]),
      OrderedDict([('count', 6)]),
      OrderedDict([('count', 7)]),
      OrderedDict([('count', 8)]),
      OrderedDict([('count', 9)]),
      OrderedDict([('count', 10)]),
      OrderedDict([('count', 11)]),
      OrderedDict([('count', 12)]),
      OrderedDict([('count', 13)]),
      OrderedDict([('count', 14)]),
      OrderedDict([('count', 15)])]
    Routine check_played_story
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = played_story
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      Routine questioncount
      Routine story_image
      Routine question1
      Routine question2
      Routine question3
      Routine question4
      Routine question5
      Routine question6
      Routine question7
      Routine question8
    LoopTerminator trials
  LoopTerminator trials_6
  LoopInitiator trials_8 loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    Routine end_of_task
  LoopTerminator trials_8
