PsychoPy2experiment version="3.2.1"
Settings
  Experiment info = {'participant': '', 'sA': '0', 'sB': '1', 'lA': '0', 'lB': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = shortanswer_fmri2
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Routines
  Routine trial
  Routine start
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        Dict = {}

        #Dict[0] entry for sA
        if int(expInfo['sA']) == 0:
            Dict[0] = 'intro_roles/s0.xlsx'
        elif int(expInfo['sA']) == 1:
            Dict[0] = 'intro_roles/s1.xlsx'
        if int(expInfo['sA']) == 2:
            Dict[0] = 'intro_roles/s2.xlsx'
        elif int(expInfo['sA']) == 3:
            Dict[0] = 'intro_roles/s3.xlsx'

        #Dict[1] entry for sB
        if int(expInfo['sB']) == 0:
            Dict[1] = 'intro_roles/s0.xlsx'
        if int(expInfo['sB']) == 1:
            Dict[1] = 'intro_roles/s1.xlsx'
        if int(expInfo['sB']) == 2:
            Dict[1] = 'intro_roles/s2.xlsx'
        if int(expInfo['sB']) == 3:
            Dict[1] = 'intro_roles/s3.xlsx'

        #Dict[2] entry for lA
        if int(expInfo['lA']) == 0:
            Dict[2] = 'intro_roles/l0.xlsx'
        elif int(expInfo['lA']) == 1:
            Dict[2] = 'intro_roles/l1.xlsx'
        if int(expInfo['lA']) == 2:
            Dict[2] = 'intro_roles/l2.xlsx'
        elif int(expInfo['lA']) == 3:
            Dict[2] = 'intro_roles/l3.xlsx'

        #Dict[3] entry for lB
        if int(expInfo['lB']) == 0:
            Dict[3] = 'intro_roles/l0.xlsx'
        if int(expInfo['lB']) == 1:
            Dict[3] = 'intro_roles/l1.xlsx'
        if int(expInfo['lB']) == 2:
            Dict[3] = 'intro_roles/l2.xlsx'
        if int(expInfo['lB']) == 3:
            Dict[3] = 'intro_roles/l3.xlsx'
  Routine instruct
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_13
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructText
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    TextComponent text_23
      letterHeight = 0.1
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = (press space to continue)
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  Routine count
    TextComponent text_43
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = ($count + 1)
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    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_44
      letterHeight = 0.1
      pos = (-0.06, 0)
      startVal [time (s)] = 0.0
      text = Question Set     out of 8
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Flow
  Routine start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = question_instructions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('instructText', 'In this last part of the experiment, please answer 8 questions about each story.')]),
      OrderedDict([('instructText', 'Some of the questions are not related to the perspective you were asked to assume.')]),
      OrderedDict([('instructText', 'We realize that we did not tell you to think of these questions during the story, but please do your best to answer them.')]),
      OrderedDict([('instructText', 'Please answer as much as you remember, and be specific and concrete in your answers. It is best to try to be as faithful as possible to what the story actually said.\n')]),
      OrderedDict([('instructText', 'When you have finished typing your answer, hit ‘return’ to submit your answer and move onto the next question. ')])]
    Routine instruct
  LoopTerminator trials
  Routine count
