PsychoPy2experiment version="3.2.1"
Settings
  Experiment info = {'participant': 'alex', 'sA': '0', 'sB': '1', 'lA': '0', 'lB': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  expName = training_fmri
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        Dict = {}

        #Dict[0] entry for sA
        if int(expInfo['sA']) == 0:
            Dict[0] = 'intro_roles/s0.xlsx'
        elif int(expInfo['sA']) == 1:
            Dict[0] = 'intro_roles/s1.xlsx'
        if int(expInfo['sA']) == 2:
            Dict[0] = 'intro_roles/s2.xlsx'
        elif int(expInfo['sA']) == 3:
            Dict[0] = 'intro_roles/s3.xlsx'

        #Dict[1] entry for sB
        if int(expInfo['sB']) == 0:
            Dict[1] = 'intro_roles/s0.xlsx'
        if int(expInfo['sB']) == 1:
            Dict[1] = 'intro_roles/s1.xlsx'
        if int(expInfo['sB']) == 2:
            Dict[1] = 'intro_roles/s2.xlsx'
        if int(expInfo['sB']) == 3:
            Dict[1] = 'intro_roles/s3.xlsx'

        #Dict[2] entry for lA
        if int(expInfo['lA']) == 0:
            Dict[2] = 'intro_roles/l0.xlsx'
        elif int(expInfo['lA']) == 1:
            Dict[2] = 'intro_roles/l1.xlsx'
        if int(expInfo['lA']) == 2:
            Dict[2] = 'intro_roles/l2.xlsx'
        elif int(expInfo['lA']) == 3:
            Dict[2] = 'intro_roles/l3.xlsx'

        #Dict[3] entry for lB
        if int(expInfo['lB']) == 0:
            Dict[3] = 'intro_roles/l0.xlsx'
        if int(expInfo['lB']) == 1:
            Dict[3] = 'intro_roles/l1.xlsx'
        if int(expInfo['lB']) == 2:
            Dict[3] = 'intro_roles/l2.xlsx'
        if int(expInfo['lB']) == 3:
            Dict[3] = 'intro_roles/l3.xlsx'
  Routine perspective_only
    TextComponent text_18
      letterHeight = 0.15
      pos = (-.5, .25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $roleName
      wrapWidth = .5
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    ImageComponent image_9
      image [set every repeat] = $rolePic
      pos = (.25, .25)
      size = (0.85, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine q1
    TextComponent text_8
      letterHeight = 0.1
      pos = (0, -.6)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $('A: ' + Q1)
    TextComponent text_9
      letterHeight = 0.15
      pos = (-.5, .25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $roleName
      wrapWidth = .5
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    ImageComponent image_5
      image [set every repeat] = $rolePic
      pos = (.25, .25)
      size = (0.85, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine q2
    TextComponent text_10
      letterHeight = 0.1
      pos = (0, -.6)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $('B: ' + Q2)
    TextComponent text_11
      letterHeight = 0.15
      pos = (-.5, .25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $roleName
      wrapWidth = .5
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    ImageComponent image_6
      image [set every repeat] = $rolePic
      pos = (.25, .25)
      size = (0.85, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine q3
    TextComponent text_13
      letterHeight = 0.1
      pos = (0, -.6)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $('C: ' + Q3)
    TextComponent text_14
      letterHeight = 0.15
      pos = (-.5, .25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $roleName
      wrapWidth = .5
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    ImageComponent image_7
      image [set every repeat] = $rolePic
      pos = (.25, .25)
      size = (0.85, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine q4
    TextComponent text_15
      letterHeight = 0.1
      pos = (0, -.6)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $('D: ' + Q4)
    TextComponent text_16
      letterHeight = 0.15
      pos = (-.5, .25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $roleName
      wrapWidth = .5
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    ImageComponent image_8
      image [set every repeat] = $rolePic
      pos = (.25, .25)
      size = (0.85, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro_practicetest
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Please indicate the order in which the questions appear in the following quiz:
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test
    CodeComponent set_text_2
      Code Type = Py
      Begin Routine:
        from psychopy import visual, core, event

        Q = np.array([Q1, Q2, Q3, Q4, D1, D2])
        correct = np.array([1,2,3,4,0,0], dtype=int)
        randperm = np.random.permutation(6)
        Q = Q[randperm]
        correct = correct[randperm]

        text1 = "1: " + Q[0]
        text2 = "2: " + Q[1]
        text3 = "3: " + Q[2]
        text4 = "4: " + Q[3]
        text5 = "5: " + Q[4]
        text6 = "6: " + Q[5]

        this_image = 'icon/bar1.png'



        check = visual.ImageStim(win, 'icon/checkmark.png')
        redx = visual.ImageStim(win, 'icon/redx.png')

        thumbsup = visual.ImageStim(win, 'icon/thumbsup.png')



        checkCount = 0
        test1 = 0
        test2 = 0
        test3 = 0
        test4 = 0
        test5 = 0
        test6 = 0
    TextComponent question1_2
      letterHeight = 0.08
      pos = (0, .70)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text1
      wrapWidth = 2
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    TextComponent question2_2
      letterHeight = 0.08
      pos = (0, .45)
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text [set every repeat]:
        $text2
    TextComponent question3_2
      letterHeight = 0.08
      pos = (0, .16)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text3
      wrapWidth = 2
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    TextComponent question4_2
      letterHeight = 0.08
      pos = (0, -.12)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text4
      wrapWidth = 2
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    TextComponent question5_2
      letterHeight = 0.08
      pos = (0, -.35)
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text [set every repeat]:
        $text5
    TextComponent question6_2
      letterHeight = 0.08
      pos = (0, -.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text6
      wrapWidth = 2
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    CodeComponent framecheck_2
      Code Type = Py
      Each Frame:
        if this_image == 'icon/bar5.jpg':
            thumbsup.draw()
            win.flip()
            core.wait(1.5)
            trials_2.finished= True
            continueRoutine = False
        #key press 1
        if event.getKeys(['1']):
            if correct[0] == (checkCount + 1):
                if test1 == 0:
                    test1 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #keypress 2
        if event.getKeys(['2']):
            if correct[1] == (checkCount + 1):
                if test2 == 0:
                    test2 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #key press 3
        if event.getKeys(['3']):
            if correct[2] == (checkCount + 1):
                if test3 == 0:
                    test3 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #keypress 4
        if event.getKeys(['4']):
            if correct[3] == (checkCount + 1):
                if test4 == 0:
                    test4 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #key press 5
        if event.getKeys(['5']):
            if correct[4] == (checkCount + 1):
                if test5 == 0:
                    test5 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #keypress 6
        if event.getKeys(['6']):
            if correct[5] == (checkCount + 1):
                if test6 == 0:
                    test6 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False


        if event.getKeys(['q']):
            trials_2.finished = True
            continueRoutine=False
        if checkCount == 4:
            this_image = 'icon/bar5.jpg'

        if checkCount == 1:
            this_image = 'icon/bar2.png'
        if checkCount == 2:
            this_image = 'icon/bar3.jpg'
        if checkCount == 3:
            this_image = 'icon/bar4.png'
    ImageComponent image_3
      image [set every frame] = $this_image
      pos = (0, -.85)
      size = (0.25, 0.125)
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = end of training
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  Routine final_test_intro
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Final Tests
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  Routine final_test_i
    ImageComponent image_2
      image [set every repeat] = $rolePic
      size = (0.85, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.15
      pos = (0, -.7)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $roleName
  Routine test3
    CodeComponent set_text_3
      Code Type = Py
      Begin Routine:
        from psychopy import visual, core, event

        Q = np.array([Q1, Q2, Q3, Q4, D1, D2])
        correct = np.array([1,2,3,4,0,0], dtype=int)
        randperm = np.random.permutation(6)
        Q = Q[randperm]
        correct = correct[randperm]

        text1 = "1: " + Q[0]
        text2 = "2: " + Q[1]
        text3 = "3: " + Q[2]
        text4 = "4: " + Q[3]
        text5 = "5: " + Q[4]
        text6 = "6: " + Q[5]

        this_image = 'icon/bar1.png'



        check = visual.ImageStim(win, 'icon/checkmark.png')
        redx = visual.ImageStim(win, 'icon/redx.png')

        thumbsup = visual.ImageStim(win, 'icon/thumbsup.png')



        checkCount = 0
        test1 = 0
        test2 = 0
        test3 = 0
        test4 = 0
        test5 = 0
        test6 = 0
    TextComponent question1_3
      letterHeight = 0.08
      pos = (0, .70)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text1
      wrapWidth = 2
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    TextComponent question2_3
      letterHeight = 0.08
      pos = (0, .45)
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text [set every repeat]:
        $text2
    TextComponent question3_3
      letterHeight = 0.08
      pos = (0, .16)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text3
      wrapWidth = 2
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    TextComponent question4_3
      letterHeight = 0.08
      pos = (0, -.12)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text4
      wrapWidth = 2
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    TextComponent question5_3
      letterHeight = 0.08
      pos = (0, -.35)
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text [set every repeat]:
        $text5
    TextComponent question6_3
      letterHeight = 0.08
      pos = (0, -.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text6
      wrapWidth = 2
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    CodeComponent framecheck_3
      Code Type = Py
      Each Frame:
        if this_image == 'icon/bar5.jpg':
            thumbsup.draw()
            win.flip()
            core.wait(1.5)
            trials_3.finished= True
            continueRoutine = False
        #key press 1
        if event.getKeys(['1']):
            if correct[0] == (checkCount + 1):
                if test1 == 0:
                    test1 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #keypress 2
        if event.getKeys(['2']):
            if correct[1] == (checkCount + 1):
                if test2 == 0:
                    test2 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #key press 3
        if event.getKeys(['3']):
            if correct[2] == (checkCount + 1):
                if test3 == 0:
                    test3 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #keypress 4
        if event.getKeys(['4']):
            if correct[3] == (checkCount + 1):
                if test4 == 0:
                    test4 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #key press 5
        if event.getKeys(['5']):
            if correct[4] == (checkCount + 1):
                if test5 == 0:
                    test5 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #keypress 6
        if event.getKeys(['6']):
            if correct[5] == (checkCount + 1):
                if test6 == 0:
                    test6 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False


        if event.getKeys(['q']):
            trials_3.finished = True
            continueRoutine=False
        if checkCount == 4:
            this_image = 'icon/bar5.jpg'
            trials_7.finished = True

        if checkCount == 1:
            this_image = 'icon/bar2.png'
        if checkCount == 2:
            this_image = 'icon/bar3.jpg'
        if checkCount == 3:
            this_image = 'icon/bar4.png'
    ImageComponent image_4
      image [set every frame] = $this_image
      pos = (0, -.85)
      size = (0.25, 0.125)
      startVal [time (s)] = 0.0
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  Routine intro
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruct_text
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro_pic
    TextComponent text_6
      letterHeight = 0.1
      pos = (0, .5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruct_text
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image
      image = jobphotos/restaurant_critic.jpg
      pos = (0, -.3)
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
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  Routine intro1
    TextComponent text_7
      letterHeight = 0.1
      pos = (0, .5)
      startVal [time (s)] = 0.0
      text = For example, 2 of the questions associated with the restaurant critic may be "What are the menus like?" and "What does each client order?"
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    ImageComponent image_10
      image = jobphotos/restaurant_critic.jpg
      pos = (0, -.3)
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro2
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_12
      letterHeight = 0.1
      pos = (0, .5)
      startVal [time (s)] = 0.0
      text = For each story, an image with the title of the story, character names, and character images, like the one below, will be presented on the screen while you hear it being played.
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    ImageComponent image_11
      image = icon/intro_faces.jpg
      pos = (0, -.5)
      size = (0.85, 0.75)
      startVal [time (s)] = 0.0
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  Routine show_jobs
    ImageComponent image_12
      image [set every repeat] = $rolePic
      size = (0.85, 0.75)
      startVal [time (s)] = 0.0
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    TextComponent text_17
      letterHeight = 0.15
      pos = (0, -.7)
      startVal [time (s)] = 0.0
      text [set every repeat] = $roleName
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial
  LoopInitiator instruct1 loopType="TrialHandler"
    conditionsFile = fmri_instruct1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('instruct_text', 'Welcome to the job simulator task! ')]),
      OrderedDict([('instruct_text', 'In this experiment you will listen to 12 short stories. ')]),
      OrderedDict([('instruct_text', 'During some of these stories, we will ask you to take on the perspective of a type of job. ')]),
      OrderedDict([('instruct_text', 'In other words, you should try to listen to the story from the perspective of that job. This is called “job simulation.”')]),
      OrderedDict([('instruct_text', 'You will be told the job to simulate before each story. ')])]
    Routine intro
  LoopTerminator instruct1
  LoopInitiator instruct2 loopType="TrialHandler"
    conditionsFile = fmri_instruct2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('instruct_text', 'For example, you may be asked to take on the role of a restaurant critic while listening to one of the short stories.')]),
      OrderedDict([('instruct_text', 'You should try to imagine yourself being a restaurant critic as you listen to the story.')])]
    Routine intro_pic
  LoopTerminator instruct2
  LoopInitiator instruct3 loopType="TrialHandler"
    conditionsFile = fmri_instruct3.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('instruct_text', 'Some stories, however, will not have any job assigned to them, and you can simply listen to the story.')]),
      OrderedDict([('instruct_text', 'In this part of the experiment outside of the scanner, we will introduce you to four possible perspectives you could be asked to take on.')]),
      OrderedDict([('instruct_text', "For each perspective, you'll also learn 4 questions associated with it to use when listening to a story.")])]
    Routine intro
  LoopTerminator instruct3
  Routine intro1
  LoopInitiator instruct4 loopType="TrialHandler"
    conditionsFile = fmri_instruct4.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('instruct_text', 'We encourage you to keep these questions in mind while listening to the story while simulating the associated perspective.')]),
      OrderedDict([('instruct_text', 'When you are in the scanner, you will listen to the 12 short stories.')])]
    Routine intro
  LoopTerminator instruct4
  Routine intro2
  LoopInitiator instruct5 loopType="TrialHandler"
    conditionsFile = fmri_instruct5.xlsx
    loopType = sequential
    nReps = 1
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    Routine intro
  LoopTerminator instruct5
  LoopInitiator count_4 loopType="TrialHandler"
    conditionsFile = count_0123.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('count', 0)]),
      OrderedDict([('count', 1)]),
      OrderedDict([('count', 2)]),
      OrderedDict([('count', 3)])]
    LoopInitiator trials_5 loopType="TrialHandler"
      conditionsFile = Dict[$count]
      loopType = sequential
      nReps = 1
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      Routine show_jobs
    LoopTerminator trials_5
  LoopTerminator count_4
  LoopInitiator instruct6 loopType="TrialHandler"
    conditionsFile = fmri_instruct6.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('instruct_text', 'You’ll become acquainted with them more in learning the 4 questions associated with each perspective.')]),
      OrderedDict([('instruct_text', "For each perspective, you'll go through all four questions in a sequence.")]),
      OrderedDict([('instruct_text', "Then you'll be presented with a quiz and have to indicate which questions you saw in the order in which they appeared in the sequence.")]),
      OrderedDict([('instruct_text', "You'll indicate the question you select by pressing the number key corresponding to the number in front of the question.")]),
      OrderedDict([('instruct_text', "If you make the wrong selection, you'll get the 4 questions presented in the correct order again and restart the quiz.")]),
      OrderedDict([('instruct_text', "After you've passed the quizzes for each perspective, you'll do all of them a final time, but without seeing the correct order of the questions beforehand.")]),
      OrderedDict([('instruct_text', 'Press space to begin!')])]
    Routine intro
  LoopTerminator instruct6
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = count_0123.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('count', 0)]),
      OrderedDict([('count', 1)]),
      OrderedDict([('count', 2)]),
      OrderedDict([('count', 3)])]
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = Dict[$count]
      loopType = sequential
      nReps = 7
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      Routine perspective_only
      Routine q1
      Routine q2
      Routine q3
      Routine q4
      Routine intro_practicetest
      Routine test
    LoopTerminator trials_2
  LoopTerminator trials
  Routine final_test_intro
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = count_0123.xlsx
    loopType = random
    nReps = 1
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    LoopInitiator trials_3 loopType="TrialHandler"
      conditionsFile = Dict[$count]
      loopType = sequential
      nReps = 7
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      Routine final_test_i
      Routine test3
    LoopTerminator trials_3
  LoopTerminator trials_4
  Routine end
