PsychoPy2experiment version="3.2.1"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
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Routines
  Routine trial
  Routine q1
    TextComponent text_8
      letterHeight = 0.1
      pos = (0, -.6)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $('A: ' + Q1)
    TextComponent text_9
      letterHeight = 0.15
      pos = (-.5, .25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $count
      wrapWidth = .5
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    ImageComponent image_5
      image [set every repeat] = $rolePic
      pos = (.25, .25)
      size = (0.85, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine coutn
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $Dict[$count]
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  Routine trial_2
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        Dict = {}

        Dict[0] = 'intro_roles/s1.xlsx'
        Dict[1] = 'intro_roles/s2.xlsx'
Flow
  Routine trial_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = count_01.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('count', 0)]),
      OrderedDict([('count', 1)])]
    Routine coutn
  LoopTerminator trials
