PsychoPy2experiment version="3.0.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = test082019
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Routines
  Routine trial
    SoundComponent sound_1
      durationEstim = 5
      sound [set every repeat] = $audio
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Each Frame:
        for key in event.getKeys():
            if key in ['q']:
                trials.finished = 1
                continueRoutine = False
  Routine test
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        ok
  Routine ok
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        ok
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = audio_excel_sheets/11_audio.xlsx
    loopType = sequential
    nReps = 1
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    Routine trial
    Routine ok
  LoopTerminator trials
