PsychoPy2experiment version="3.2.1"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = testing_vlc
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        import vlc
        mom=vlc.Instance()
        p=mom.media_player_new()
        #p.set_fullscreen(True)
  Routine play_audio
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        start_time = globalClock.getTime()
        this_one = audio
        m=mom.media_new(this_one)
        p.set_media(m)
        p.play()

        while p.is_playing() or (globalClock.getTime()-start_time < 2):
           win.flip()

        p.stop()
Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = audio_excel_sheets/11_audio.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('audio', 'parcelated_audio/11/11_1.ogg')]),
      OrderedDict([('audio', 'parcelated_audio/11/11_2.ogg')]),
      OrderedDict([('audio', 'parcelated_audio/11/11_3.ogg')]),
      OrderedDict([('audio', 'parcelated_audio/11/11_4.ogg')]),
      OrderedDict([('audio', 'parcelated_audio/11/11_5.ogg')]),
      OrderedDict([('audio', 'parcelated_audio/11/11_6.ogg')]),
      OrderedDict([('audio', 'parcelated_audio/11/11_7.ogg')]),
      OrderedDict([('audio', 'parcelated_audio/11/11_8.ogg')]),
      OrderedDict([('audio', 'parcelated_audio/11/11_9.ogg')]),
      OrderedDict([('audio', 'parcelated_audio/11/11_10.ogg')]),
      OrderedDict([('audio', 'parcelated_audio/11/11_11.ogg')]),
      OrderedDict([('audio', 'parcelated_audio/11/11_12.ogg')]),
      OrderedDict([('audio', 'parcelated_audio/11/11_13.ogg')]),
      OrderedDict([('audio', 'parcelated_audio/11/11_14.ogg')]),
      OrderedDict([('audio', 'parcelated_audio/11/11_15.ogg')]),
      OrderedDict([('audio', 'parcelated_audio/11/11_16.ogg')]),
      OrderedDict([('audio', 'parcelated_audio/11/11_17.ogg')]),
      OrderedDict([('audio', 'parcelated_audio/11/11_18.ogg')]),
      OrderedDict([('audio', 'parcelated_audio/11/11_19.ogg')]),
      OrderedDict([('audio', 'parcelated_audio/11/11_20.ogg')]),
      OrderedDict([('audio', 'parcelated_audio/11/11_21.ogg')]),
      OrderedDict([('audio', 'parcelated_audio/11/11_22.ogg')]),
      OrderedDict([('audio', 'parcelated_audio/11/11_23.ogg')]),
      OrderedDict([('audio', 'parcelated_audio/11/11_24.ogg')]),
      OrderedDict([('audio', 'parcelated_audio/11/11_25.ogg')]),
      OrderedDict([('audio', 'parcelated_audio/11/11_26.ogg')])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
    Routine play_audio
  LoopTerminator trials
