PsychoPy2experiment version="3.0.0b11"
Settings
  Completed URL = completedURL
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = part1
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Routines
  Routine trial
  Routine intro
    TextComponent welcome
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruct_text
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_12
      letterHeight = 0.1
      pos = (0, -.6)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $instruct_text2
  Routine test
    CodeComponent set_text
      Code Type = Py
      Begin Routine:
        from psychopy import visual, core, event

        Q = np.array([Q1, Q2, Q3, Q4, D1, D2])
        correct = np.array([1,1,1,1,0,0], dtype=bool)
        randperm = np.random.permutation(6)
        Q = Q[randperm]
        correct = correct[randperm]

        text1 = "1: " + Q[0]
        text2 = "2: " + Q[1]
        text3 = "3: " + Q[2]
        text4 = "4: " + Q[3]
        text5 = "5: " + Q[4]
        text6 = "6: " + Q[5]



        check = visual.ImageStim(win, 'checkmark.png')
        redx = visual.ImageStim(win, 'redx.png')
        txtwrong = visual.TextStim(win, text='Restart Learning', color=(0, 1.0, 0), colorSpace='rgb')
        txtwrong.size = 10
        txtcorrect = visual.TextStim(win, text = "Great job!", color=(0, 1.0, 0), colorSpace='rgb')
        thumbsup = visual.ImageStim(win, 'thumbsup.png')
        txtcorrect.size = 4


        checkCount = 0
        test1 = 0
        test2 = 0
        test3 = 0
        test4 = 0
        test5 = 0
        test6 = 0
    TextComponent question1
      letterHeight = 0.1
      pos = (0, .60)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text1
      wrapWidth = 2
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    TextComponent question2
      letterHeight = 0.1
      pos = (0, .35)
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text [set every repeat]:
        $text2
    TextComponent question3
      letterHeight = 0.1
      pos = (0, .12)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text3
      wrapWidth = 2
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    TextComponent question4
      letterHeight = 0.1
      pos = (0, -.12)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text4
      wrapWidth = 2
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    TextComponent question5
      letterHeight = 0.1
      pos = (0, -.35)
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text [set every repeat]:
        $text5
    TextComponent question6
      letterHeight = 0.1
      pos = (0, -.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text6
      wrapWidth = 2
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    CodeComponent framecheck
      Code Type = Py
      Each Frame:
        #key press 1
        if event.getKeys(['1']):
            if correct[0] == 1:
                if test1 == 0:
                    test1 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.25)
            elif correct[0] == 0:
                redx.draw()
                txtwrong.draw()
                win.flip()
                core.wait(2)
                continueRoutine = False

        #keypress 2
        if event.getKeys(['2']):
            if correct[1] == 1:
                if test2 == 0:
                    test2 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(1)
            elif correct[1] == 0:
                redx.draw()
                txtwrong.draw()
                win.flip()
                core.wait(2)
                continueRoutine = False

        #key press 3
        if event.getKeys(['3']):
            if correct[2] == 1:
                if test3 == 0:
                    test3 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(1)
            elif correct[2] == 0:
                redx.draw()
                txtwrong.draw()
                win.flip()
                core.wait(2)
                continueRoutine = False

        #keypress 4
        if event.getKeys(['4']):
            if correct[3] == 1:
                if test4 == 0:
                    test4 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(1)
            elif correct[3] == 0:
                redx.draw()
                txtwrong.draw()
                win.flip()
                core.wait(2)
                continueRoutine = False

        #key press 5
        if event.getKeys(['5']):
            if correct[4] == 1:
                if test5 == 0:
                    test5 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(1)
            elif correct[4] == 0:
                redx.draw()
                txtwrong.draw()
                win.flip()
                core.wait(2)
                continueRoutine = False

        #keypress 6
        if event.getKeys(['6']):
            if correct[5] == 1:
                if test6 == 0:
                    test6 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(1)
            elif correct[5] == 0:
                redx.draw()
                txtwrong.draw()
                win.flip()
                core.wait(2)
                continueRoutine = False


        if event.getKeys(['5']):
           continueRoutine=False
        if checkCount == 4:
            thumbsup.draw()
            txtcorrect.draw()
            win.flip()
            core.wait(1)
            trials.finished= True
            continueRoutine = False
  Routine feedback
    ImageComponent image
      image = couples.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine q2
    TextComponent text_10
      letterHeight = 0.1
      pos = (0, -.4)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $Q2
    TextComponent text_11
      letterHeight = 0.1
      pos = (-.25, .25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $roleName
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    ImageComponent image_6
      image [set every repeat] = $rolePic
      pos = (.25, .25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine q3
    TextComponent text_13
      letterHeight = 0.1
      pos = (0, -.4)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $Q3
    TextComponent text_14
      letterHeight = 0.1
      pos = (-.25, .25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $roleName
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    ImageComponent image_7
      image [set every repeat] = $rolePic
      pos = (.25, .25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine q4
    TextComponent text_15
      letterHeight = 0.1
      pos = (0, -.4)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $Q4
    TextComponent text_16
      letterHeight = 0.1
      pos = (-.25, .25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $roleName
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    ImageComponent image_8
      image [set every repeat] = $rolePic
      pos = (.25, .25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine q1
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Flow
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = whichRole.xlsx
    loopType = random
    nReps = 1
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    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = 5
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      Routine q1
      Routine q2
      Routine q3
      Routine q4
      Routine test
    LoopTerminator trials
  LoopTerminator trials_3
  Routine feedback
