PsychoPy2experiment version="3.0.3"
Settings
  Completed URL = completedURL
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = part1_subjective_segmentation
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Routines
  Routine trial
  Routine q2
    TextComponent text_10
      letterHeight = 0.1
      pos = (0, -.4)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $('B: ' + Q2)
    TextComponent text_11
      letterHeight = 0.1
      pos = (-.4, .25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $roleName
      wrapWidth = .5
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    ImageComponent image_6
      image [set every repeat] = $rolePic
      pos = (.25, .25)
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine q3
    TextComponent text_13
      letterHeight = 0.1
      pos = (0, -.4)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $('C: ' + Q3)
    TextComponent text_14
      letterHeight = 0.1
      pos = (-.4, .25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $roleName
      wrapWidth = .5
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    ImageComponent image_7
      image [set every repeat] = $rolePic
      pos = (.25, .25)
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine q4
    TextComponent text_15
      letterHeight = 0.1
      pos = (0, -.4)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $('D: ' + Q4)
    TextComponent text_16
      letterHeight = 0.1
      pos = (-.4, .25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $roleName
      wrapWidth = .5
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    ImageComponent image_8
      image [set every repeat] = $rolePic
      pos = (.25, .25)
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine q1
    TextComponent text_8
      letterHeight = 0.1
      pos = (0, -.4)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $('A: ' + Q1)
    TextComponent text_9
      letterHeight = 0.1
      pos = (-.4, .25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $roleName
      wrapWidth = .5
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    ImageComponent image_5
      image [set every repeat] = $rolePic
      pos = (.25, .25)
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end_of_intro
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = end of introduction
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    KeyboardComponent key_resp_7
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        instructions_time = timer.getTime()
        thisExp.addData('instructions time', instructions_time)
      Each Frame:
        if event.getKeys(['escape']):
            core.quit()
  Routine shows_jobs
    ImageComponent image
      image [set every repeat] = $rolePic
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.1
      pos = (0, -.6)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $job
    CodeComponent code_2
      Code Type = Py
      Each Frame:
        if event.getKeys(['q']):
            trials_4.finished = True
            continueRoutine=False
  Routine final_test_intro
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Final Tests
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  Routine final_test_i
    ImageComponent image_2
      image [set every repeat] = $rolePic
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.1
      pos = (0, -.6)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $roleName
  Routine final_test_ii
  Routine trials_6
  Routine test_2
    CodeComponent set_text
      Code Type = Py
      Begin Routine:
        from psychopy import visual, core, event

        Q = np.array([Q1, Q2, Q3, Q4, D1, D2])
        correct = np.array([1,2,3,4,0,0], dtype=int)
        randperm = np.random.permutation(6)
        Q = Q[randperm]
        correct = correct[randperm]

        text1 = "1: " + Q[0]
        text2 = "2: " + Q[1]
        text3 = "3: " + Q[2]
        text4 = "4: " + Q[3]
        text5 = "5: " + Q[4]
        text6 = "6: " + Q[5]



        check = visual.ImageStim(win, 'checkmark.png')
        redx = visual.ImageStim(win, 'redx.png')

        thumbsup = visual.ImageStim(win, 'thumbsup.png')



        checkCount = 0
        test1 = 0
        test2 = 0
        test3 = 0
        test4 = 0
        test5 = 0
        test6 = 0
    TextComponent question1
      letterHeight = 0.1
      pos = (0, .60)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text1
      wrapWidth = 2
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    TextComponent question2
      letterHeight = 0.1
      pos = (0, .35)
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text [set every repeat]:
        $text2
    TextComponent question3
      letterHeight = 0.1
      pos = (0, .12)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text3
      wrapWidth = 2
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    TextComponent question4
      letterHeight = 0.1
      pos = (0, -.12)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text4
      wrapWidth = 2
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    TextComponent question5
      letterHeight = 0.1
      pos = (0, -.35)
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text [set every repeat]:
        $text5
    TextComponent question6
      letterHeight = 0.1
      pos = (0, -.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text6
      wrapWidth = 2
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    CodeComponent framecheck
      Code Type = Py
      Each Frame:
        #key press 1
        if event.getKeys(['1']):
            if correct[0] == (checkCount + 1):
                if test1 == 0:
                    test1 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #keypress 2
        if event.getKeys(['2']):
            if correct[1] == (checkCount + 1):
                if test2 == 0:
                    test2 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            elif correct[1] == 0:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #key press 3
        if event.getKeys(['3']):
            if correct[2] == (checkCount + 1):
                if test3 == 0:
                    test3 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #keypress 4
        if event.getKeys(['4']):
            if correct[3] == (checkCount + 1):
                if test4 == 0:
                    test4 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #key press 5
        if event.getKeys(['5']):
            if correct[4] == (checkCount + 1):
                if test5 == 0:
                    test5 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #keypress 6
        if event.getKeys(['6']):
            if correct[5] == (checkCount + 1):
                if test6 == 0:
                    test6 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False


        if event.getKeys(['q']):
            trials_7.finished = True
            trials_5.finished = True
            continueRoutine=False
        if checkCount == 4:
            thumbsup.draw()
            win.flip()
            core.wait(1)
            trials_7.finished= True
            continueRoutine = False
  Routine test
    CodeComponent set_text_2
      Code Type = Py
      Begin Routine:
        from psychopy import visual, core, event

        Q = np.array([Q1, Q2, Q3, Q4, D1, D2])
        correct = np.array([1,2,3,4,0,0], dtype=int)
        randperm = np.random.permutation(6)
        Q = Q[randperm]
        correct = correct[randperm]

        text1 = "1: " + Q[0]
        text2 = "2: " + Q[1]
        text3 = "3: " + Q[2]
        text4 = "4: " + Q[3]
        text5 = "5: " + Q[4]
        text6 = "6: " + Q[5]

        this_image = 'bar1.png'



        check = visual.ImageStim(win, 'checkmark.png')
        redx = visual.ImageStim(win, 'redx.png')

        thumbsup = visual.ImageStim(win, 'thumbsup.png')



        checkCount = 0
        test1 = 0
        test2 = 0
        test3 = 0
        test4 = 0
        test5 = 0
        test6 = 0
    TextComponent question1_2
      letterHeight = 0.1
      pos = (0, .60)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text1
      wrapWidth = 2
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    TextComponent question2_2
      letterHeight = 0.1
      pos = (0, .35)
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text [set every repeat]:
        $text2
    TextComponent question3_2
      letterHeight = 0.1
      pos = (0, .12)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text3
      wrapWidth = 2
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    TextComponent question4_2
      letterHeight = 0.1
      pos = (0, -.12)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text4
      wrapWidth = 2
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    TextComponent question5_2
      letterHeight = 0.1
      pos = (0, -.35)
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text [set every repeat]:
        $text5
    TextComponent question6_2
      letterHeight = 0.1
      pos = (0, -.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text6
      wrapWidth = 2
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    CodeComponent framecheck_2
      Code Type = Py
      Each Frame:
        if this_image == 'bar5.jpeg':
            thumbsup.draw()
            win.flip()
            core.wait(1.5)
            trials.finished= True
            continueRoutine = False
        #key press 1
        if event.getKeys(['1']):
            if correct[0] == (checkCount + 1):
                if test1 == 0:
                    test1 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #keypress 2
        if event.getKeys(['2']):
            if correct[1] == (checkCount + 1):
                if test2 == 0:
                    test2 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #key press 3
        if event.getKeys(['3']):
            if correct[2] == (checkCount + 1):
                if test3 == 0:
                    test3 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #keypress 4
        if event.getKeys(['4']):
            if correct[3] == (checkCount + 1):
                if test4 == 0:
                    test4 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #key press 5
        if event.getKeys(['5']):
            if correct[4] == (checkCount + 1):
                if test5 == 0:
                    test5 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #keypress 6
        if event.getKeys(['6']):
            if correct[5] == (checkCount + 1):
                if test6 == 0:
                    test6 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False


        if event.getKeys(['q']):
            trials.finished = True
            trials_3.finished = True
            continueRoutine=False
        if checkCount == 4:
            this_image = 'bar5.jpeg'

        if checkCount == 1:
            this_image = 'bar2.png'
        if checkCount == 2:
            this_image = 'bar3.jpeg'
        if checkCount == 3:
            this_image = 'bar4.png'
    ImageComponent image_3
      image [set every frame] = $this_image
      pos = (0, -.85)
      size = (0.25, 0.125)
      startVal [time (s)] = 0.0
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  Routine intro_practicetest
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = indicate the order in which the questions appeared:
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine just_perspective
  Routine just_perspective_2
    TextComponent text_18
      letterHeight = 0.1
      pos = (-.4, .25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $roleName
      wrapWidth = .5
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    ImageComponent image_9
      image [set every repeat] = $rolePic
      pos = (.25, .25)
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test3
    CodeComponent set_text_3
      Code Type = Py
      Begin Routine:
        from psychopy import visual, core, event

        Q = np.array([Q1, Q2, Q3, Q4, D1, D2])
        correct = np.array([1,2,3,4,0,0], dtype=int)
        randperm = np.random.permutation(6)
        Q = Q[randperm]
        correct = correct[randperm]

        text1 = "1: " + Q[0]
        text2 = "2: " + Q[1]
        text3 = "3: " + Q[2]
        text4 = "4: " + Q[3]
        text5 = "5: " + Q[4]
        text6 = "6: " + Q[5]

        this_image = 'bar1.png'



        check = visual.ImageStim(win, 'checkmark.png')
        redx = visual.ImageStim(win, 'redx.png')

        thumbsup = visual.ImageStim(win, 'thumbsup.png')



        checkCount = 0
        test1 = 0
        test2 = 0
        test3 = 0
        test4 = 0
        test5 = 0
        test6 = 0
    TextComponent question1_3
      letterHeight = 0.1
      pos = (0, .60)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text1
      wrapWidth = 2
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    TextComponent question2_3
      letterHeight = 0.1
      pos = (0, .35)
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text [set every repeat]:
        $text2
    TextComponent question3_3
      letterHeight = 0.1
      pos = (0, .12)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text3
      wrapWidth = 2
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    TextComponent question4_3
      letterHeight = 0.1
      pos = (0, -.12)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text4
      wrapWidth = 2
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    TextComponent question5_3
      letterHeight = 0.1
      pos = (0, -.35)
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text [set every repeat]:
        $text5
    TextComponent question6_3
      letterHeight = 0.1
      pos = (0, -.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text6
      wrapWidth = 2
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    CodeComponent framecheck_3
      Code Type = Py
      Each Frame:
        if this_image == 'bar5.jpeg':
            thumbsup.draw()
            win.flip()
            core.wait(1.5)
            trials.finished= True
            continueRoutine = False
        #key press 1
        if event.getKeys(['1']):
            if correct[0] == (checkCount + 1):
                if test1 == 0:
                    test1 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #keypress 2
        if event.getKeys(['2']):
            if correct[1] == (checkCount + 1):
                if test2 == 0:
                    test2 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            elif correct[1] == 0:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #key press 3
        if event.getKeys(['3']):
            if correct[2] == (checkCount + 1):
                if test3 == 0:
                    test3 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #keypress 4
        if event.getKeys(['4']):
            if correct[3] == (checkCount + 1):
                if test4 == 0:
                    test4 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #key press 5
        if event.getKeys(['5']):
            if correct[4] == (checkCount + 1):
                if test5 == 0:
                    test5 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #keypress 6
        if event.getKeys(['6']):
            if correct[5] == (checkCount + 1):
                if test6 == 0:
                    test6 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False


        if event.getKeys(['q']):
            trials_7.finished = True
            trials_5.finished = True
            continueRoutine=False
        if checkCount == 4:
            this_image = 'bar5.jpeg'
            trials_7.finished = True

        if checkCount == 1:
            this_image = 'bar2.png'
        if checkCount == 2:
            this_image = 'bar3.jpeg'
        if checkCount == 3:
            this_image = 'bar4.png'
    ImageComponent image_4
      image [set every frame] = $this_image
      pos = (0, -.85)
      size = (0.25, 0.125)
      startVal [time (s)] = 0.0
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  Routine segmentation_instructions
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructText
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    CodeComponent code_3
      Code Type = Py
      Each Frame:
        if event.getKeys(['q']):
            trials_8.finished = True
            continueRoutine=False
  Routine intro_2
    TextComponent welcome
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruct_text
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_12
      letterHeight = 0.1
      pos = (0, -.6)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $instruct_text2
    CodeComponent code
      Code Type = Py
      Each Frame:
        if event.getKeys(['q']):
            loop3.finished = True
            continueRoutine=False
  Routine intro
    TextComponent welcome_2
      letterHeight = 0.1
      pos = (0, .7)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruct_text
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Py
      Begin Experiment:
        timer = core.Clock()
      Each Frame:
        if event.getKeys(['q']):
            trials_2.finished = True
            continueRoutine=False
    ImageComponent image_10
      image [set every repeat] = $this_pic
      pos = (0, -.3)
      size = [1.5, 1]
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = instructions.xlsx
    loopType = sequential
    nReps = 1
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    Routine intro
  LoopTerminator trials_2
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = jobsPics.xlsx
    loopType = random
    nReps = 1
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    Routine shows_jobs
  LoopTerminator trials_4
  LoopInitiator loop3 loopType="TrialHandler"
    conditionsFile = instructions2.xlsx
    loopType = sequential
    nReps = 1
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    Routine intro_2
  LoopTerminator loop3
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = whichRole.xlsx
    loopType = random
    nReps = 1
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    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = 5
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      Routine just_perspective_2
      Routine q1
      Routine q2
      Routine q3
      Routine q4
      Routine intro_practicetest
      Routine test
    LoopTerminator trials
  LoopTerminator trials_3
  Routine final_test_intro
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = whichRole.xlsx
    loopType = sequential
    nReps = 1
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    LoopInitiator trials_7 loopType="TrialHandler"
      loopType = random
      nReps = 5
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      Routine final_test_i
      Routine test3
    LoopTerminator trials_7
  LoopTerminator trials_5
  LoopInitiator trials_8 loopType="TrialHandler"
    conditionsFile = instructions_segment.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('instructText', 'Some people feel that the stories have natural “parts”')]),
      OrderedDict([('instructText', 'Additionally, while reading each story, you will also indicate when you think a new part is beginning. ')]),
      OrderedDict([('instructText', 'To advance through the sentences of the story you will press “1” if you think a new “part” is beginning. ')]),
      OrderedDict([('instructText', 'You will press “9” if you think the sentence is in the same “part” as the sentence before. ')])]
    Routine segmentation_instructions
  LoopTerminator trials_8
  LoopInitiator trials_9 loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine end_of_intro
  LoopTerminator trials_9
