PsychoPy2experiment version="3.0.0b11"
Settings
  Completed URL = completedURL
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = body_updated
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Routines
  Routine perspective
    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        import numpy as np

        a = np.zeros(shape = [4, 4], dtype = int)

        s_order = np.array([10, 20, 30, 40], dtype = int)

        l_order = np.array([1,2,3,4], dtype = int)


        np.random.shuffle(s_order)
        np.random.shuffle(l_order)

        a[0] += s_order[0]
        a[1] += s_order[1]
        a[2] += s_order[2]
        a[3] += s_order[3]

        a[:,0] += l_order[0]
        a[:,1] += l_order[1]
        a[:, 2] += l_order[2]
        a[:, 3] += l_order[3]

        run1 = np.array([a[0,0], a[1,1], a[2,0], a[3,1], a[0,2], a[1,3], a[2,2], a[3,3]])
        run2 = np.array([a[0,1], a[1,0], a[2,1], a[3,0], a[0,3], a[1,2], a[2,3], a[3,2]])
        order_run1 = np.array(['Location', 'Location', 'Social', 'Social', 'Social', 'Social', 'Location', 'Location'])
        order_run2 = np.array(['Location', 'Location', 'Social', 'Social', 'Social', 'Social', 'Location', 'Location'])

        randperm1 = np.random.permutation(8)
        randperm2 = np.random.permutation(8)

        run1 = run1[randperm1]
        run2 = run2[randperm2]
        order_run1 = order_run1[randperm1]
        order_run2 = order_run2[randperm2]



        #create a dictionary for all the stories and their values

        storyDict = {11: {'name':'Restaurant Breakup', 'Social': 'Couples Therapist', 'Location':'Restaurant Critic', 'pic':'storypics/11_storypic', 'storyFile': 'story_xlsx_files/11.xlsx'},
                     12: {'name':'Airport Breakup', 'Social': 'Couples Therapist', 'Location':'Airport Customer Experience Manager', 'pic':'storypics/12_storypic', 'storyFile': 'story_xlsx_files/12.xlsx'},
                     13: {'name':'Grocery Shopping- Break up', 'Social':'Couples Therapist', 'Location': 'Grocery Store Customer Experience Manager', 'pic':'storypics/13_storypic', 'storyFile': 'story_xlsx_files/13.xlsx'},
                     14: {'name':'Attending a Lecture-Breakup', 'Social':'Couples Therapist', 'Location': 'Dean of Academic Studies', 'pic':'storypics/14_storypic', 'storyFile': 'story_xlsx_files/14.xlsx'},
                     21: {'name':'Restaurant Proposal', 'Social': 'Wedding Planner', 'Location': 'Restaurant Critic', 'pic':'storypics/21_storypic', 'storyFile': 'story_xlsx_files/21.xlsx'},
                     22: {'name':'Airport Proposal', 'Social': 'Wedding Planner', 'Location':'Airport Customer Experience Manager', 'pic':'storypics/22_storypic', 'storyFile': 'story_xlsx_files/22.xlsx'},
                     23: {'name':'Grocery Shopping- Proposal', 'Social': 'Wedding Planner', 'Location':'Grocery Store Customer Experience Manager', 'pic':'storypics/23_storypic', 'storyFile': 'story_xlsx_files/23.xlsx'},
                     24: {'name':'Attending a Lecture-Proposal', 'Social': 'Wedding Planner', 'Location': 'Dean of Academic Studies', 'pic':'storypics/24_storypic', 'storyFile': 'story_xlsx_files/24.xlsx'},
                     31: {'name':'Restaurant Business Deal', 'Social':'Business Reporter', 'Location':'Restaurant Critic', 'pic':'storypics/31_storypic', 'storyFile': 'story_xlsx_files/31.xlsx'},
                     32: {'name':'Airport Business Deal', 'Social':'Business Reporter', 'Location':'Airport Customer Experience Manager', 'pic':'storypics/32_storypic', 'storyFile': 'story_xlsx_files/32.xlsx'},
                     33: {'name':'Grocery Shopping- Business Deal', 'Social':'Business Reporter', 'Location':'Grocery Store Customer Experience Manager', 'pic':'storypics/33_storypic', 'storyFile': 'story_xlsx_files/33.xlsx'},
                     34: {'name':'Attending a Lecture-Business Deal', 'Social':'Business Reporter', 'Location':'Dean of Academic Studies', 'pic':'storypics/34_storypic', 'storyFile': 'story_xlsx_files/34.xlsx'},
                     41: {'name':'Restaurant Meet Cute', 'Social': 'Matchmaker', 'Location':'Restaurant Critic', 'pic':'storypics/41_storypic', 'storyFile': 'story_xlsx_files/41.xlsx'},
                     42: {'name':'Airport Meet Cute', 'Social': 'Matchmaker', 'Location':'Airport Customer Experience Manager', 'pic':'storypics/42_storypic', 'storyFile': 'story_xlsx_files/42.xlsx'},
                     43: {'name':'Grocery Shopping- Meet Cute', 'Social':'Matchmaker', 'Location': 'Grocery Store Customer Experience Manager', 'pic':'storypics/43_storypic', 'storyFile': 'story_xlsx_files/43.xlsx'},
                     44: {'name':'Attending a Lecture-Meet Cute', 'Social':'Matchmaker', 'Location': 'Dean of Academic Studies', 'pic':'storypics/44_storypic', 'storyFile': 'story_xlsx_files/44.xlsx'}}

        order_stories = np.concatenate((run1, run2), axis =None)
        order_perspectives = np.concatenate((order_run1, order_run2), axis = None)

        thisExp.addData('order of stories', order_stories)
        thisExp.addData('order of perspectives', order_perspectives)
      Begin Routine:
        #set the perspective
        this_perspective = storyDict.get(order_stories[count], {}).get(order_perspectives[count])
        if this_perspective == 'jobphotos/Couples Therapist':
            display_pic = couples.jpg
        if this_perspective == 'Restaurant Critic':
            display_pic = 'jobphotos/restaurant_critic.jpg'
        if this_perspective == 'Airport Customer Experience Manager':
            display_pic = 'jobphotos/acem.jpg'
        if this_perspective == 'Grocery Store Customer Experience Manager':
            display_pic = 'jobphotos/gscem.jpg'
        if this_perspective == 'Dean of Academic Studies':
            display_pic ='jobphotos/dean.jpg'
        if this_perspective == 'Wedding Planner':
            display_pic = 'jobphotos/weddingplanner.jpg'
        if this_perspective == 'Business Reporter':
            display_pic = 'jobphotos/business_reporter.jpg'
        if this_perspective == 'Matchmaker':
            display_pic = 'jobphotos/matchmaker.jpg'

        #set the story file and picture

        this_story_file = storyDict.get(order_stories[count], {}).get('storyFile')
        this_story_pic = storyDict.get(order_stories[count], {}).get('pic')
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $this_perspective
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    ImageComponent image
      image [set every repeat] = $display_pic
      pos = (0, .5)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = 0.1
      pos = (0, -.7)
      startVal [time (s)] = 0.0
      text = (press space to continue)
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  Routine trial
    TextComponent text
      letterHeight = 0.1
      pos = (0, -.5)
      startVal [time (s)] = 0
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      text [set every repeat]:
        $storyText
    KeyboardComponent story_presses
      allowedKeys = '1','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    ImageComponent image_2
      image [set every repeat] = $this_story_pic
      pos = (0, .4)
      size = (1, 1)
      startVal [time (s)] = 0.0
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  Routine which_experiment
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        which experiment?

        (for experimenter)
    KeyboardComponent resp
      allowedKeys = 'l','s','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine test
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = $this_text
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = count.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('count', 1)]),
      OrderedDict([('count', 2)]),
      OrderedDict([('count', 3)]),
      OrderedDict([('count', 4)]),
      OrderedDict([('count', 5)]),
      OrderedDict([('count', 6)]),
      OrderedDict([('count', 7)]),
      OrderedDict([('count', 8)]),
      OrderedDict([('count', 9)]),
      OrderedDict([('count', 10)]),
      OrderedDict([('count', 11)]),
      OrderedDict([('count', 12)]),
      OrderedDict([('count', 13)]),
      OrderedDict([('count', 14)]),
      OrderedDict([('count', 15)]),
      OrderedDict([('count', 16)])]
    Routine perspective
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = $this_story_file
      loopType = sequential
      nReps = 1
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      Routine trial
    LoopTerminator trials_2
  LoopTerminator trials
