PsychoPy2experiment version="3.0.4"
Settings
  Completed URL = completedURL
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  expName = part1_subjective_segmentation
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Routines
  Routine trial
  Routine q2
    TextComponent text_10
      letterHeight = 0.1
      pos = (0, -.6)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $('B: ' + Q2)
    TextComponent text_11
      letterHeight = 0.15
      pos = (-.5, .25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $roleName
      wrapWidth = .5
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    ImageComponent image_6
      image [set every repeat] = $rolePic
      pos = (.25, .25)
      size = (0.85, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine q3
    TextComponent text_13
      letterHeight = 0.1
      pos = (0, -.6)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $('C: ' + Q3)
    TextComponent text_14
      letterHeight = 0.15
      pos = (-.5, .25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $roleName
      wrapWidth = .5
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    ImageComponent image_7
      image [set every repeat] = $rolePic
      pos = (.25, .25)
      size = (0.85, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine q4
    TextComponent text_15
      letterHeight = 0.1
      pos = (0, -.6)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $('D: ' + Q4)
    TextComponent text_16
      letterHeight = 0.15
      pos = (-.5, .25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $roleName
      wrapWidth = .5
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    ImageComponent image_8
      image [set every repeat] = $rolePic
      pos = (.25, .25)
      size = (0.85, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine q1
    TextComponent text_8
      letterHeight = 0.1
      pos = (0, -.6)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $('A: ' + Q1)
    TextComponent text_9
      letterHeight = 0.15
      pos = (-.5, .25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $roleName
      wrapWidth = .5
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    ImageComponent image_5
      image [set every repeat] = $rolePic
      pos = (.25, .25)
      size = (0.85, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end_of_intro
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = story reading
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    KeyboardComponent key_resp_7
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine shows_jobs
    ImageComponent image
      image [set every repeat] = $rolePic
      pos = (0, .25)
      size = (0.85, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.15
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      wrapWidth = 1.75
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      text [set every repeat]:
        $job
    CodeComponent code_2
      Code Type = Py
      Each Frame:
        if event.getKeys(['q']):
            trials_4.finished = True
            continueRoutine=False
  Routine final_test_intro
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Final Tests
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  Routine final_test_i
    ImageComponent image_2
      image [set every repeat] = $rolePic
      size = (0.85, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.15
      pos = (0, -.7)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $roleName
  Routine final_test_ii
  Routine trials_6
  Routine test_2
    CodeComponent set_text
      Code Type = Py
      Begin Routine:
        from psychopy import visual, core, event

        Q = np.array([Q1, Q2, Q3, Q4, D1, D2])
        correct = np.array([1,2,3,4,0,0], dtype=int)
        randperm = np.random.permutation(6)
        Q = Q[randperm]
        correct = correct[randperm]

        text1 = "1: " + Q[0]
        text2 = "2: " + Q[1]
        text3 = "3: " + Q[2]
        text4 = "4: " + Q[3]
        text5 = "5: " + Q[4]
        text6 = "6: " + Q[5]



        check = visual.ImageStim(win, 'checkmark.png')
        redx = visual.ImageStim(win, 'redx.png')

        thumbsup = visual.ImageStim(win, 'thumbsup.png')



        checkCount = 0
        test1 = 0
        test2 = 0
        test3 = 0
        test4 = 0
        test5 = 0
        test6 = 0
    TextComponent question1
      letterHeight = 0.1
      pos = (0, .60)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text1
      wrapWidth = 2
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    TextComponent question2
      letterHeight = 0.1
      pos = (0, .35)
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text [set every repeat]:
        $text2
    TextComponent question3
      letterHeight = 0.1
      pos = (0, .12)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text3
      wrapWidth = 2
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    TextComponent question4
      letterHeight = 0.1
      pos = (0, -.12)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text4
      wrapWidth = 2
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    TextComponent question5
      letterHeight = 0.1
      pos = (0, -.35)
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text [set every repeat]:
        $text5
    TextComponent question6
      letterHeight = 0.1
      pos = (0, -.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text6
      wrapWidth = 2
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    CodeComponent framecheck
      Code Type = Py
      Each Frame:
        #key press 1
        if event.getKeys(['1']):
            if correct[0] == (checkCount + 1):
                if test1 == 0:
                    test1 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #keypress 2
        if event.getKeys(['2']):
            if correct[1] == (checkCount + 1):
                if test2 == 0:
                    test2 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            elif correct[1] == 0:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #key press 3
        if event.getKeys(['3']):
            if correct[2] == (checkCount + 1):
                if test3 == 0:
                    test3 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #keypress 4
        if event.getKeys(['4']):
            if correct[3] == (checkCount + 1):
                if test4 == 0:
                    test4 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #key press 5
        if event.getKeys(['5']):
            if correct[4] == (checkCount + 1):
                if test5 == 0:
                    test5 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #keypress 6
        if event.getKeys(['6']):
            if correct[5] == (checkCount + 1):
                if test6 == 0:
                    test6 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False


        if event.getKeys(['q']):
            trials_7.finished = True
            trials_5.finished = True
            continueRoutine=False
        if checkCount == 4:
            thumbsup.draw()
            win.flip()
            core.wait(1)
            trials_7.finished= True
            continueRoutine = False
  Routine test
    CodeComponent set_text_2
      Code Type = Py
      Begin Routine:
        from psychopy import visual, core, event

        Q = np.array([Q1, Q2, Q3, Q4, D1, D2])
        correct = np.array([1,2,3,4,0,0], dtype=int)
        randperm = np.random.permutation(6)
        Q = Q[randperm]
        correct = correct[randperm]

        text1 = "1: " + Q[0]
        text2 = "2: " + Q[1]
        text3 = "3: " + Q[2]
        text4 = "4: " + Q[3]
        text5 = "5: " + Q[4]
        text6 = "6: " + Q[5]

        this_image = 'bar1.png'



        check = visual.ImageStim(win, 'checkmark.png')
        redx = visual.ImageStim(win, 'redx.png')

        thumbsup = visual.ImageStim(win, 'thumbsup.png')



        checkCount = 0
        test1 = 0
        test2 = 0
        test3 = 0
        test4 = 0
        test5 = 0
        test6 = 0
    TextComponent question1_2
      letterHeight = 0.08
      pos = (0, .70)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text1
      wrapWidth = 2
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    TextComponent question2_2
      letterHeight = 0.08
      pos = (0, .45)
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text [set every repeat]:
        $text2
    TextComponent question3_2
      letterHeight = 0.08
      pos = (0, .16)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text3
      wrapWidth = 2
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    TextComponent question4_2
      letterHeight = 0.08
      pos = (0, -.12)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text4
      wrapWidth = 2
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    TextComponent question5_2
      letterHeight = 0.08
      pos = (0, -.35)
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text [set every repeat]:
        $text5
    TextComponent question6_2
      letterHeight = 0.08
      pos = (0, -.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text6
      wrapWidth = 2
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    CodeComponent framecheck_2
      Code Type = Py
      Each Frame:
        if this_image == 'bar5.jpg':
            thumbsup.draw()
            win.flip()
            core.wait(1.5)
            trials.finished= True
            continueRoutine = False
        #key press 1
        if event.getKeys(['1']):
            if correct[0] == (checkCount + 1):
                if test1 == 0:
                    test1 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #keypress 2
        if event.getKeys(['2']):
            if correct[1] == (checkCount + 1):
                if test2 == 0:
                    test2 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #key press 3
        if event.getKeys(['3']):
            if correct[2] == (checkCount + 1):
                if test3 == 0:
                    test3 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #keypress 4
        if event.getKeys(['4']):
            if correct[3] == (checkCount + 1):
                if test4 == 0:
                    test4 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #key press 5
        if event.getKeys(['5']):
            if correct[4] == (checkCount + 1):
                if test5 == 0:
                    test5 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #keypress 6
        if event.getKeys(['6']):
            if correct[5] == (checkCount + 1):
                if test6 == 0:
                    test6 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False


        if event.getKeys(['q']):
            trials.finished = True
            trials_3.finished = True
            continueRoutine=False
        if checkCount == 4:
            this_image = 'bar5.jpg'

        if checkCount == 1:
            this_image = 'bar2.png'
        if checkCount == 2:
            this_image = 'bar3.jpg'
        if checkCount == 3:
            this_image = 'bar4.png'
    ImageComponent image_3
      image [set every frame] = $this_image
      pos = (0, -.85)
      size = (0.25, 0.125)
      startVal [time (s)] = 0.0
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  Routine intro_practicetest
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Please indicate the order in which the questions appear in the following quiz:
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine just_perspective
  Routine just_perspective_2
    TextComponent text_18
      letterHeight = 0.15
      pos = (-.5, .25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $roleName
      wrapWidth = .5
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    ImageComponent image_9
      image [set every repeat] = $rolePic
      pos = (.25, .25)
      size = (0.85, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test3
    CodeComponent set_text_3
      Code Type = Py
      Begin Routine:
        from psychopy import visual, core, event

        Q = np.array([Q1, Q2, Q3, Q4, D1, D2])
        correct = np.array([1,2,3,4,0,0], dtype=int)
        randperm = np.random.permutation(6)
        Q = Q[randperm]
        correct = correct[randperm]

        text1 = "1: " + Q[0]
        text2 = "2: " + Q[1]
        text3 = "3: " + Q[2]
        text4 = "4: " + Q[3]
        text5 = "5: " + Q[4]
        text6 = "6: " + Q[5]

        this_image = 'bar1.png'



        check = visual.ImageStim(win, 'checkmark.png')
        redx = visual.ImageStim(win, 'redx.png')

        thumbsup = visual.ImageStim(win, 'thumbsup.png')



        checkCount = 0
        test1 = 0
        test2 = 0
        test3 = 0
        test4 = 0
        test5 = 0
        test6 = 0
    TextComponent question1_3
      letterHeight = 0.08
      pos = (0, .70)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text1
      wrapWidth = 2
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    TextComponent question2_3
      letterHeight = 0.08
      pos = (0, .45)
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text [set every repeat]:
        $text2
    TextComponent question3_3
      letterHeight = 0.08
      pos = (0, .16)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text3
      wrapWidth = 2
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    TextComponent question4_3
      letterHeight = 0.08
      pos = (0, -.12)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text4
      wrapWidth = 2
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    TextComponent question5_3
      letterHeight = 0.08
      pos = (0, -.35)
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text [set every repeat]:
        $text5
    TextComponent question6_3
      letterHeight = 0.08
      pos = (0, -.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text6
      wrapWidth = 2
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    CodeComponent framecheck_3
      Code Type = Py
      Each Frame:
        if this_image == 'bar5.jpg':
            thumbsup.draw()
            win.flip()
            core.wait(1.5)
            trials.finished= True
            continueRoutine = False
        #key press 1
        if event.getKeys(['1']):
            if correct[0] == (checkCount + 1):
                if test1 == 0:
                    test1 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #keypress 2
        if event.getKeys(['2']):
            if correct[1] == (checkCount + 1):
                if test2 == 0:
                    test2 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #key press 3
        if event.getKeys(['3']):
            if correct[2] == (checkCount + 1):
                if test3 == 0:
                    test3 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #keypress 4
        if event.getKeys(['4']):
            if correct[3] == (checkCount + 1):
                if test4 == 0:
                    test4 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #key press 5
        if event.getKeys(['5']):
            if correct[4] == (checkCount + 1):
                if test5 == 0:
                    test5 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False

        #keypress 6
        if event.getKeys(['6']):
            if correct[5] == (checkCount + 1):
                if test6 == 0:
                    test6 = 1
                    checkCount += 1
                    check.draw()
                    win.flip()
                    core.wait(.15)
            else:
                redx.draw()
                win.flip()
                core.wait(1)
                continueRoutine = False


        if event.getKeys(['q']):
            trials_7.finished = True
            trials_5.finished = True
            continueRoutine=False
        if checkCount == 4:
            this_image = 'bar5.jpg'
            trials_7.finished = True

        if checkCount == 1:
            this_image = 'bar2.png'
        if checkCount == 2:
            this_image = 'bar3.jpg'
        if checkCount == 3:
            this_image = 'bar4.png'
    ImageComponent image_4
      image [set every frame] = $this_image
      pos = (0, -.85)
      size = (0.25, 0.125)
      startVal [time (s)] = 0.0
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  Routine segmentation_instructions
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructText
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    CodeComponent code_3
      Code Type = Py
      Each Frame:
        if event.getKeys(['q']):
            trials_8.finished = True
            continueRoutine=False
  Routine intro_2
    TextComponent welcome
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruct_text
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_12
      letterHeight = 0.1
      pos = (0, -.6)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $instruct_text2
    CodeComponent code
      Code Type = Py
      Each Frame:
        if event.getKeys(['q']):
            loop3.finished = True
            continueRoutine=False
  Routine intro
    TextComponent welcome_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruct_text
      wrapWidth = 1
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Py
      Each Frame:
        if event.getKeys(['q']):
            trials_2.finished = True
            continueRoutine=False
  Routine welcome_3
    TextComponent text_7
      letterHeight = 0.17
      startVal [time (s)] = 0.0
      text = Welcome to the Job Simulator Task!
      wrapWidth = 1.75
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Py
  Routine first_pic
    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_17
      letterHeight = 0.1
      pos = (0, .5)
      startVal [time (s)] = 0.0
      text = For each story, an image with the title of the story, character names, and character images, like the one below, will be presented on the screen while the sentences of the story appear below it. 
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    ImageComponent image_10
      image = intro_faces.jpg
      pos = (0, -.25)
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
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    TextComponent text_23
      letterHeight = 0.1
      pos = (0, -.8)
      startVal [time (s)] = 2
      text = Mary and Peter walked to the park as the dawn from on high broke upon them. 
      wrapWidth = 1
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  Routine second_pic
    TextComponent text_19
      letterHeight = 0.1
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      text = In the third part of the experiment, you will be presented with the images you saw while reading each story and asked to recall the story that went with each image.
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    KeyboardComponent key_resp_16
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_12
      image = intro_faces.jpg
      pos = (0, -.25)
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
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  Routine third_pic
    TextComponent text_20
      letterHeight = 0.1
      pos = (0, .5)
      startVal [time (s)] = 0.0
      text = You'll be prompted to the story you should be answering about by the same picture you saw during reading and recall. 
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    KeyboardComponent key_resp_17
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_13
      image = intro_faces.jpg
      pos = (0, -.25)
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
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  Routine first_pic_plus
    KeyboardComponent key_resp_18
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_21
      letterHeight = 0.1
      pos = (0, .5)
      startVal [time (s)] = 0.0
      text = For each story, an image like the one below will be presented on the screen while the sentences of the story appear below it. 
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    ImageComponent image_11
      image = intro_faces.jpeg
      pos = (0, -.5)
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
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    TextComponent text_22
      letterHeight = 0.1
      pos = (0, -.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Mary and Peter walked to the park as the sun rose. 
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  Routine rc_example1
    KeyboardComponent key_resp_19
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_14
      image = jobphotos/restaurant_critic.jpg
      pos = (0, -.5)
      size = (0.85, 0.75)
      startVal [time (s)] = 0.0
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    TextComponent text_24
      letterHeight = 0.1
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = For example, you may be asked to take on the role of a restaurant critic while reading one of the short stories. 
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  Routine instructbox
    KeyboardComponent key_resp_20
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_25
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = In this first part of the experiment, you'll also learn 4 questions associated with each perspective that you'll use when reading a short story with that particular perspective. 
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  Routine rc_example2
    KeyboardComponent key_resp_21
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_15
      image = jobphotos/restaurant_critic.jpg
      pos = (0, -.5)
      size = (0.85, 0.75)
      startVal [time (s)] = 0.0
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    TextComponent text_26
      letterHeight = 0.1
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = For example, 2 of the questions associated with the restaurant critic may be "What are the menus like?" and "What do the clients order?" and we encourage you to keep these questions in mind while reading the story. 
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Flow
  Routine welcome_3
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = new_instructions_1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('instruct_text', 'In this experiment, you will be assuming the perspectives of various jobs while reading short stories.')]),
      OrderedDict([('instruct_text', 'There are 4 parts of the experiment. ')]),
      OrderedDict([('instruct_text', "In the first part, you'll be introduced to the perspectives of 8 different jobs.")]),
      OrderedDict([('instruct_text', "You'll learn 4 questions associated with each perspective that you'll use when reading the stories. ")]),
      OrderedDict([('instruct_text', 'These 4 questions are learned with quizzes for each perspective.')]),
      OrderedDict([('instruct_text', 'In the second part of the experiment, you will read 8 short stories. ')])]
    Routine intro
  LoopTerminator trials_2
  Routine rc_example1
  Routine instructbox
  Routine rc_example2
  LoopInitiator trials_13 loopType="TrialHandler"
    conditionsFile = new_instructions_7.xlsx
    loopType = sequential
    nReps = 1
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    Routine intro
  LoopTerminator trials_13
  Routine first_pic
  LoopInitiator trials_9 loopType="TrialHandler"
    conditionsFile = new_instructions_2.xlsx
    loopType = sequential
    nReps = 1
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    Routine intro
  LoopTerminator trials_9
  Routine second_pic
  LoopInitiator trials_10 loopType="TrialHandler"
    conditionsFile = new_instructions_3.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('instruct_text', 'There is a 5 minute time limit for recalling each story. ')]),
      OrderedDict([('instruct_text', 'In the fourth part of the experiment, you will be asked questions about each story. ')])]
    Routine intro
  LoopTerminator trials_10
  Routine third_pic
  LoopInitiator trials_11 loopType="TrialHandler"
    conditionsFile = new_instructions_4.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('instruct_text', 'Questions?')]),
      OrderedDict([('instruct_text', "Let's begin Part 1! ")]),
      OrderedDict([('instruct_text', 'The 8 perspectives are as follows:')])]
    Routine intro
  LoopTerminator trials_11
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = jobsPics.xlsx
    loopType = random
    nReps = 1
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    Routine shows_jobs
  LoopTerminator trials_4
  LoopInitiator trials_12 loopType="TrialHandler"
    conditionsFile = new_instructions_5.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('instruct_text', 'You’ll become acquainted with these perspectives more in the following quizzes where you’ll learn the questions associated with each perspective. ')]),
      OrderedDict([('instruct_text', "For each perspective, you'll go through all four questions in sequence. ")]),
      OrderedDict([('instruct_text', "Then you'll get the quiz and indicate which questions you saw in the order in which they appeared in sequence. ")]),
      OrderedDict([('instruct_text', "You'll indicate the question you select by pressing the number key corresponding to the number in front of the question. ")]),
      OrderedDict([('instruct_text', "If you indicate the wrong question during the quiz, you'll get the questions presented in the correct order again and restart the quiz. ")]),
      OrderedDict([('instruct_text', "After you've passed the quizzes for each perspective, you'll do all of the quizzes a final time but without seeing the correct order of the questions beforehand.")]),
      OrderedDict([('instruct_text', 'Press space to begin the quizzes!')])]
    Routine intro
  LoopTerminator trials_12
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = whichRole.xlsx
    loopType = random
    nReps = 1
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    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = 5
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      Routine just_perspective_2
      Routine q1
      Routine q2
      Routine q3
      Routine q4
      Routine intro_practicetest
      Routine test
    LoopTerminator trials
  LoopTerminator trials_3
  Routine final_test_intro
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = whichRole.xlsx
    loopType = sequential
    nReps = 1
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    LoopInitiator trials_7 loopType="TrialHandler"
      loopType = random
      nReps = 5
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      Routine final_test_i
      Routine test3
    LoopTerminator trials_7
  LoopTerminator trials_5
  LoopInitiator trials_8 loopType="TrialHandler"
    conditionsFile = new_instructions_6.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('instruct_text', 'Great job! You’ve finished the quizzes and Part 1. Please notify the researcher that you have finished. ')]),
      OrderedDict([('instruct_text', "Let's begin Part 2! ")]),
      OrderedDict([('instruct_text', 'You are about to begin the second part of the experiment where you will read short stories. ')]),
      OrderedDict([('instruct_text', 'The stories will be presented to you sentence by sentence, such that each sentence is read individually. ')]),
      OrderedDict([('instruct_text', "As a reminder, you'll be assigned a perspective and given the corresponding quiz before each story. ")]),
      OrderedDict([('instruct_text', 'IMPORTANT! While reading each story, you will additionally have to make a judgement about each sentence in order to advance to the next sentence. ')]),
      OrderedDict([('instruct_text', 'Some people feel that the stories have natural “parts.” we want you to make a judgement about when you think the story has transitioned from one “part” to another. ')]),
      OrderedDict([('instruct_text', 'Please press “9” if you think the sentence you are reading has begun a new “part” of the story. ')]),
      OrderedDict([('instruct_text', 'For example, you should press “9” at the beginning of a story and when you think a different “part” in the story is beginning. ')]),
      OrderedDict([('instruct_text', 'Please press “1” if you think the sentence is in the same “part” as the sentence before. ')])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
    Routine intro
  LoopTerminator trials_8
  Routine end_of_intro
