PsychoPy2experiment version="3.0.4"
Settings
  Completed URL = completedURL
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  expName = test_audio_exp
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Routines
  Routine trial
    ImageComponent image
      image = storypics/11_storypic.jpg
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent sound_1
      sound = stimrecordings/11.2
      startVal [time (s)] = 0.0
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  Routine Intro
    TextComponent text
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      text = When you are ready to begin Story 1 press the button
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Intro
  Routine trial
