PsychoPy2experiment version="3.0.0b11"
Settings
  Completed URL = completedURL
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = test2
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Routines
  Routine trial
  Routine d
    TextComponent text_8
      letterHeight = 0.1
      pos = (0, -.4)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $thisQuestion
    TextComponent text_9
      letterHeight = 0.1
      pos = (-.25, .25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $roleName
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    ImageComponent image_5
      image [set every repeat] = $rolePic
      pos = (.25, .25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial
