PsychoPy2experiment version="3.0.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = test65
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $count
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        count = 1
      Begin Routine:
        count = count + 1
Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
