PsychoPy2experiment version="3.0.0b11"
Settings
  Completed URL = completedURL
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = test_audio_exp
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Routines
  Routine trial
    ImageComponent image
      image = storypics/11_storypic.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent sound_1
      sound = stimrecordings/11_finaltrack.wav
      startVal [time (s)] = 0.0
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Flow
  Routine trial
