PsychoPy2experiment version="3.0.0b11"
Settings
  Completed URL = completedURL
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = test_reading_xlsx
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = n or p?
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    CodeComponent code
      Code Type = Py
      Each Frame:
        if event.getKeys(['n']):
            this_story = 'n_story.xlsx'
            continueRoutine =False
        if event.getKeys(['p']):
            this_story = 'p_story.xlsx'
            continueRoutine =False
  Routine read_story
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $storyText
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Flow
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine trial
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $this_story
      loopType = sequential
      nReps = 1
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      Routine read_story
    LoopTerminator trials
  LoopTerminator trials_2
