PsychoPy2experiment version="3.0.0b11"
Settings
  Completed URL = completedURL
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = test_textbox
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        import numpy as np

        a = np.zeros(shape = [4, 4], dtype = int)

        s_order = np.array([10, 20, 30, 40], dtype = int)

        l_order = np.array([1,2,3,4], dtype = int)


        np.random.shuffle(s_order)
        np.random.shuffle(l_order)

        a[0] += s_order[0]
        a[1] += s_order[1]
        a[2] += s_order[2]
        a[3] += s_order[3]

        a[:,0] += l_order[0]
        a[:,1] += l_order[1]
        a[:, 2] += l_order[2]
        a[:, 3] += l_order[3]

        run1 = np.array([a[0,0], a[1,1], a[2,0], a[3,1], a[0,2], a[1,3], a[2,2], a[3,3]])
        run2 = np.array([a[0,1], a[1,0], a[2,1], a[3,0], a[0,3], a[1,2], a[2,3], a[3,2]])
        order_run1 = np.array(['Location', 'Location', 'Social', 'Social', 'Social', 'Social', 'Location', 'Location'])
        order_run2 = np.array(['Location', 'Location', 'Social', 'Social', 'Social', 'Social', 'Location', 'Location'])

        randperm1 = np.random.permutation(8)
        randperm2 = np.random.permutation(8)

        run1 = run1[randperm1]
        run2 = run2[randperm2]
        order_run1 = order_run1[randperm1]
        order_run2 = order_run2[randperm2]



        #create a dictionary for all the stories and their values

        storyDict = {11: {'name':'Restaurant Breakup', 'Social': 'Couples Therapist', 'Location':'Restaurant Critic', 'pic':'storypics/11_storypic', 'storyFile': 'story_xlsx_files/11.xlsx'},
                     12: {'name':'Airport Breakup', 'Social': 'Couples Therapist', 'Location':'Airport Customer Experience Manager', 'pic':'storypics/12_storypic', 'storyFile': 'story_xlsx_files/12.xlsx'},
                     13: {'name':'Grocery Shopping- Break up', 'Social':'Couples Therapist', 'Location': 'Grocery Store Customer Experience Manager', 'pic':'storypics/13_storypic', 'storyFile': 'story_xlsx_files/13.xlsx'},
                     14: {'name':'Attending a Lecture-Breakup', 'Social':'Couples Therapist', 'Location': 'Dean of Academic Studies', 'pic':'storypics/14_storypic', 'storyFile': 'story_xlsx_files/14.xlsx'},
                     21: {'name':'Restaurant Proposal', 'Social': 'Wedding Planner', 'Location': 'Restaurant Critic', 'pic':'storypics/21_storypic', 'storyFile': 'story_xlsx_files/21.xlsx'},
                     22: {'name':'Airport Proposal', 'Social': 'Wedding Planner', 'Location':'Airport Customer Experience Manager', 'pic':'storypics/22_storypic', 'storyFile': 'story_xlsx_files/22.xlsx'},
                     23: {'name':'Grocery Shopping- Proposal', 'Social': 'Wedding Planner', 'Location':'Grocery Store Customer Experience Manager', 'pic':'storypics/23_storypic', 'storyFile': 'story_xlsx_files/23.xlsx'},
                     24: {'name':'Attending a Lecture-Proposal', 'Social': 'Wedding Planner', 'Location': 'Dean of Academic Studies', 'pic':'storypics/24_storypic', 'storyFile': 'story_xlsx_files/24.xlsx'},
                     31: {'name':'Restaurant Business Deal', 'Social':'Business Reporter', 'Location':'Restaurant Critic', 'pic':'storypics/31_storypic', 'storyFile': 'story_xlsx_files/31.xlsx'},
                     32: {'name':'Airport Business Deal', 'Social':'Business Reporter', 'Location':'Airport Customer Experience Manager', 'pic':'storypics/32_storypic', 'storyFile': 'story_xlsx_files/32.xlsx'},
                     33: {'name':'Grocery Shopping- Business Deal', 'Social':'Business Reporter', 'Location':'Grocery Store Customer Experience Manager', 'pic':'storypics/33_storypic', 'storyFile': 'story_xlsx_files/33.xlsx'},
                     34: {'name':'Attending a Lecture-Business Deal', 'Social':'Business Reporter', 'Location':'Dean of Academic Studies', 'pic':'storypics/34_storypic', 'storyFile': 'story_xlsx_files/34.xlsx'},
                     41: {'name':'Restaurant Meet Cute', 'Social': 'Matchmaker', 'Location':'Restaurant Critic', 'pic':'storypics/41_storypic', 'storyFile': 'story_xlsx_files/41.xlsx'},
                     42: {'name':'Airport Meet Cute', 'Social': 'Matchmaker', 'Location':'Airport Customer Experience Manager', 'pic':'storypics/42_storypic', 'storyFile': 'story_xlsx_files/42.xlsx'},
                     43: {'name':'Grocery Shopping- Meet Cute', 'Social':'Matchmaker', 'Location': 'Grocery Store Customer Experience Manager', 'pic':'storypics/43_storypic', 'storyFile': 'story_xlsx_files/43.xlsx'},
                     44: {'name':'Attending a Lecture-Meet Cute', 'Social':'Matchmaker', 'Location': 'Dean of Academic Studies', 'pic':'storypics/44_storypic', 'storyFile': 'story_xlsx_files/44.xlsx'}}

        order_stories = np.concatenate((run1, run2), axis =None)
        order_perspectives = np.concatenate((order_run1, order_run2), axis = None)

        #create complementary perspectives list for non-primed questions
        other_perspectives = []

        for i in range(0,16):
            if order_perspectives[i] == 'Social':
                other_pespectives = other_perspectives.append('Location')
            else:
                other_pespectives = other_perspectives.append('Social')

        thisExp.addData('order of stories', order_stories)
        thisExp.addData('order of perspectives', order_perspectives)
  Routine recall
    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        cursorCounter=0
        cursorVariable='|'
        captured_string=''
        subject_response_finished=False
        shift_flag = True
        text_10.alignHoriz ='left'
        text_10.alignVert = 'top'
        text_10.wrapWidth = 1.8
        text_10.height = .05

        this_recall_pic = storyDict.get(order_stories[count], {}).get('pic')
      Each Frame:
        if subject_response_finished:
            final_response=captured_string
            continueRoutine=False
        for key in event.getKeys():
            if key in ['tab']:
                trials_4.finished = 1
                continueRoutine = False
            if key in ['escape']:
                core.quit()
            elif key in ['delete','backspace']:
                captured_string = captured_string[:-1]
            elif key in ['return']:
                thisExp.addData('recall', captured_string)
                subject_response_finished=True
            elif key in ['space']:
                captured_string = captured_string+' '
            elif key in ['period']:
                captured_string = captured_string+'.'
            elif key in ['dollar']:
                captured_string = captured_string + '$'
            elif key in ['exclamation']:
                captured_string = captured_string + '!'
            elif key in ['lshift', 'rshift']:
                shift_flag = True
            elif key in ['comma']:
                captured_string = captured_string+','
            elif key in ['apostrophe']:
                captured_string = captured_string+"'"
            elif key in ['slash']:
                captured_string = captured_string+'/'
            elif key in ['semicolon']:
                captured_string = captured_string + ';'
            elif key in ['option']:
                captured_string = captured_string
            elif key in ['lshift','rshift']:
                shift_flag = True
            elif key in ['minus']:
                captured_string = captured_string+'-'
            elif key in ['up','down','left','right','return']:
                pass
            else:
                captured_string = captured_string+key
            # this next line formats the output. you can remove or modify as necessary
            captured_string=captured_string.capitalize()
    TextComponent text_9
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Type everything you recall here (press return to submit your response):
      wrapWidth = 1.5
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    TextComponent text_10
      letterHeight = 0.1
      pos = [-.9, -0.15]
      startVal [time (s)] = 0.0
      text [set every frame] = $captured_string
      wrapWidth = 1
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    ImageComponent image_4
      image [set every repeat] = $this_recall_pic
      pos = (0, .5)
      size = (.75, .75)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      pos = (0, -.125)
      shape = line
      size = (1.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent bottom_line
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      pos = (0, -.975)
      shape = line
      size = (1.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent right_line_2
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      ori = 90
      pos = (.925, -.55)
      shape = line
      size = (.85, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent left_line
      fillColor = $[128,128,128]
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      lineWidth = 20
      ori = 90
      pos = (-.925, -.55)
      shape = line
      size = (.85, 1)
      startVal [time (s)] = 0.0
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Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = count.xlsx
    loopType = sequential
    nReps = 1
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    Routine recall
  LoopTerminator trials
