PsychoPy2experiment version="3.0.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = testtimer
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Routines
  Routine trial
    ImageComponent image
      image = leonardo.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        countdownClock = core.CountdownTimer(100) # 100 s = 5 minutes
        countdownStarted = True
        timeText = '6:00'
      Each Frame:
        timeRemaining = countdownClock.getTime()
        if timeRemaining <= 0.0:
            continueRoutine = False
        else:
            minutes = int(timeRemaining/60.0) # the integer number of minutes
            seconds = int(timeRemaining - (minutes * 60.0))
            timeText = str(minutes) + ':' + str(seconds) # create a string of characters representing the time
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every frame] = $timeText
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  Routine next
    ImageComponent image_2
      image = cloisters.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine trial
  Routine next
