PsychoPy2experiment version="3.0.0b11"
Settings
  Completed URL = completedURL
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = try1
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Routines
  Routine routine_2
    TextComponent text_3
      letterHeight = 0.1
      pos = (0, -.75)
      startVal [time (s)] = 0.0
      text = When Sadie entered, she found him deep in thought on a bench by the door.
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image = /Users/alexreblando/Documents/ebs_images/AB_2.jpg
      size = (1, 1)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
  Routine rb_opening
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        your role: Restuarant Critic
    ImageComponent image
      image = /Users/alexreblando/Documents/ebs_images/AB.jpg
      size = (1, 1)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 4
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  Routine routine_1
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Thomas got to the restaurant early, dreading the conversation he was about to have.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine routine_3
    ImageComponent image_3
      image = /Users/alexreblando/Documents/ebs_images/AB_2.jpg
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.1
      pos = (0, -.75)
      startVal [time (s)] = 0.0
      text = The restaurant had a kitschy charm, and was reminiscent of a diner from the 70’s. 
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  Routine routine_4
    TextComponent text_5
      letterHeight = 0.1
      pos = (0, -.75)
      startVal [time (s)] = 0.0
      text = When Thomas noticed Sadie, he jumped up and gave her a side hug.
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_4
      image = /Users/alexreblando/Documents/ebs_images/AB_3.jpg
      size = (1, 1)
      startVal [time (s)] = 0.0
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  Routine routine_5
Flow
  Routine rb_opening
  Routine routine_1
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine routine_2
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 5
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      Routine routine_3
    LoopTerminator trials
  LoopTerminator trials_2
  Routine routine_4
  Routine routine_5
