PsychoPy2experiment version="3.0.0b11"
Settings
  Completed URL = completedURL
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = iMac
  Screen = 1
  Units = use prefs
  Window size (pixels) = [2560, 1440]
  expName = try2
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Routines
  Routine routine_2
    TextComponent text_3
      letterHeight = 0.1
      pos = (0, -.75)
      startVal [time (s)] = 0.0
      text = When Sadie entered, she found him deep in thought on a bench by the door.
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image = /Users/alexreblando/Documents/GitHub/ebs/AB.jpg
      size = (1, 1)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
  Routine rb_opening
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        You will assume 8 different roles today while reading various stories.

        These roles will be as follows:





        (press the space bar to continue)
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine routine_1
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Thomas got to the restaurant early, dreading the conversation he was about to have.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine routine_3
    ImageComponent image_3
      image = /Users/alexreblando/Documents/GitHub/ebs/AB.jpg
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.1
      pos = (0, -.75)
      startVal [time (s)] = 0.0
      text = The restaurant had a kitschy charm, and was reminiscent of a diner from the 70’s. 
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  Routine routine_4
    TextComponent text_5
      letterHeight = 0.1
      pos = (0, -.75)
      startVal [time (s)] = 0.0
      text = When Thomas noticed Sadie, he jumped up and gave her a side hug.
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_4
      image = /Users/alexreblando/Documents/GitHub/ebs/AB_3.jpg
      size = (1, 1)
      startVal [time (s)] = 0.0
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  Routine intro
    TextComponent welcome
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruct_text
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_12
      letterHeight = 0.1
      pos = (0, -.25)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $instruct_text2
  Routine restaurant_critic
    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        scale = 0.7

        from psychopy import visual, core, event

        faceRGB = visual.ImageStim(win, 'restaurant_critic.jpg')
        faceRGB.pos += (0, .25)
        txt = visual.TextStim(win, text = 'Restaurant Critic')
        txt.pos += (0, -.25)
        faceRGB.size *= scale * 1.75  # scale the image relative to initial size


        win.mouseVisible = False

        txt.draw()
        faceRGB.draw()
        win.flip()
        event.waitKeys(keyList=['space'])
        continueRoutine = False
  Routine airport_customer_experience_manager_2
    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        scale = 0.7

        from psychopy import visual, core, event

        faceRGB = visual.ImageStim(win, 'acem.jpg')
        faceRGB.pos += (0, .25)
        txt = visual.TextStim(win, text = 'Airport Customer Experience Manager')
        txt.pos += (0, -.25)
        faceRGB.size *= scale * 1.5  # scale the image relative to initial size


        win.mouseVisible = False

        txt.draw()
        faceRGB.draw()
        win.flip()
        event.waitKeys(keyList=['space'])
        continueRoutine = False
    KeyboardComponent key_resp_12
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Grocery_Store_Customer_Experience_Manager
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        trialClock = core.Clock()
        scale = 0.7

        from psychopy import visual, core, event

        txt = visual.TextStim(win, text='Grocery Store Costumer Experience Manager')
        txt.pos += (0, -.25)
        faceRGB = visual.ImageStim(win, 'gscem.jpg')
        faceRGB.pos += (0, .25)
        faceRGB.size *= scale  * 1.75 # scale the image relative to initial size

        win.mouseVisible = False
        txt.draw()
        faceRGB.draw()
        win.flip()
        event.waitKeys(keyList=['space'])
        continueRoutine = False
  Routine Dean_of_Academic_Studies
    CodeComponent code_9
      Code Type = Py
      Begin Routine:
        scale = 0.7

        from psychopy import visual, core, event

        faceRGB = visual.ImageStim(win, 'dean.jpg')
        faceRGB.pos += (0, .25)
        txt = visual.TextStim(win, text = 'Dean of Academic Studies')
        txt.pos += (0, -.25)
        faceRGB.size *= scale * 1.75  # scale the image relative to initial size


        win.mouseVisible = False

        txt.draw()
        faceRGB.draw()
        win.flip()
        event.waitKeys(keyList=['space'])
        continueRoutine = False
  Routine Couples_Therapist
    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        scale = 0.7

        from psychopy import visual, core, event

        faceRGB = visual.ImageStim(win, 'couples.jpg')
        faceRGB.pos += (0, .25)
        txt = visual.TextStim(win, text = 'Couples Therapist')
        txt.pos += (0, -.25)
        faceRGB.size *= scale * 1  # scale the image relative to initial size


        win.mouseVisible = False

        txt.draw()
        faceRGB.draw()
        win.flip()
        event.waitKeys(keyList=['space'])
        continueRoutine = False
  Routine Wedding_Planner
    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        scale = 0.7

        from psychopy import visual, core, event

        faceRGB = visual.ImageStim(win, 'weddingplanner.jpg')
        faceRGB.pos += (0, .25)
        txt = visual.TextStim(win, text = 'Wedding Planner')
        txt.pos += (0, -.25)
        faceRGB.size *= scale * .3  # scale the image relative to initial size


        win.mouseVisible = False

        txt.draw()
        faceRGB.draw()
        win.flip()
        event.waitKeys(keyList=['space'])
        continueRoutine = False
  Routine Business_Reporter
    CodeComponent code_8
      Code Type = Py
      Begin Routine:
        scale = 0.7

        from psychopy import visual, core, event

        faceRGB = visual.ImageStim(win, 'business_reporter.jpg')
        faceRGB.pos += (0, .25)
        txt = visual.TextStim(win, text = 'Business Reporter')
        txt.pos += (0, -.25)
        faceRGB.size *= scale * 1.5  # scale the image relative to initial size


        win.mouseVisible = False

        txt.draw()
        faceRGB.draw()
        win.flip()
        event.waitKeys(keyList=['space'])
        continueRoutine = False
  Routine MatchMaker
    CodeComponent code_7
      Code Type = Py
      Begin Routine:
        scale = 0.7

        from psychopy import visual, core, event

        faceRGB = visual.ImageStim(win, 'matchmaker.jpg')
        faceRGB.pos += (0, .25)
        txt = visual.TextStim(win, text = 'Matchmaker')
        txt.pos += (0, -.25)
        faceRGB.size *= scale * 1.5  # scale the image relative to initial size


        win.mouseVisible = False

        txt.draw()
        faceRGB.draw()
        win.flip()
        event.waitKeys(keyList=['space'])
        continueRoutine = False
  Routine intro_questions
    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $instruct_text
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine role_questions
    TextComponent text_8
      letterHeight = 0.1
      pos = (0, -.4)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $thisQuestion
    TextComponent text_9
      letterHeight = 0.1
      pos = (-.25, .25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $roleName
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    ImageComponent image_5
      image [set every repeat] = $rolePic
      pos = (.25, .25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine RB_story
    TextComponent text_7
      letterHeight = 0.1
      pos = (0, -.25)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $storyText
    ImageComponent image
      image = AB_3.jpg
      pos = (0, .25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine roles_sum
  Routine narrative_intro
    TextComponent text_10
      letterHeight = 0.1
      pos = (0, -.25)
      startVal [time (s)] = 0.0
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      text:
        Questions:
        1. How does the person who is initiating the breakup feel before they do it?
         2. Why does the initiator want to break up?  3. How does the person being broken up with respond?  4. Do the partners leave on good terms?
    ImageComponent image_6
      image = couples.jpg
      pos = (.25, .3)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_11
      letterHeight = 0.1
      pos = (-.25, .3)
      startVal [time (s)] = 0.0
      text = Role:  Couples Therapist
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Flow
  Routine intro
  Routine restaurant_critic
  Routine airport_customer_experience_manager_2
  Routine Grocery_Store_Customer_Experience_Manager
  Routine Couples_Therapist
  Routine Wedding_Planner
  Routine MatchMaker
  Routine Business_Reporter
  Routine Dean_of_Academic_Studies
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = instructions.xlsx
    loopType = sequential
    nReps = 1
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    Routine intro_questions
  LoopTerminator trials
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = whichRole.xlsx
    loopType = sequential
    nReps = 1
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    LoopInitiator trials_3 loopType="TrialHandler"
      conditionsFile = $thisRole
      loopType = sequential
      nReps = 1
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      Routine role_questions
    LoopTerminator trials_3
  LoopTerminator trials_4
  Routine narrative_intro
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = story1.xlsx
    loopType = sequential
    nReps = 1
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    Routine RB_story
  LoopTerminator trials_2
